config:
  title: High-Througput-Culturing
  description: A workflow that does x, y and z
  copyright: My Organization
  version: 0.0.1
  authors: [{name: First Last, affiliation: A Place}]
  maintainer: {name: Cannon Mallory, email: malloc3@uw.edu}
  acknowledgements: [{name: First Last, affiliation: A Place}]
  github: {user: malloc3, repo: Aquarim-High-Throughput-Culturing}
  aquadoc_version: 1.0.2
  aquarium_version: <%= Bioturk::Application.config.aquarium_version %>
object_types:
  - {name: Eppendorf 96 Deepwell Plate, description: Eppendorf 96 Deepwell Plate, handler: collection, data: {"working_vol": "1000_uL", "max_vol": "1.2_mL" }, unit: plate, release_method: return, rows: 8, columns: 12}
  - {name: 24 Unit Disorganized Collection, description: A collection of timepoint samples with 15 possible slots, handler: collection, data: {"working_vol": "1000_uL", "max_vol": "1.2_mL" }, unit: plate, release_method: return, rows: 8, columns: 3}
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operation_type: Apply Experimental Condition
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culture Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: sample, role: output, name: Experimental Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: string, role: input, name: Experimental Condition, choices: Media,Antibiotic(s),Inducer(s),Option(s)}
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documentation:
This operation takes in a culture plate collection applies a reagent, timestamps the collection, and passes it as an output. The operation uses the experimental condition chosen by the user as a key. The key is then used to generate data structures for displaying specific wells in a collection. Furthermore, the key is also used to fetch how much volume of the experimental condition item (ie: inducers or antibiotics) each well requires. Future directions may be to include using the Option(s) key to apply custom experimental conditions (ie: Ethanol, Cellular Stain). The option(s) parameter can be input into the Define Culture Conditions operation as a JSON parsable object.

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 07/09/19

needs "Standard Libs/Debug"
needs "Tissue Culture Libs/CollectionDisplay"
needs "High Throughput Culturing/CultureComposition"
needs "High Throughput Culturing/HighThroughputHelper"

class Protocol
  include Debug
  include CollectionDisplay
  include HighThroughputHelper
  
  # DEF
  INPUT = "Culture Plate"
  OUTPUT = "Experimental Plate"
  EXPERIMENTAL_CONDITION = "Experimental Condition"

  def intro
    show do
      title "Apply Experimental Condition"
      separator
      note "This protocol will guide you through applying an experiment condition (ie: Inducer(s), Antibiotic(s), etc...) to a high throughput plate."
      note ""
      note "<b>1.</b> Gather materials for experiment."
      note "<b>2.</b> Fill a multichannel stripwell with input items."
      note "<b>3.</b> Using a multichannel pipette, transfer from the multichannel stripwell to the collection."
      note "<b>4.</b> Label with condition applied and the date & time."
      note "<b>5.</b> Incubate."
    end
  end
  
  def main
    intro
    clean_up_array = []
    operations.each do |op|
      experimental_condition = op.input(EXPERIMENTAL_CONDITION).val
      op = Operation.find(178796) if debug
      op.input_array(INPUT).collections.each_with_index do |collection, idx|
        collection_associations = AssociationMap.new(collection)
        part_data_matrix = get_part_data_matrix(collection_associations)
        # experimental condition input items taken from attributes associated to collection parts
        item_id_to_rc_list = get_item_id_to_rc_list(part_data_matrix: part_data_matrix, experimental_condition: experimental_condition)
        show {note "<b>In the follow steps gather #{experimental_condition} and let thaw at room temperature."} unless item_id_to_rc_list.empty?
        input_items = Item.find(item_id_to_rc_list.keys.map {|i| i.to_i}); take input_items, interactive: true; clean_up_array.push(input_items)
        item_id_to_rc_list.each do |item_id, rc_to_volume|
          experimental_component_item = Item.find(item_id)
          if experimental_condition == "Option(s)"
            optional_item = Item.find(item_id)
            show do
              title "Optional Experimental Condition"
              separator
              note "Using the following slides to guide yourself in setting up the optional parameters of this experiment."
              table highlight_alpha_rc(collection, rc_to_volume.keys){|r,c| "#{optional_item.sample.name}\n#{rc_to_volume[[r,c]][:qty]}\n#{rc_to_volume[[r,c]][:units]}"}
            end
          else
            total_working_volume = get_total_item_working_volume(rc_to_volume) 
            if total_working_volume[:qty] > 0
              show do
                title "Dispense item #{item_id} into #{collection} #{collection.object_type.name}"
                separator
                note "<b>For the next step you will need:</b>"
                bullet "#{(total_working_volume[:qty]).round(3)}#{total_working_volume[:units]} of #{experimental_component_item.sample.name} #{experimental_component_item.object_type.name}"
                note "<b>Follow the table below to dispense the appropriate amount of item #{item_id} into the #{collection.object_type.name}:</b>"
                table highlight_alpha_rc(collection, rc_to_volume.keys) {|r,c| 
                  wk_volume = rc_to_volume[[r,c]]
                  "#{wk_volume.fetch(:qty)}#{wk_volume.fetch(:units)}"
                }
              end
            end
          end
        end
        associate_applied_condition(collection_associations: collection_associations, experimental_condition: experimental_condition)
        op.output_array(OUTPUT)[idx].set collection: collection
      end
    end
    clean_up(item_arr: clean_up_array.flatten.uniq)
  end # main

  def get_part_data_matrix(collection_associations)
    return collection_associations.instance_variable_get(:@map).select {|key| key == 'part_data' }.values.first
  end
  
  def associate_applied_condition(collection_associations:, experimental_condition:)
    applied_conditions = collection_associations.get('applied_conditions') 
    if applied_conditions
      applied_conditions.push({experimental_condition: experimental_condition, time: timestamp})
    else
      applied_conditions = [{experimental_condition: experimental_condition, time: timestamp}]
    end
    collection_associations.put(key='applied_conditions', value=applied_conditions)
    collection_associations.save
  end
  
  def display_multichannel_stripwell(sw, sw_vol_mat, rc_list, item_id, total_working_volume)
    show do
      title "Aliquot #{item_id} into Multichannel Stripwell"
      separator
      note "Follow the table below to aliquot #{item_id} into a multichannel format:"
      table highlight_alpha_rc(sw, rc_list) {|r,c| "#{sw_vol_mat[r][c]}#{total_working_volume[:units]}"}
      bullet "If this buffer has an enzyme keep stripwell on ice (ie: qPCR Master Mix)"
    end
  end
  
  def timestamp
    timepoint = Time.now()
    day = timepoint.strftime "%m%d%Y"
    hour = timepoint.strftime "%H%M"
    return "#{day} - #{hour}"
  end
  
  def make_multichannel_stripwell(collection:, rc_to_volume:)
    # Create a stripwell to display
    sw = produce new_collection 'Stripwell'
    # Create a matrix the size of the stripwell
    sw_vol_mat = Array.new(sw.object_type.rows) { Array.new(sw.object_type.columns) {0} }
    rc_to_volume.keys.each {|r, c| sw_vol_mat[0][r] += rc_to_volume.fetch([r,c]).fetch(:qty) }
    rc_list = []
    sw_vol_mat.each_with_index {|stripwell, r_i| 
      stripwell.each_with_index {|well_vol, w_idx| rc_list.push([0, w_idx]) if (well_vol > 0) }
    }
    return sw, sw_vol_mat, rc_list
  end
  
  # TODO: how to handle changing units and adding - use HighThroughputHelper.unit_conversion_hash
  def get_total_item_working_volume(rc_to_volume)
    total_working_volume = {qty: 0, units: MICROLITERS}
    rc_to_volume.values.each do |wk_volume| 
      if wk_volume.fetch(:units) == total_working_volume.fetch(:units)
        total_working_volume[:qty] += wk_volume[:qty]
      else 
        raise 'not the same units!!'
      end
    end
    return total_working_volume
  end
    
  def get_item_id_to_rc_list(part_data_matrix:, experimental_condition:)
    item_id_to_rc_list = Hash.new()
    if experimental_condition != "Option(s)"
        part_data_matrix.each_with_index do |row, r_i|
          row.each_with_index do |part_data, c_i|
            culture_component = part_data.fetch(experimental_condition, {})
            culture_component.each do |sname, attributes|
              item_id   = attributes.fetch(:item_id)
              wk_volume = attributes.fetch(:working_volume)
              (item_id_to_rc_list.keys.include? item_id) ? item_id_to_rc_list[item_id].merge!({[r_i, c_i]=>wk_volume}) : item_id_to_rc_list[item_id] = {[r_i, c_i]=>wk_volume}
            end
          end
        end
    else
      option_items_hash = {}
      available_option_keys = part_data_matrix.map {|row| row.map {|part| part.fetch(experimental_condition, {}) } }.flatten.uniq.reject{|part| part.empty? }.map {|part| part.keys.first}.uniq 
      option_key = show do
        title "Choose the key of what you would like to apply"
        select available_option_keys, var: 'option', label: "Select what experimental condition you want to apply in this operation.", default: 0
      end
      part_data_matrix.each_with_index do |row, r_i|
        row.each_with_index do |part, c_i|
          culture_component = part.fetch(experimental_condition, {}).fetch(option_key[:option], {})
          if !culture_component.empty?
            culture_component.each do |sname, attributes|
              if option_items_hash.keys.include? sname
                option_item = option_items_hash[sname]
              else
                option_sample = Sample.find_by_name(sname)
                option_item = option_sample.items.reject {|i| i.location == 'deleted'}.first
                option_items_hash[sname] = option_item
              end
              fconc = attributes.fetch(:final_concentration, {qty: 0, units: 'NONE'})
              item_id = option_item.id
              (item_id_to_rc_list.keys.include? item_id) ? item_id_to_rc_list[item_id].merge!({[r_i, c_i]=>fconc}) : item_id_to_rc_list[item_id] = {[r_i, c_i]=>fconc}
            end
          end
        end
      end
    end
    return item_id_to_rc_list
  end
end # protocol

sample_types:
  - {name: Yeast Strain, description: A strain of yeast distinguished from others by genomic or plasmid modifications}
    - {name: Parent, ftype: sample, sample_types: [Yeast Strain]}
    - {name: Integrant, ftype: sample, sample_types: [Plasmid, Fragment]}
    - {name: Plasmid, ftype: sample, sample_types: [Plasmid]}
    - {name: Integrated Marker(s), ftype: string}
    - {name: Plasmid Marker(s), ftype: string}
    - {name: Mating Type, ftype: string, choices: MATa,MATalpha,Diploid, required: true}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Comp_cell_limit, ftype: string, choices: Yes,No}
    - {name: Media, ftype: string}
    - {name: Has this strain passed QC?, ftype: string, choices: No,Yes}
    - {name: Haploids, ftype: sample, array: true, sample_types: [Yeast Strain]}
  - {name: Plasmid, description: A circular piece of double stranded DNA}
    - {name: Sequence, ftype: url, required: true}
    - {name: Sequence Verification, ftype: url}
    - {name: Bacterial Marker, ftype: string, choices: Amp,Kan,Amp + Kan,Spec,Kan + Spec,Chlor,Tet,NA,Other, required: true}
    - {name: Yeast Marker, ftype: string, choices: HIS,TRP,URA,LEU,NatMX,KanMX,HygMX,BleoMX,5FOA,NA,Other, sample_types: [Primer]}
    - {name: Length, ftype: number, required: true}
    - {name: Sequencing Primers, ftype: sample, array: true, sample_types: [Primer]}
    - {name: QC Primer1, ftype: sample, sample_types: [Primer]}
    - {name: QC Primer2, ftype: sample, sample_types: [Primer]}
    - {name: QC_length, ftype: number}
    - {name: Transformation Temperature, ftype: number, choices: 37,30}
  - {name: Primer, description: A short double stranded piece of DNA for PCR and sequencing}
    - {name: Overhang Sequence, ftype: string}
    - {name: Anneal Sequence, ftype: string, required: true}
    - {name: T Anneal, ftype: number, required: true}
  - {name: Fragment, description: A linear double stranded piece of DNA from PCR or Restriction Digest}
    - {name: Sequence, ftype: url, required: true}
    - {name: Length, ftype: number, required: true}
    - {name: Template, ftype: sample, sample_types: [Plasmid, E coli strain, Fragment, Yeast Strain, DNA Library]}
    - {name: Forward Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Reverse Primer, ftype: sample, sample_types: [Primer, Fragment]}
    - {name: Restriction Enzyme(s), ftype: string}
    - {name: Yeast Marker, ftype: string}
    - {name: Fragment Mix Array, ftype: sample, array: true, sample_types: [Primer, Fragment]}
  - {name: E coli strain, description: A strain of E coli distinguished from others by genomic (not plasmid) modifications.}
    - {name: Parent, ftype: sample, required: true, sample_types: [E coli strain]}
  - {name: DNA Library, description: A sample that contains a pool of DNA molecules with many unique sequences}
    - {name: Oligo Pool, ftype: sample, sample_types: [Oligo Pool]}
  - {name: Oligo Pool, description: Pool or library of ssDNA oligos. May contain one or more sublibraries. In array fields, the n-th position corresponds to n-th sublibrary. "forward priming site" and "reverse priming site" are read as primer sequences.}
    - {name: Manufacturer, ftype: string, required: true}
    - {name: Oligo Library ID, ftype: number, required: true}
    - {name: inner forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: inner reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary forward primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: sublibrary reverse primer (array), ftype: sample, array: true, required: true, sample_types: [Primer]}
    - {name: min length (nt) (array), ftype: number, array: true, required: true}
    - {name: max length (nt) (array), ftype: number, array: true, required: true}
    - {name: variants (array), ftype: number, array: true, required: true}
    - {name: sublibrary name (array), ftype: string, array: true, required: true}
    - {name: forward priming site (array), ftype: string, array: true, required: true}
    - {name: reverse priming site (array), ftype: string, array: true, required: true}
  - {name: Media, description: Media for yeast and E. coli}
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object_types:
  - {name: Yeast Plate, description: Yeast Plate, handler: sample_container, unit: Yeast Strain, release_method: return, prefix: DFP, sample_type_name: Yeast Strain}
  - {name: Yeast Glycerol Stock, description: A 1.8mL culture of half saturated yeast overnight and half 50% glycerol stored in the -80C freezer, handler: sample_container, unit: Yeast Strain, release_method: return, prefix: M80, sample_type_name: Yeast Strain}
  - {name: E coli Plate of Plasmid, description: A plate containing E. coli transformed with a plasmid, handler: sample_container, unit: Plasmid, release_method: return, prefix: DFP, sample_type_name: Plasmid}
  - {name: E coli Glycerol Stock, description: Long term storage of E. coli in the -80C, handler: sample_container, unit: E coli strain, release_method: return, prefix: M80, sample_type_name: E coli strain}
  - {name: Yeast Overnight Suspension, description: Yeast Overnight Suspension, handler: sample_container, unit: Yeast Strain, release_method: query, prefix: DFO, sample_type_name: Yeast Strain}
  - {name: 800 mL Liquid, description: 800 mL Bottle, handler: sample_container, data: { "samples": [ { "name": "SC", "materials": 0.0135, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "SDO", "materials": 0.014, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "50% Glycerol", "materials": 0.02, "labor": 0.02, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "TB", "materials": 0.01, "labor": 0.016, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "TB + Amp", "materials": 0.03, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "LB", "materials": 0.01, "labor": 0.016, "delete": false, "unit": "mL", "total_volume": 800 }, { "name": "YPAD", "materials": 0.01, "labor": 0.025, "delete": false, "unit": "mL", "total_volume": 800 } ] }, unit: Media, release_method: return, sample_type_name: Media}
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operation_type: Define Culture Conditions
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Strain, sample_types: [Yeast Strain, Yeast Strain, Plasmid, E coli strain, Yeast Strain], object_types: [Yeast Plate, Yeast Glycerol Stock, E coli Plate of Plasmid, E coli Glycerol Stock, Yeast Overnight Suspension], routing: CC}
  - {ftype: sample, role: output, name: Culture Condition, sample_types: [Yeast Strain, Yeast Strain, Plasmid, E coli strain, Yeast Strain], object_types: [Yeast Plate, Yeast Glycerol Stock, E coli Plate of Plasmid, E coli Glycerol Stock, Yeast Overnight Suspension], routing: CC}
  - {ftype: json, role: input, name: Inducer(s)}
  - {ftype: number, role: input, name: Replicates}
  - {ftype: json, role: input, name: Control Tag}
  - {ftype: sample, role: input, name: Media, sample_types: [Media], object_types: [800 mL Liquid], routing: M}
  - {ftype: json, role: input, name: Antibiotic(s)}
  - {ftype: json, role: input, name: Option(s)}
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documentation:
This operation does NOT get run by a technician. It can be stepped through as long as all FieldValue parameters are valid.
This operation abstracts planning microbial culture conditions. These conditions will be wired to `Inoculate Culture Plate` to define parameters for High Throughput Culturing Experiment.


For parameters that will not be used or filled use an empty `{}`

__Strain__
Enter the name or id of the Strain.

__Media__
Enter the name or id of the Media.

__Inducer(s)__
Enter a JSON object to represent 
the type of inducer by `name`,
the desired `final_concentration`, and
the `item_id` of the stock that will
be used and diluted.
    
      { 
        "beta-estradiol": {
          "final_concentration": [
            "100_nM","200_nM"
            ]
          },
        "IPTG": {
          "final_concentration": ["50_nM"]
        }
      }
      
Represents the following conditions:
1. `b-e at 100nM + IPTG at 50nM`
2. `b-e at 200nM + IPTG at 50nM`

__Antibiotic(s)__
Enter a JSON object to represent
additional antibiotics.
Follow the example below:
    
    {
      "Ampicillin Antibiotic": {
        "final_concentration": "10_ug/mL"
      }
    }

You can see the stock concentration
on the sample properties under,
the description of the sample.
    
__Control Tag__
Enter a JSON object to tag control.
The key represents the type of control
and value represents positive or negative.
Then, you can add your own additional
information.
    
    For a flow cytometry control,
    use the example below.
    {
      "flourescence_control": "positive",
      "channel": "tdTomato"
    }
    
    Example growth control:
    {
      "growth_control": "negative"
    }
    
This tag will allow Aq to place these
cultures in all of the plates in the
planned experiment.
    
__Replicates__
Enter an integer of the number of 
replicates (cultures) desired for 
each of the conditions.
    
__Option(s)__
Enter a JSON object for additional 
options. This could be used for 
notes or a way to prototype
new operation features.


This operation allows a user to define experimental culture conditions for a given microbial sample. The conditions would be very many combinations of inducers, antibiotics, medias, and sample types.
The operation will then be wired to `Inoculate Culture Plate` where all conditions will be accounted for, sorted, and organized into a high throughput container.

precondition:
def precondition(_op)
    op = Operation.find(_op.id)
    # Check to see whether the parameter value is JSON parasable before starting
    op.field_values.select {|fv| fv.role == 'input' }.each do |fv|
      if ["Strain", "Media", "Replicates"].include? fv.name
        next # These field values are not JSON parameters
      else
        valid_json?(fv.value)
      end
    end
    op.pass("Strain", "Culture Condition")
    # set status to done, so this block will not be evaluated again
    op.status = "done"
    op.save
end

def valid_json?(json)
    JSON.parse(json) rescue raise "Not at parsable json: #{json}" # JSON::ParserError => e
end

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protocol:
class Protocol

  def main

    operations.each do |op|
        op.error("Control block error", "Control blocks are not intended to be run by a technician.") 
    end
    
  end

end

test:
class ProtocolTest < ProtocolTestBase
  MEDIA = "Media"
  CONTROL = "Control Tag as { tag, type }"
  INDUCERS = "Inducer(s) as { name: { final concentration: { qty:, units: } } }"
  ANTIBIOTICS = "Antibiotic(s) as { name: { final concentration: { qty:, units: } } }"
  REPLICATES = "Replicates"
  TEMPERATURE = "Temperature (C)"




  def setup

      # add_random_operations(1) # defines three random operations
      add_operation
        .with_input(MEDIA, Sample.find(	11767))
        .with_input(CONTROL, {})
        .with_input(INDUCERS, { 'IPTG': { final_concentration: { 'qty': 10  , 'units': 'uM' } } })
        .with_input(ANTIBIOTICS, { 'Kanamyacin': { final_concentration: { 'qty': 10  , 'units': 'nM' } } })
        .with_input(REPLICATES, 3)
        .with_input(TEMPERATURE, 30)

        



      # add_operation            # adds a custom made operation
      #   .with_input("Primer", Sample.find(3))
      #   .with_property("x", 123)
      #   .with_output("Primer", Sample.find(3))     

  end

  def analyze
      log "Hello from Nemo LIVE!"
      @operations.each do |op|
        log "#{op.id}"
      end

      # log "#{@backtrace}"
      assert_equal @backtrace.last[:operation], "complete"
      
  end

end

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object_types:
  - {name: 96 Well Flat Bottom (black), description: plate for plate reader, handler: collection, data: {"max_well_vol_ul" : 300,"working_vol": "300_uL", "max_vol": "0.3_mL" }, unit: plate, release_method: return, rows: 8, columns: 12}
  - {name: 96 U-bottom Well Plate, description: 96 U bottom well for cytometer readings, handler: collection, data: {"working_vol": "300_uL", "max_vol": "0.3_mL" }, unit: plate, release_method: return, rows: 8, columns: 12}
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operation_type: Dilute Collection
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culture Plate, object_types: [Eppendorf 96 Deepwell Plate, 96 Well Flat Bottom (black), 96 U-bottom Well Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: sample, role: output, name: Diluted Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: string, role: input, name: Dilution, choices: 0.5X, 0.2X,0.1X, 0.01X,0.001X}
  - {ftype: sample, role: input, name: Media, sample_types: [Media], object_types: [800 mL Liquid], routing: M}
  - {ftype: string, role: input, name: Keep Input Plate?, choices: Yes,No}
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documentation:
This protocol will guide you on how to dilute the cultures of a culturing plate into another plate.

    1. Gather materials.
    
    2. Pre-fill new plate with media, if necessary.
    
    3. Transfer aliquot of culture to new plate.
    
    4. Incubate.


This operation takes in a collection and dilutes the microbial cultures found in it by a user specified dilution factor. It requires that the output container have a `Data` association {'working_vol': '1000_uL'} in order for the dilution to be computed.

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 08/13/19

needs "Standard Libs/Debug"
needs "High Throughput Culturing/HighThroughputHelper"

class Protocol
  include HighThroughputHelper
  include Debug
  
  # DEF
  INPUT = "Culture Plate"
  OUTPUT = "Diluted Plate"
  DILUTION = "Dilution"
  MEDIA = "Media"
  KEEP_IN_PLT = "Keep Input Plate?"
  
  # Constants
  ALLOWABLE_DILUTANT_SAMPLETYPES = ['Yeast Strain', 'Plasmid', 'E coli strain'] # sample types that will be transferred to new plate
  
  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  def intro
    show do
      title "Dilute Collection"
      separator
      note "This protocol will guide you on how to dilute the cultures of a culturing plate into another plate."
      note "<b>1.</b> Gather materials."
      note "<b>2.</b> Pre-fill new plate with media, if necessary."
      note "<b>3.</b> Transfer aliquot of culture to new plate."
      note "<b>4.</b> Incubate."
    end
  end
  
  def main
    intro
    operations.retrieve.make
    clean_up_arr = []
    operations.make.each do |op|
      dilution_factor = get_dilution_factor(op: op, fv_str: DILUTION)
      op.input_array(INPUT).collections.zip(op.output_array(OUTPUT).collections) do |from_collection, to_collection|
        raise "Not enough output plates have been planned please add an output field value to this operation: Plan #{op.plan.id} Operation #{op.id}." if to_collection.nil? 
        gather_materials(empty_containers: [to_collection], new_materials: ['P1000 Multichannel', 'Permeable Area Seals', 'Multichannel Resivior'], take_items: [from_collection] )
        stamp_transfer(from_collection: from_collection, to_collection: to_collection, process_name: 'dilution')
        transfer_volume = pre_fill_collection(to_collection: to_collection, dilution_factor: dilution_factor, media_item: op.input(MEDIA).item)
        tech_transfer_samples(from_collection: from_collection, to_collection: to_collection, transfer_volume: transfer_volume)
        from_loc = from_collection.location; to_collection.location = from_loc; to_collection.save()
        (op.input(KEEP_IN_PLT).val.to_s.downcase == 'yes') ? (from_collection.mark_as_deleted; from_collection.save()) : nil
      end
      clean_up(item_arr: clean_up_arr)
      operations.store
    end
  end #main
  
  def tech_transfer_samples(from_collection:, to_collection:, transfer_volume:)
    show do
      title "Transferring From #{from_collection} To #{to_collection}"
      separator
      warning "Make sure that both plates are in the same orientation.".upcase
      note "Using a Multichannel pipette, follow the table to transfer #{transfer_volume}#{MICROLITERS} of cultures:"
      bullet "<b>From #{from_collection.object_type.name}</b> #{from_collection}"
      bullet "<b>To #{to_collection.object_type.name}</b> #{to_collection}"
      table highlight_alpha_non_empty(to_collection) {|r,c| "#{transfer_volume}#{MICROLITERS}" }
    end
  end

  def pre_fill_collection(to_collection:, dilution_factor:, media_item:)
    destination_working_volume = get_object_type_working_volume(to_collection).to_i
    culture_volume = (destination_working_volume*dilution_factor.to_i).round(3)
    media_volume = (destination_working_volume-culture_volume).round(3)
    take [media_item], interactive: true
    if dilution_factor != 'None'
      total_media = ((to_collection.get_non_empty.length*media_volume*1.1)/1000).round(2) #mLs
      show do 
        title "Pre-fill #{to_collection.object_type.name} #{to_collection} with #{media_item.sample.name}"
        separator
        check "Gather a <b>Multichannel Pipette<b>"
        check "Gather a <b>Multichannel Resivior<b>"
        check "Gather #{total_media}#{MILLILITERS}"
        note "Pour the media into the resivior in 30mL aliquots"
        note "You will need these materials in the next step."
      end
      show do
        title "Pre-fill #{to_collection.object_type.name} #{to_collection} with #{media_item.sample.name}"
        separator
        note "Follow the table below to transfer media into #{to_collection}:"
        table highlight_alpha_non_empty(to_collection){|r,c| "#{media_volume}#{MICROLITERS}"}
      end
    end
    return culture_volume
  end

  def get_object_type_working_volume(container)
    working_volume = JSON.parse(container.object_type.data).fetch('working_vol', nil)
    raise "The #{container.id} #{container.object_type.name} ObjectType does not have a 'working_vol' association. 
    Please go to the container definitions page and add a JSON parsable association!".upcase if working_volume.nil?
    return working_volume
  end
  
  def copy_sample_matrix(from_collection:, to_collection:)
    sample_hash = Hash.new()
    from_collection_sample_types = from_collection.matrix.flatten.uniq.reject{|i| i == EMPTY }.map {|sample_id| [sample_id, Sample.find(sample_id)] }
    from_collection_sample_types.each {|sid, sample| (ALLOWABLE_DILUTANT_SAMPLETYPES.include? sample.sample_type.name) ? (sample_hash[sid] = sample) : (sample_hash[sid] = EMPTY) }
    dilution_sample_matrix = from_collection.matrix.map {|row| row.map {|sample_id| sample_hash[sample_id] } }
    to_collection.matrix = dilution_sample_matrix
    to_collection.save()
  end
  
  def transfer_part_associations(from_collection:, to_collection:)
    copy_sample_matrix(from_collection: from_collection, to_collection: to_collection)
    from_collection_associations = AssociationMap.new(from_collection)
    to_collection_associations   = AssociationMap.new(to_collection)
    from_associations_map = from_collection_associations.instance_variable_get(:@map)
    # Remove previous source data from each part
    from_associations_map.reject! {|k| k != 'part_data'} # Retain only the part_data, so that global associations do not get copied over
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("source") ? part.reject! {|k| k == "source" } : part } }
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("destination") ? part.reject! {|k| k == "destination" } : part } }
    # Set edited map to the destination collection_associations
    to_collection_associations.instance_variable_set(:@map, from_associations_map)
    to_collection_associations.save()
    return from_associations_map
  end    
    
  def part_provenance_transfer(from_collection:, to_collection:, process_name:)
    to_collection_part_matrix = to_collection.part_matrix
    from_collection.part_matrix.each_with_index do |row, r_i|
      row.each_with_index do |from_part, c_i|
        if (from_part) && (ALLOWABLE_DILUTANT_SAMPLETYPES.include? from_part.sample.sample_type.name)
          to_part = to_collection_part_matrix[r_i][c_i]
          if !to_part.nil?
            # Create source and destination objs
            source_id = from_part.id; source = [{id: source_id }]
            destination_id = to_part.id; destination = [{id: destination_id }]
            destination.first.merge({additional_relation_data: { process: process_name }}) unless process_name.nil?
            # Association source and destination
            to_part.associate(key=:source, value=source)
            from_part.associate(key=:destination, value=destination)
          end
        end
      end
    end
  end
  
  def stamp_transfer(from_collection:, to_collection:, process_name: nil)
    from_associations_map = transfer_part_associations(from_collection: from_collection, to_collection: to_collection)
    part_provenance_transfer(from_collection: from_collection, to_collection: to_collection, process_name: process_name)
    return from_associations_map.fetch('part_data')
  end

end #Class

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operation_type: Experimental Recovery
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culture Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: sample, role: output, name: Diluted Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: string, role: input, name: Dilution, choices: 0.5X, 0.2X,0.1X, 0.01X,0.001X}
  - {ftype: string, role: input, name: When to recover? (24hr)}
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documentation:
This protocol will guide you on how to recover your growing cultures and prepare the next plate for your experiment.

    1. Gather necessary materials.
    
    2. Pre-fill new plate with media(s).
    
    3. Stamp transfer plate wells to pre-filled new plate.
    
    4. Incubate.

precondition:
# This operation should be wired to only after inoculate culture plate
def precondition(_op)
  true # This operation should be wired to only after inoculate culture plate
end

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 080619

needs "Standard Libs/Debug"
needs "High Throughput Culturing/HighThroughputHelper"

class Protocol
  include HighThroughputHelper
  include Debug
  
  #DEF
  INPUT = "Culture Plate"
  OUTPUT = "Diluted Plate"
  DILUTION = "Dilution"
  OUTGROWTH = "Outgrowth (hr)"
  OPTIONS = "Option(s)"

  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  def intro
    show do
      title "High Throughput Culturing Recovery"
      separator
      note "This protocol will guide you on how to recover your growing cultures and prepare the next plate for your experiment."
      note "<b>1.</b> Gather necessary materials."
      note "<b>2.</b> Pre-fill new plate with media(s)."
      note "<b>3.</b> Stamp transfer plate wells to pre-filled new plate."
      note "<b>4.</b> Incubate."
    end
  end
  
  def main
    intro
    operations.retrieve.make
    clean_up_arr = []
    operations.each do |op|
      dilution_factor = get_dilution_factor(op: op, fv_str: DILUTION)
      op.input_array(INPUT).collections.zip(op.output_array(OUTPUT).collections).each do |from_collection, to_collection|
        raise "Not enough output plates have been planned please add an output field value to this operation: Plan #{op.plan.id} Operation #{op.id}." if to_collection.nil?
        # Tranfer culture information and record PartProvenance
        part_associations_matrix = stamp_transfer(from_collection: from_collection, to_collection: to_collection, process_name: "Dilution")
        gather_materials(empty_containers: [to_collection], new_materials: ['Multichannel Pipette', 'Media Reservoir'], take_items: [])
        # Account and gather materials for the output collection
        transfer_vol_matrix = get_transfer_volume_matrix(collection: from_collection, part_associations_matrix: part_associations_matrix, dilution_factor: dilution_factor)
        pre_fill_collection(out_collection: to_collection, part_associations_matrix: part_associations_matrix, transfer_vol_matrix: transfer_vol_matrix)
        transfer_and_dilute_cultures(in_collection: from_collection, out_collection: to_collection, transfer_vol_matrix: transfer_vol_matrix)
        # Delete input collection and move output collection to incubator
        incubator_loc = from_collection.location
        to_collection.location = incubator_loc
        to_collection.save()
        from_collection.mark_as_deleted
      end
      clean_up(item_arr: clean_up_arr)
      operations.store
    end
  end #main
  
  def pre_fill_collection(out_collection:, part_associations_matrix:, transfer_vol_matrix:)
    media_hash = get_component_volume_hash(matrix: part_associations_matrix, component_type: "Media")
    show do 
      title "Pre-fill #{out_collection.object_type.name} #{out_collection} with Media"
      separator
      note "You will need the following amount of media:"
      media_hash.each {|media, volume| check "<b>#{(volume/1000).round(2)}#{MILLILITERS}</b> of <b>#{media} #{Item.find(media).sample.name}</b>"}
    end
    
    media_position_hash = {}
    part_associations_matrix.each_with_index do |row, r_i|
      row.each_with_index do |part, c_i|
        media_attribute = part.fetch("Media", false)
        if media_attribute
          if !media_attribute.nil? || !media_attribute.empty?
            media_name = media_attribute.keys.first
            position = [r_i, c_i]
            (media_position_hash.keys.include? media_name) ? (media_position_hash[media_name].push(position)) : (media_position_hash[media_name] = [position])
          end
        end
      end
    end
    
    media_position_hash.each do |media_name, rc_list|
      show do 
        title "Pre-fill #{out_collection.object_type.name} #{out_collection} with Media"
        separator
        note "Follow the table below to prefill #{out_collection.id} with #{media_name}:"
        table highlight_alpha_rc(out_collection, rc_list) {|r, c|
          media_component = part_associations_matrix[r][c].fetch("Media").values.first
          m_vol = media_component.fetch(:working_volume)
          m_vol[:qty] = m_vol[:qty] - transfer_vol_matrix[r][c]
          "#{format_collection_display_str(m_vol)}" 
        }
      end
    end
  end
  
  def transfer_and_dilute_cultures(in_collection:, out_collection:, transfer_vol_matrix:)
    show do 
      title "Transfer Cultures from #{in_collection} to #{out_collection}"
      separator
      note "Transfer cultures:"
      bullet "<b>From #{in_collection.object_type.name} #{in_collection}</b>"
      bullet "<b>To #{out_collection.object_type.name} #{out_collection}</b>"
      note "Follow the table to transfer the appropriate volume:"
      table highlight_alpha_non_empty(out_collection) {|r, c| "#{transfer_vol_matrix[r][c]}#{MICROLITERS}"}
    end
  end
  
  def copy_sample_matrix(from_collection:, to_collection:)
    sample_matrix = from_collection.matrix
    to_collection.matrix = sample_matrix
    to_collection.save()
  end
  
  def transfer_part_associations(from_collection:, to_collection:)
    copy_sample_matrix(from_collection: from_collection, to_collection: to_collection)
    from_collection_associations = AssociationMap.new(from_collection)
    to_collection_associations   = AssociationMap.new(to_collection)
    from_associations_map = from_collection_associations.instance_variable_get(:@map)
    # Remove previous source data from each part
    from_associations_map.reject! {|k| k != 'part_data'} # Retain only the part_data, so that global associations do not get copied over
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("source") ? part.reject! {|k| k == "source" } : part } }
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("destination") ? part.reject! {|k| k == "destination" } : part } }
    # log_info 'from_associations_map part_data with out source and destination', from_associations_map
    # Set edited map to the destination collection_associations
    to_collection_associations.instance_variable_set(:@map, from_associations_map)
    to_collection_associations.save()
    return from_associations_map
  end    
    
  def part_provenance_transfer(from_collection:, to_collection:, process_name:)
    to_collection_part_matrix = to_collection.part_matrix
    from_collection.part_matrix.each_with_index do |row, r_i|
      row.each_with_index do |from_part, c_i|
        if from_part
            to_part = to_collection_part_matrix[r_i][c_i]
            # Create source and destination objs
            source_id = from_part.id; source = [{id: source_id }]
            destination_id = to_part.id; destination = [{id: destination_id }]
            destination.first.merge({additional_relation_data: { process: process_name }}) unless process_name.nil?
            # Association source and destination
            to_part.associate(key=:source, value=source)
            from_part.associate(key=:destination, value=destination)
        end
      end
    end
  end
  
  def stamp_transfer(from_collection:, to_collection:, process_name: nil)
    from_associations_map = transfer_part_associations(from_collection: from_collection, to_collection: to_collection)
    part_provenance_transfer(from_collection: from_collection, to_collection: to_collection, process_name: process_name)
    return from_associations_map.fetch('part_data')
  end

  def get_component_volume_hash(matrix:, component_type:)
    volume_hash = Hash.new(0)
    matrix.each do |culture_array|
      culture_array.each do |culture|
        component = culture.fetch(component_type, nil)
        if component
          attributes = component.values.first
          item_id = attributes.fetch(:item_id, nil)
          if item_id.nil?
            next
          else
            volume_hash[item_id] += attributes.fetch(:working_volume).fetch(:qty)
          end
        end
      end
    end
    return volume_hash
  end
  
  def get_object_type_working_volume(container)
    working_volume = JSON.parse(container.object_type.data).fetch('working_vol', nil)
    raise "The #{container.id} #{container.object_type.name} ObjectType does not have a 'working_vol' association. 
    Please go to the container definitions page and add a JSON parsable association!".upcase if working_volume.nil?
    return working_volume.to_f
  end
  
  def get_transfer_volume_matrix(collection:, part_associations_matrix:, dilution_factor:)
    transfer_vol_matrix = Array.new(collection.object_type.rows) { Array.new(collection.object_type.columns) { EMPTY } }
    collection = collection_from(collection)
    collection_working_volume = get_object_type_working_volume(container=collection)
    collection.get_non_empty.each do |r, c|
      culture_volume = part_associations_matrix[r][c].fetch("Culture_Volume", false)
      if culture_volume
        transfer_vol_matrix[r][c] = (dilution_factor*collection_working_volume).round(3)
      end
    end
    return transfer_vol_matrix
  end
  
  def format_collection_display_str(value)
    if value.is_a? Hash
      return "#{(value[:qty]).round(3)}#{value[:units]}"
    elsif value.is_a? String
      return value
    else
      raise "This #{value.class} can not be formatted for collection display"
    end
  end

end #Class

sample_types:
  - {name: Beads, description: calibration beads for flow cytometry}
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object_types:
  - {name: Bead droplet dispenser, description: Stock bottle of beads for cytometer calibration, handler: sample_container, unit: Beads, release_method: return, sample_type_name: Beads}
  - {name: Diluted beads, description: Drop of calibration bead stock in 1xPBS, handler: sample_container, unit: Beads, release_method: return, sample_type_name: Beads}
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operation_type: Flow Cytometry Calibration
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Optical Particles, sample_types: [Beads], object_types: [Bead droplet dispenser], routing: OP}
  - {ftype: sample, role: output, name: Diluted Beads, sample_types: [Beads], object_types: [Diluted beads], routing: OP}
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documentation:
To compare different experiments against each other we must have a way to compare the fluorescence intensities across different flow cytometers.
To achieve this we will be using small beads that fluoresce multiple colors.

    1. Setup flow cytometer workspace and measure bead sample.
    
    2. Take chosen beads and dilute, if necessary.
    
    3. Upload .fcs file to Aquarium.

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 08/13/19

needs "High Throughput Culturing/FlowCytometryHelper"
needs "High Throughput Culturing/FlowCytometryCalibration"
needs "High Throughput Culturing/HighThroughputHelper"
needs "Standard Libs/Debug"

class Protocol
    include Debug
  #include FlowCytometryCalibration, HighThroughputHelper 
  #include FlowCytometryHelper
  
  # DEF
  INPUT  = "Optical Particles"
  OUTPUT = "Diluted Beads"
  
  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
    
  def intro
    flow_cytometer = FlowCytometer.new()
    get_flow_cytometer_software(flow_cytometer: flow_cytometer)
    show do
      title "Calibrating the Flow Cytometer"
      separator
      note "To compare different experiments against each other we must have a way to compare the fluorescence intensities across different flow cytometers."
      note "To achieve this we will be using small beads that fluoresce multiple colors."
      note "<b>1.</b> Setup flow cytometer workspace and measure bead sample."
      note "<b>2.</b> Take chosen beads and dilute, if necessary."
      note "<b>3.</b> Upload .fcs file to Aquarium."
    end
    return flow_cytometer
  end
  
  def main
    fc = intro
    operations.group_by {|op| op.input(INPUT).item }.each do |bead_item, ops|
      setup_calibration_measurement(flow_cytometer: fc, bead_item: bead_item)
      setup_instrument_calibration(instrument=fc)
      empty_containers = []; new_materials = []; take_items = [fc.experimental_item]
      (empty_containers.push(fc.measurement_item); new_materials.push('P1000 Pipette', 'Molecular Grade H2O', '1.5mL Tube')) unless (fc.experimental_item.id == fc.measurement_item.id)
      gather_materials(empty_containers: empty_containers, transfer_required: fc.transfer_required, new_materials: new_materials, take_items: take_items)
      prepare_calibration_beads(flow_cytometer: fc)
      take_calibration_and_upload_data(instrument: fc)
      process_and_associate_calibration(instrument: fc, ops: ops)
      fc.measurement_item.location = 'R4 Fridge'
    end
    release_arr = Protocol.materials_list.flatten.reject {|m| m.is_a? String }.uniq
    cleaning_up(release_arr)
  end # Main

end # Protocol

object_types:
  - {name: 24 Deep Well Plate, description: A 4-by-6 cell culturing plate, handler: collection, unit: Well, release_method: return, rows: 4, columns: 6}
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operation_type: Flow Cytometry Measurement
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Experimental Plate, object_types: [Eppendorf 96 Deepwell Plate, 96 U-bottom Well Plate, 96 Well Flat Bottom (black), 24 Deep Well Plate, 24 Unit Disorganized Collection], routing: P}
  - {ftype: sample, role: output, name: Measurement Plate, object_types: [96 U-bottom Well Plate, 96 Well Flat Bottom (black), 24 Unit Disorganized Collection], routing: P}
  - {ftype: string, role: input, name: Calibration Required?, choices: Yes,No}
  - {ftype: string, role: input, name: Keep Output Plate?, choices: Yes,No}
  - {ftype: string, role: input, name: When to Measure? (24hr)}
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documentation:
This protocol will instruct you on how to take measurements on the #{flow_cytometer.type} Flow Cytometer.
A flow cytomter uses lasers to phenotypically characterize a microbial culture.
This per cell measurement quantifies a cell's size, shape, and color. Making it a useful tool to analyze & distiguish cellular populations from each other.
In this protocol, you will prepare the instrument workspace and characterize your genetically modified organism.

    1. Setup flow_cytometer.type Flow Cytomter Software workspace.
    
    2. Check to see if input item is a flow_cytometer.valid_containers if not, transfer samples to a valid container.
    
    3. Load plate.
    
    4. Take measurement, export data, & upload.

precondition:
def precondition(_op)
  if _op.input('require calibration?').value.downcase == 'yes'
    calibration_operation_type = OperationType.find_by_name("Flow Cytometry Calibration")
    calibration_op = _op.plan.operations.find { |op| op.operation_type_id == calibration_operation_type.id}
    if calibration_op.nil?
      _op.associate('Waiting for Calibration','In order to use Cytometer, `Cytometer Bead Calibration` must be run in the same plan')
      return false
    elsif calibration_op.status != 'done'
      _op.associate("Waiting for Calibration","Flow Cytometry cannot begin until Cytometer Calibration completes.")
      return false
    else
      _op.get_association('Waiting for Calibration').delete if _op.get_association('Waiting for Calibration')
      return true
    end
  else
    return true
  end
end

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 08/07/19

needs "High Throughput Culturing/FlowCytometryHelper"
needs "High Throughput Culturing/HighThroughputHelper"
needs "Standard Libs/Debug"

class Protocol
  include Debug
  include FlowCytometryHelper
  include HighThroughputHelper

  # DEF
  INPUT            = 'Experimental Plate'
  OUTPUT           = 'Measurement Plate'
  KEEP_OUT_PLT     = 'Keep Output Plate?'
  WHEN_TO_MEASURE  = 'When to Measure? (24hr)'

  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end

  def main
    fc = intro
    operations.each do |op|
      op = Operation.find(219_542) if debug

      fc.setup_experimental_measurement(experimental_item: op.input(INPUT).item,
                                        output_fv: op.output(OUTPUT))

      setup_instrument_software(instrument=fc, op)

      empty_containers = []
      new_materials = []
      take_items = [fc.experimental_item]

      unless !fc.transfer_required
        empty_containers.push(fc.measurement_item)
        new_materials.push('P1000 Multichannel', 'Area Seal')
      end

      gather_materials(empty_containers: empty_containers,
                       transfer_required: fc.transfer_required,
                       new_materials: new_materials,
                       take_items: take_items)

      (fc.transfer_required) ? tech_transfer_to_valid_container(instrument: fc,
                                                                output_fieldValue: op.output(OUTPUT)) : op.pass(INPUT, OUTPUT)
      take_measurement_and_upload_data(instrument: fc)
      process_and_associate_data(instrument: fc, op: op)

      # Keep new measurement plate that was created?
      keep_transfer_plate(instrument: fc, 
                          user_val: get_parameter(op: op, fv_str: KEEP_OUT_PLT).to_s.upcase)
    end
    show do
      Protocol.materials_list.each do |mat|
        note "material #{mat}"
      end
    end
    release_arr = Protocol.materials_list.flatten.reject { |m| m.is_a? String }.uniq
    cleaning_up(release_arr)
  end # Main
end # Protocol

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operation_type: Inoculate Culture Plate
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: Culture Plate, object_types: [Eppendorf 96 Deepwell Plate, 24 Unit Disorganized Collection], array: true, routing: P}
  - {ftype: sample, role: input, name: Culture Condition, sample_types: [Yeast Strain, Yeast Strain, Plasmid, E coli strain, Yeast Strain], object_types: [Yeast Plate, Yeast Glycerol Stock, E coli Plate of Plasmid, E coli Glycerol Stock, Yeast Overnight Suspension], array: true, routing: CC}
  - {ftype: json, role: input, name: Option(s)}
  - {ftype: number, role: input, name: Temperature (°C)}
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documentation:
This protocol, organizes a culturing experiment into a high throughput container.
The culturing could be very complex with additional inducers and reagents required to test experimental conditions.

    1. Gather materials for experiment.
    
    2. Fill and inoculate the container.
    
    3. Place plate in growth environment.

precondition:
# use the precondition to determine how many output fv need to be planned in the output array of this operation. 
# This precondition could be used to ensure that the user has planned enough output collections
def precondition(_op)
  true
end

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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu
# 06/26/19

needs "Standard Libs/Debug"
needs "High Throughput Culturing/CultureComposition"
needs "High Throughput Culturing/HighThroughputHelper"

class Protocol
  include Debug
  include HighThroughputHelper
  
  # DEF
  INPUT = "Culture Condition"
  OUTPUT = "Culture Plate"
  TEMPERATURE = "Temperature (°C)"
  
  # Predcessor DEF
  STRAIN = "Strain"
  MEDIA = "Media"
  INDUCERS = "Inducer(s)"
  ANTIBIOTICS = "Antibiotic(s)"
  CONTROL = "Control Tag"
  REPLICATES = "Replicates"
  OPTIONS = "Option(s)"

  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  def intro
    show do
      title "High Throughput Culturing"
      separator
      note "This protocol, organizes a culturing experiment into a high throughput container."
      note "The culturing could be very complex with additional inducers and reagents required to test experimental conditions."
      note "<b>1.</b> Gather materials for experiment."
      note "<b>2.</b> Fill and inoculate the container."
      note "<b>3.</b> Place plate in growth environment."
    end
  end
  
  def main
    intro
    clean_up_arr = []
    operations.group_by {|op| get_uninitialized_output_object_type(op) }.map do |out_ot, ops|
      ops.map do |op|
        op = Operation.find(219536) if debug
        experimental_cultures = []; control_cultures = []
        condition_ops = get_define_culuture_condition_ops(op) # Predecessor operations
        condition_ops.map do |condition_op|
          control_tag           = get_control_tag(condition_op)
          replicate_num         = get_replicate_num(condition_op)
          condition_options     = get_condition_options(condition_op)
          culture_component_arr = get_base_culture_components(condition_op)
          # Format inducer components to account for combintorial inducer conditions, prior to initializing CultureComposition
          formatted_inducer_components = format_induction_components(condition_op)
          # Arrange component array by combining the culture component arr with the varying inducer components, unless we do not need inducers
          distribute_inducer_components(culture_component_arr: culture_component_arr, formatted_inducer_components: formatted_inducer_components).each do |component_arr|
            culture = CultureComposition.new(component_arr: component_arr, object_type: out_ot, opts: condition_options)
            culture.composition.merge!(control_tag)
            culture.composition.merge!(get_source_item_input(culture))
            replicates = replicate_culture(culture: culture, replicate_num: replicate_num) 
            (control_tag.fetch('Control').empty?) ? experimental_cultures.push(replicates) : control_cultures.push(replicates)
          end
        end
        # Place sorted cultures into new collection & set the new collections to the ouput array of the operation
        new_output_collections = associate_cultures_to_collection(cultures: experimental_cultures, object_type: out_ot)
        output_array = op.output_array(OUTPUT)
        new_output_collections.each_with_index do |out_collection, idx|
          associate_controls_to_collection(cultures: control_cultures, collection: out_collection)
          if output_array[idx].nil? # If there are no output field values left to fill create a new one and add it to the output array
            new_fv = create_new_fv(args=get_fv_properties(output_array[idx-1]))
            output_array.push(new_fv)
          end
          output_array[idx].set collection: out_collection
        end
        # Depending on the type of input items prepare inoculates using the inoculation_prep_hash
        inoculation_prep_hash = get_inoculation_prep_hash(new_output_collections)
        inoculate_culture_plates(new_output_collections: new_output_collections, inoculation_prep_hash: inoculation_prep_hash)
        incubate_plates(output_collections: new_output_collections, growth_temp: op.input(TEMPERATURE).val)
      end
    end
    clean_up(item_arr: clean_up_arr.flatten.uniq)
    { operations: operations.map {|op| op } }
  end # Main
  
  # Based on the user defined number of replicates, create an array of culture composition hash objects
  #
  # @params culture [class CultureComposition] is an instance of the CultureComposition class that represents a microbial culture with intended experimental conditions
  # @params replicate_num [int] the number of replicates for this culture experimental condition
  # @returns [Array] an array of hash objects representing exprimental culture replicates
  def replicate_culture(culture:, replicate_num:)
    return replicate_num.times.map {|i| culture.composition.merge({'Replicate'=>"#{i+1}/#{replicate_num}"}) }
  end  
  
  # Find the inoculum item of a culture
  #
  # @params culture [class CultureComposition] is an instance of the CultureComposition class that represents a microbial culture with intended experimental conditions
  # @returns [hash] source array hash object
  def get_source_item_input(culture)
    source_array = []
    source_array.push({id: culture.composition.fetch(STRAIN).values.first[:item_id]})
    return { 'source'=> source_array }
  end
  
  # Create an array of predessor operations that are wired to the input array of this Inoculate Culture Plate operation
  def get_define_culuture_condition_ops(op)
    predecessor_output_fv_ids = op.input_array(INPUT).map {|fv| fv.wires_as_dest.first.from_id } # Finding the pred fv ids by using the wires connecting them to this op.input_array
    define_culture_condition_ops = FieldValue.find(predecessor_output_fv_ids).to_a.map {|fv| fv.operation } # Predecessor operations
    return define_culture_condition_ops
  end
  
  # Get predessor operation input OPTIONS
  def get_condition_options(condition_op)
    condition_op.input(OPTIONS).val
  end
  
  # Get predessor operation input REPLICATES
  def get_replicate_num(condition_op)
    condition_op.input(REPLICATES).val.to_i
  end
  
  # Get predessor operation input CONTROL
  def get_control_tag(condition_op)
    { 'Control' => condition_op.input(CONTROL).val }
  end
  
  # Get predessor operation input STRAIN, MEDIA, ANTIBIOTICS
  def get_base_culture_components(condition_op)
    base_component_fvs = condition_op.field_values.select {|fv| ([STRAIN, MEDIA, ANTIBIOTICS].include? fv.name) && (fv.role == 'input') }
    culture_component_arr = base_component_fvs.map {|fv| FieldValueParser.get_args_from(obj: fv) }.flatten.reject {|component| component.empty? }
    return culture_component_arr
  end
  
  # Uses class methods from module FieldValueParser to parse out inducer combination JSON parameters
  def format_induction_components(condition_op)
    inducer_fv = get_inducer_fieldValue(condition_op)
    formatted_inducer_components = FieldValueParser.get_args_from(obj: inducer_fv)
  end
  
  # Get predessor operation input INDUCERS
  def get_inducer_fieldValue(condition_op)
    condition_op.field_values.select {|fv| fv.name == INDUCERS }.first
  end
  
  # Generate inducer component objects to create the combinatorial induction conditions for multiplexed(2 or more) inducers
  def induction_culture_component_generator(formatted_inducer_components, &block)
    formatted_inducer_components.each {|inducer_component| yield inducer_component } 
  end
  
  # Create an array of culture condition objects, to instatiate class CultureComposition. Generate an array, with base culture conditions, for each formatted inducer combination.
  #
  # @params culture_component_arr [Array] array of hash objects each representing a component of a experimental microbial culture
  # @params formatted_inducer_components [Array] array of hash objects each representing an inducer component. An inducer component can be comprised of more than one inducer.
  # @returns culture_condition_arr [2-D Array] an array of arrays. The rows in this matrix represent experimental cultures, these arrays are used to instantiate class CultureComposition
  def distribute_inducer_components(culture_component_arr:, formatted_inducer_components:)
    culture_condition_arr = []
    if formatted_inducer_components
      induction_culture_component_generator(formatted_inducer_components) {|inducer_component| culture_condition_arr.push(culture_component_arr.dup.push(inducer_component).flatten) }
    else
      culture_condition_arr.push(culture_component_arr.dup)
    end
    return culture_condition_arr
  end
  
  # Copy the properties of a given field value. This is used to generate and plan more output FieldValues if not enough output culture plates are planned.
  #
  # @params fv [FieldValue] the input or output of an operation. The green or orange bubbles seen in the designer GUI.
  def get_fv_properties(fv)
    {
      name: fv.name,
      role: fv.role,
      field_type_id: fv.field_type_id,
      allowable_field_type_id: fv.allowable_field_type_id,
      parent_class: fv.parent_class,
      parent_id: fv.parent_id
    }
  end
  
  # Instantiate a new FieldValue
  # 
  # @params args [Hash] hash object with FieldValue properties needed to duplicate a FieldValue
  def create_new_fv(args={})
    fv = FieldValue.new()
    (args) ? set_fv_properties(fv, args) : nil
    fv.save()
    return fv
  end
  
  # Set the properties of a FieldValue from a hash object
  def set_fv_properties(fv, args={})
    args.each {|k,v| fv[k] = v }
    fv.save()
    return fv
  end
  
end # Protocol

test:
class ProtocolTest < ProtocolTestBase

  def setup

      add_random_operations(3) # defines three random operations

      add_operation            # adds a custom made operation
        .with_input("Primer", Sample.find(3))
        .with_property("x", 123)
        .with_output("Primer", Sample.find(3))

  end

  def analyze
      log "Hello from Nemo"
      assert_equal @backtrace.last[:operation], "complete"
  end

end

object_types:
  - {name: 96 Well PCR Plate, description: A 96 Well plate that can fit into a thermocycler., handler: collection, unit: plate, release_method: return, rows: 8, columns: 12, sample_type_name: Yeast Strain}
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operation_type: Make Glycerol Stock Plates
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culture Plate, object_types: [Eppendorf 96 Deepwell Plate], routing: P}
  - {ftype: sample, role: output, name: Glycerol Stock Plate, object_types: [96 Well PCR Plate], array: true, routing: GP}
  - {ftype: number, role: input, name: Delete Input Plate, choices: Yes, No}
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documentation:
This protocol will show you how to prepare glycerol stock plates in a High Throughput Plate.
This operation also transfers the culture conditions and an experimental materials list for that given collection of glycerol stocks.

    1. Gather materials and label new containers.
    
    2. Pre-fill collection with glycerol and resuspend culture at a 1:1 ratio.
    
    3. Store plates at -80#{DEGREES_C}

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protocol:
needs "Standard Libs/Debug"
needs "Standard Libs/Units"
needs "Tissue Culture Libs/CollectionDisplay"
needs "High Throughput Culturing/HighThroughputHelper"
needs "High Throughput Culturing/CultureComposition"

class Protocol
  include Debug, Units
  include CollectionDisplay
  include HighThroughputHelper
  
  # DEF 
  INPUT  = "Culture Plate"
  OUTPUT = "Glycerol Stock Plate"
  INPUT_DELETE = "Delete Input Plate"
  
  # Constants
  GLYCEROL_PER_WELL = 20#ul
  CULTURE_PER_WELL  = 20#ul
  
  def intro
    show do 
      title "Making Glycerol Stock Plates"
      separator
      note "This protocol will show you how to prepare glycerol stock plates in a High Throughput Plate."
      note "This operation also transfers the culture conditions and an experimental materials list for that given collection of glycerol stocks."
      note "<b>1.</b> Gather materials and label new containers."
      note "<b>2.</b> Pre-fill collection with glycerol and resuspend culture at a 1:1 ratio."
      note "<b>3.</b> Store plates at -80#{DEGREES_C}"
    end
  end
  
  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  def main
    intro
    operations.make
    operations.each do |op| 
      input_collection = op.input(INPUT).collection
      # stamp transfer part data from input collection to all of the collections in the output array
      output_glycerol_stock_plates = op.output_array(OUTPUT).collections
      output_glycerol_stock_plates.each do |glycerol_stock_plate|
        part_data_matrix = stamp_transfer(from_collection: input_collection, to_collection: glycerol_stock_plate, process_name: 'Aliquot')
        glycerol_stock_plate.associate(key='experimental_materials_list', value=get_experimental_materials_list(part_data_matrix))
        gather_materials(empty_containers: [glycerol_stock_plate], transfer_required: false, new_materials: ["50% Glycerol", "Aluminum Adhesive Seals"], take_items: [])
        prepare_seal(glycerol_stock_plate)
        prepare_multichannel_stripwell(glycerol_stock_plate)
        pre_fill_glycerol_stock_plate(glycerol_stock_plate)
        transfer_culture_and_inoculate(input_collection: input_collection, glycerol_stock_plate: glycerol_stock_plate)
        glycerol_stock_plate.location = "-80#{DEGREES_C} Freezer"
        glycerol_stock_plate.save
      end
      if op.input(INPUT_DELETE) == "Yes"
        input_collection.mark_as_deleted # TODO: Add keep plate parameter!!
      end
    end
    cleaning_up
    {operations: operations}
  end # main
  
  def cleaning_up
    show do
      title "Cleaning Up..."
      separator
      note "Make sure trash is placed in the proper disposal."
      note "Make sure that #{operations.map {|op| op.inputs[0].collection.id}} plates are placed in the sink and soaked with bleach."
    end
    operations.store
  end
  
  def transfer_culture_and_inoculate(input_collection:, glycerol_stock_plate:)
    show do 
      title "Transfer Cultures from #{input_collection} to #{glycerol_stock_plate}"
      separator
      warning "Make sure both plates are in the same orientation."
      note "Transfer and resuspend, #{CULTURE_PER_WELL}#{MICROLITERS} per culture."
      note "<b>From #{input_collection} #{input_collection.object_type.name}"
      note "<b>To #{glycerol_stock_plate} #{glycerol_stock_plate.object_type.name}"
      bullet "Resuspend 5 times"
      note "Take a labeled aluminum adhesive and use it to seal the #{glycerol_stock_plate.object_type.name} #{glycerol_stock_plate.id}."
      check "Finally, set aside until all plates are prepared."
    end
  end

  def pre_fill_glycerol_stock_plate(glycerol_stock_plate)
    show do
      title "Fill #{glycerol_stock_plate} #{glycerol_stock_plate.object_type.name}"
      separator
      note "Follow the table below to pre-fill the glycerol stock plate with <b>50% glycerol</b>:"
      bullet "Use a multichannel pipette where convenient"
      table highlight_alpha_non_empty(glycerol_stock_plate) {|r,c| "#{GLYCEROL_PER_WELL}#{MICROLITERS}" }
    end
  end
  
  def prepare_seal(glycerol_stock_plate)
    show do
      title "Prepare Label"
      separator
      check "Take an Aluminum Seal"
      check "Label the seal with the following:"
      bullet "GSP #{glycerol_stock_plate.id}"
      bullet "Today's Date"
      bullet "Your Initials"
      check "Set aside until you are ready to seal the prepared plate."
    end
  end
  
  def get_total_glycerol_volume_ul(collection)
    HighThroughputHelper.add_extra_vol(int: collection.get_non_empty.length*GLYCEROL_PER_WELL)
  end
  
  def get_total_glycerol_volume_ml(glycerol_ul)
    (glycerol_ul/1000.0).round(2)
  end
  
  def prepare_multichannel_stripwell(collection)
    sw, aliquot_matrix, rc_list = multichannel_vol_stripwell(collection)
    show do
      title "Prepare Multichannel Stripwell"
      separator
      check "Gather a 12-Well Stripwell & Holder"
      check "Gather a P100 or P200 Pipette"
      check "You will need #{get_total_glycerol_volume_ml(get_total_glycerol_volume_ul(collection))}#{MILLILITERS} of <b>50% glycerol</b>."
      note "Next, follow the table below to fill the appropriate amount of <b>50% glycerol</b> into each well of the stripwell:"
      table highlight_alpha_rc(sw, rc_list) {|r, c| "#{ HighThroughputHelper.add_extra_vol(int: aliquot_matrix[r][c]*GLYCEROL_PER_WELL).round(2) }#{MICROLITERS}" }
      bullet "Give a quick spindown to avoid air bubbles!"
      check "Gather a P20 Multichannel Pipette"
    end
    sw.mark_as_deleted
  end
  
  # Used for multichannel pipetting, creates a stripwell to display with the number of aliquots of the desired reagents
  #
  # @params collection [colleciton obj] is the collection that you be aliquoting reagent to
  # @returns sw [collection obj] the stripwell obj that will be used to display
  # @returns aliquot_matrix [2D-Array] is the matrix that contains the information of how many aliquots of reagents go in each well
  # @returns rc_list [Array] is a list of [r,c] tuples that will be used to display which wells are to be used for aliquots
  def multichannel_vol_stripwell(collection)
      # Create a stripwell to display
      sw = make_stripwell
      # Create a matrix the size of the stripwell
      aliquot_matrix = Array.new(sw.object_type.rows) { Array.new(sw.object_type.columns) {0} }
      collection.get_non_empty.each {|r, c| aliquot_matrix[0][c] += 1}
      rc_list = []
      aliquot_matrix.each_with_index {|row, r_i| row.each_with_index {|col, c_i| (col == 0) ? EMPTY : rc_list.push([r_i, c_i]) } }
      return sw, aliquot_matrix, rc_list
  end    
  
  def make_stripwell
    sw_obj_type = ObjectType.find_by_name('stripwell')
    sw = Collection.new()
    sw.object_type_id = sw_obj_type.id
    sw.apportion(sw_obj_type.rows, sw_obj_type.columns)
    sw.quantity = 1
    return sw
  end
  
  
  def get_experimental_materials_list(part_data_matrix)
    materials_hash = nested_hash_data_structure
    part_data_matrix.flatten.reject {|composition| composition.nil? }.each do |composition|
      composition.each do |component_type, sample_attr|
        if ['Media', 'Inducer(s)', 'Antibiotic(s)'].include? component_type
          sample_attr.each do |sname, attributes|
            item_id   = attributes.fetch(:item_id)
            wk_volume = attributes.fetch(:working_volume)
            ot_name = Item.find(item_id).object_type.name
            if materials_hash[component_type][sname][ot_name].empty?
              materials_hash[component_type][sname][ot_name] = wk_volume
            else
              current_wk_volume = materials_hash[component_type][sname][ot_name]
              if current_wk_volume.fetch(:units) == wk_volume.fetch(:units)
                wk_volume[:qty] = (current_wk_volume.fetch(:qty) + wk_volume.fetch(:qty)).round(3)
                materials_hash[component_type][sname][ot_name] = wk_volume
              else
                # TODO: Consider how to handle different units different units
                # if (1/CultureComponent.unit_conversion_hash[current_wk_vol.fetch(:units)]) < (1/CultureComponent.unit_conversion_hash[wk_volume.fetch(:units)])
                raise "The current working volume #{current_wk_volume} does not have the same units as the new additional working volume #{wk_volume}"
              end
            end
          end
        end
      end
    end
    return materials_hash
  end  
end # protocol

sample_types:
  - {name: Plate Reader Calibration Solution, description: Solutions for plate reader calibration}
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object_types:
  - {name: 1X LUDOX Aliquot, description: An aliquot of LUDOX solution contains silica resuspended in H2O., handler: sample_container, unit: Plate Reader Calibration Solution, release_method: return, sample_type_name: Plate Reader Calibration Solution}
  - {name: 1mM Fluorescein Stock, description: Fluorescein sodium diluted in 1XPBS, handler: sample_container, unit: Plate Reader Calibration Solution, release_method: return, sample_type_name: Plate Reader Calibration Solution}
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operation_type: Plate Reader Calibration
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Optical Particles, sample_types: [Plate Reader Calibration Solution], object_types: [1X LUDOX Aliquot], routing: OP}
  - {ftype: sample, role: input, name: Fluorescent Salt, sample_types: [Plate Reader Calibration Solution], object_types: [1mM Fluorescein Stock], routing: FS}
  - {ftype: sample, role: output, name: Calibration Plate, object_types: [96 Well Flat Bottom (black)], routing: PR}
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documentation:
This protocol will instruct you on how to take measurements to calibrate and compare measurements on the plate_reader.type Plate Reader.
This protocol will also guide you through preparing the calibration plate input item or gathering an unexpired one.

    1. Setup plate_reader.type Plate Reader Software workspace.
    
    2. Check to see if input item is a plate_reader.valid_containers if not, transfer samples to a valid container.
    
    3. Prepare measurement item with blanks.
    
    4. Take measurement, export data, & upload.

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protocol:
# By: Eriberto Lopez 03/14/19
# elopez3@uw.edu

needs "High Throughput Culturing/PlateReaderHelper"
class Protocol
  include PlateReaderHelper
  
  # DEF
  OD_CALIBRATION = "Optical Particles"
  FLOUR_CALIBRATION = "Fluorescent Salt"
  OUTPUT = "Calibration Plate"
  
  # Constants
  MEASUREMENT_TYPE = 'Calibration'
  
  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  def main # Typically one calibration op per Plan
    pr = intro
    new_mtype = true
    pr.measurement_type = MEASUREMENT_TYPE
    operations.group_by {|op| op.input(FLOUR_CALIBRATION).item }.each do |flour_item, ops|
      ops.group_by {|op| op.input(OD_CALIBRATION).item }.each do |optical_item, ops|
        # Based on whether an unexpired calibration plate is made, prepare a calibration plate for measurement
        new_mtype = prep_calibration_plate(pr, ops, OUTPUT, flour_item, optical_item)
        take_measurement_and_upload_data(pr: pr)
        process_and_associate_data(pr: pr,  ops: ops) 
        change_item_location(item: pr.measurement_item, location: "4#{DEGREES_C} Fridge")
      end
    end
    cleaning_up(pr: pr)
  end # Main
end # Protocol

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operation_type: Plate Reader Measurement
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culturing Plate, object_types: [Eppendorf 96 Deepwell Plate, 96 Well Flat Bottom (black)], routing: PR}
  - {ftype: sample, role: output, name: Plate Reader Plate, object_types: [96 Well Flat Bottom (black)], routing: PR}
  - {ftype: sample, role: input, name: Media, sample_types: [Media], object_types: [800 mL Liquid], routing: M}
  - {ftype: string, role: input, name: Type of Measurement(s), choices: Optical Density,Green Fluorescence,Optical Density & Green Fluorescence}
  - {ftype: string, role: input, name: Dilution, choices: None,0.5X, 0.2X,0.1X, 0.01X,0.001X}
  - {ftype: string, role: input, name: Keep Output Plate?, choices: Yes,No}
  - {ftype: string, role: input, name: When to Measure? (24hr)}
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documentation:
This protocol will instruct you on how to take measurements on the plate_reader.type Plate Reader.
Optical Density is a quick and easy way to measure the growth rate of your cultures.
Green Fluorescence helps researchers assess a response to a biological condition in vivo.

    1. Setup plate_reader.type Plate Reader Software workspace.
    
    2. Check to see if input item is a plate_reader.valid_containers if not, transfer samples to a valid container.
    
    3. Prepare measurement item with blanks.
    
    4. Take measurement, export data, & upload.

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protocol:
# By: Eriberto Lopez 03/14/19
# elopez3@uw.edu
needs "High Throughput Culturing/PlateReaderHelper"

class Protocol
  include PlateReaderHelper
  # DEF
  INPUT            = "Culturing Plate"
  OUTPUT           = "Plate Reader Plate"
  MEDIA            = 'Media'
  DILUTION         = "Dilution"
  KEEP_OUT_PLT     = "Keep Output Plate?"
  MEASUREMENT_TYPE = 'Type of Measurement(s)'
  WHEN_TO_MEASURE  = "When to Measure? (24hr)"
  
  # Access class variables via Protocol.your_class_method
  @materials_list = []
  def self.materials_list; @materials_list; end
  
  # TODO: Get time series measurements online
  def main
    pr = intro
    operations.group_by {|op| op.input(MEASUREMENT_TYPE).val.to_sym }.each do |measurement_type, ops|
      new_mtype = true
      pr.measurement_type = measurement_type
      ops.each do |op|
        op = Operation.find(179078) if debug
        # Use class PlateReader to setup the experimental measurement
        pr.setup_experimental_measurement(experimental_item: op.input(INPUT).item, output_fv: op.output(OUTPUT))
        new_mtype = setup_plate_reader_software_env(pr: pr, new_mtype: new_mtype)
        # Gather materials and items
        media_item = get_media_bottle(op)
        take_items = [pr.experimental_item, media_item].flatten.reject {|i| i.nil?}
        gather_materials(empty_containers: [pr.measurement_item], transfer_required: pr.transfer_required, new_materials: ['P1000 Multichannel'], take_items: take_items )
        # Prepare plate for plate reader
        dilution_factor = get_dilution_factor(op: op, fv_str: DILUTION)
        media_vol_ul, culture_vol_ul = get_culture_and_media_vols(dilution_factor: dilution_factor, measurement_item: pr.measurement_item)
        (pr.transfer_required) ? tech_prefill_and_transfer(pr: pr, media_sample: media_item.sample, media_vol_ul: media_vol_ul, culture_vol_ul: culture_vol_ul) : op.pass(INPUT, OUTPUT)
        tech_add_blanks(pr: pr, blanking_sample: media_item.sample, culture_vol_ul: culture_vol_ul, media_vol_ul: media_vol_ul) # Cannot handle a plate without blanks, esp in processing of upload
        take_measurement_and_upload_data(pr: pr)
        process_and_associate_data(pr: pr,  ops: [op], blanking_sample: media_item.sample, dilution_factor: dilution_factor)
        # Keep new measurement plate that was created?
        (pr.transfer_required) ? (keep_transfer_plate(pr: pr, user_val: get_parameter(op: op, fv_str: KEEP_OUT_PLT).to_s.upcase)) : (pr.measurement_item.location = 'Bench')
      end
    end 
    cleaning_up(pr: pr)
  end # Main
end # Protocol

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operation_type: To Single Colonies
category: High Throughput Culturing
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Yeast Inoculum, sample_types: [Yeast Strain, Yeast Strain], object_types: [Yeast Glycerol Stock, Yeast Overnight Suspension], routing: C}
  - {ftype: sample, role: output, name: Plate, sample_types: [Yeast Strain], object_types: [Yeast Plate], routing: C}
  - {ftype: string, role: input, name: Media, choices: YPAD,SC,SDO,SDO -His,SDO -Leu,SDO -Trp,SDO -Ura,SDO -His -Leu,SDO -His -Trp,SDO -His -Ura,SDO -Leu -Trp,SDO -Leu -Ura,SDO -Trp -Ura,SDO -His -Leu -Trp,SDO -His -Leu -Ura,SDO -His -Trp -Ura,SDO -Leu -Trp -Ura}
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documentation:
This protocol will guide you in streaking out cells onto an agar plate in order to generated isolated colonies.

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cost_model:
# def cost(_op)
#   { labor: 0, materials: 0 }
# end
def cost(_op)
  { labor: 1.26, materials: 1.21 }
end

# 1 whole YPD plate
# time is 3.78 mins

protocol:
# By: Eriberto Lopez 01/22/18
# elopez3@uw.edu

needs "Standard Libs/Debug" 

class Protocol
  include Debug
  
  # DEF
  INPUT = "Yeast Inoculum"
  OUTPUT = "Plate"
  MEDIA = "Media"
  
    
  def main
    intro
    get_plates
    operations.make
    # Grab materials and label plates
    gly_stks, cultures = gather_materials
    streak_plates(gly_stks, cultures)
    # Move new plates to incubator
    plates = operations.running.map { |op| op.output(OUTPUT).item.move "30C incubator" }
    release(plates, interactive: true)
    if cultures.empty? == false then discard_cultures(cultures) end
    return {}
  end # Main
  
  # Make a list of all the operations with each unique plate type
  def get_media_types()
    operations.map {|op| op.input(MEDIA).val.to_str }.uniq
  end
  
  def check_media_type_plate_inventory()
    ##The following block will error out any operations for which we don't actually have plates available. 
    groupby_media_type = operations.group_by {|op| op.input(MEDIA).val.to_str }
    groupby_media_type.each do |mt, media_ops|
      media_sample = Sample.find_by_name(mt)
      plates_needed = media_ops.length
      batches = Collection.where(object_type_id: ObjectType.find_by_name("Agar Plate Batch").id).select {|b| b.matrix.first.include? media_sample.id } #Find the plate batches
      #Check how many plates of this media type we actually have available, and see how that relates to the number of plates we need. 
      plates_available = 0; batches.each {|b| plates_available = plates_available + b.num_samples }
      difference = plates_needed - plates_available
      # If we have a shortfall o plates we need to error out that number of operations. 
      if difference > 0
        ops_to_error = media_ops[0..difference]
        ops_to_error.each do |op|
          op.error :plate_needed, "Not enough agar plates of the required media type available - #{op.input(MEDIA).val.to_str}"
        end
        #A little note so the technicians understand why there are now fewer operations running
        show do 
          title "More plates required"
          note "#{difference} operations have been errored because there are not enough plates of the type #{media_sample.name}"
        end
      end
    end
  end
  
  def get_plates
    ##The following block will error out any operations for which we don't actually have plates available. 
    check_media_type_plate_inventory
    ##Having errored out some operations we need to again check how many plates we're now looking for and send the technician to go get them. 
    ##So we're going to update our variables to reflect the fact that we errored out some operations. 
    groupby_media_type = operations.running.group_by {|op| Sample.find_by_name(op.input(MEDIA).val.to_s) }
    groupby_media_type.each do |media_sample, media_ops|
      plates_needed = media_ops.length #How many plates do we need of this media type?
      batches = Collection.where(object_type_id: ObjectType.find_by_name("Agar Plate Batch").id).select { |b| b.matrix.first.include? media_sample.id } #Find the plate batches
      # Work out which batches we need to take the plates from and update the inventory to reflect the removed plates. 
      # We're also going to keep track of all batches that will be touched to be able to instruct the technicians. 
      # This is consdering that we may need to take all plates from one batch and then also a few more from another batch. 
      batch_ids = []
      plates_needed.times do 
        batch_id = batches.first.id
        batch_ids.push(batch_id.to_s)
        batches.first.remove_one media_sample
        batches = Collection.where(object_type_id: ObjectType.find_by_name("Agar Plate Batch").id).select { |b| b.matrix[0].include? media_sample.id }
      end
      unique_batch_ids = batch_ids.uniq
      #Finally we can instruct the technician to get the plates. 
      show do 
        title "Retrieve #{media_sample.name} plates"
        check "From the media fridge retrieve #{plates_needed} plates from the tupperware container labeled: #{media_sample.name}, #{unique_batch_ids}"
      end
    end
  end
  
  def intro()
    container = operations.running.map {|op| op.input(INPUT).object_type.name}.uniq
    img = "Actions/Yeast_Gates/t_streak_method.png" #ie: image "Actions/FlowCytometry/saveFCS_menu_cropped.png"
    show do 
      title "Introduction"
      separator
        if container.length == 1
          note "In this protocol you will isolate single colonies from a #{container.first} using the T-streak technique."
        elsif container.length >1
          note "In this protocol you will isolate single colonies from the object types: #{container} using the T-streak technique."
        end
      image img
    end
  end
  
  def gather_materials()
    groupby_input_object_type = operations.running.group_by {|op| op.input(INPUT).item.object_type.name }
    gly_stks = groupby_input_object_type.fetch("Yeast Glycerol Stock", []).map {|op|  op.input(INPUT).item }
    cultures = groupby_input_object_type.fetch("Yeast Overnight suspension", []).map {|op|  op.input(INPUT).item }
    plate_ids = operations.running.map {|op| op.output(OUTPUT).item.id }
    show do
      title "Materials for Plate Streaking"
      separator
      check "Box of P1000 tips."
      check "Box of P100 tips and P100 pipette"
      check "Sharpie Pen"
      check "Label plate(s): <b> #{plate_ids}</b>"
    end
    return gly_stks, cultures, plate_ids
  end
  
  def streak_plates(gly_stks, cultures)
    img1 = "Actions/Yeast_Gates/initial_innoculation_new.png"
    img2 = "Actions/Yeast_Gates/second_streak_new.png"
    img3 = "Actions/Yeast_Gates/third_streak_incubation_new.png"
    show do
      title "Inoculation from glycerol stock in M80 area"
      separator
      check "Go to M80 area, clean out the pipette tip waste box, clean and sanatize area."
      check "Put on new gloves, and bring a new tip box (blue: 100 - 1000 uL) and an Eppendorf tube rack to the M80 area."
      check "Grab the plates and go to M80 area to perform inoculation steps in the next pages."
      image "Actions/Streak Plates/streak_yeast_plate_setup.JPG"
    end
    # Sorting glycerol stocks by box and location
    gly_stks.sort! {|x, y| x.location.split('.')[1..3] <=> y.location.split('.')[1..3]} # Sorts by the box number Fridge.X.X.X
    items_grouped_by_box = gly_stks.group_by {|i| i.location.split('.')[1]}
    items_grouped_by_box.each {|box_num, item_arr| # Groups by box then takes by box location
      take item_arr, interactive: true, method: "boxes"
    }
    (!cultures.nil?) ? (take cultures, interactive: true) : (nil)
    show do 
      title "Streak Out on Plate"
      separator
      note "Streak out the initial innoculation as shown in the example below - a slightly bigger patch is better."
      if cultures.empty? == false
          note "<b>For liquid cultures</b> use a pipette to drop 10 µl onto the plate as the initial inoculum"
      end
      image img1
      note "Streak out the Yeast Glycerol Stock on the plate(s) according to the following table: "
      table operations.start_table
        .input_item(INPUT, heading: "Yeast stock/culture ID")
        .output_item(OUTPUT, heading: "Yeast Plate ID", checkable: true)
      .end_table
      note "Continue on the the next steps to isolate single colonies."
    end
    release(gly_stks,interactive: true)
    show do
      title "Isolating Single Colonies"
      separator
      note "Next, with a new P1000 pipette tip streak out from the initial patch made."
      note "Use the image as an example."
      image img2
      note "Repeat this once more with a clean P1000 tip."
      image img3
    end
  end
  
  def discard_cultures(cultures)
    show do
      title "Discard overnight suspensions"
      note "Place the following tubes in the cleaning rack by the sink to be bleached and disposed of"
      cultures.each do |on|
          check "#{on.id}"
        end
     end
    cultures.each do |on|
      on.mark_as_deleted
      on.save
     end
  end
end # Class

library: {name: CultureComposition, category: High Throughput Culturing}
code_source:
# By: Eriberto Lopez 
# elopez3@uw.edu
# Last Edit Checkpoint: 081419

needs "Standard Libs/Units"

# This class generates a data structure that describes multiple SampleTypes in order to represent an experimental microbial culture. 
# For each instance, it will calculate how much volume of each component is required to generate the desired culture composition.
# It then merges all components into a single data structure which represents the composition and the experimental intent of the user.
#
# @author Eriberto Lopez - elopez3@uw.edu
# @since 07/22/19
# 
# @param component_arr [array] is an array of hashes that comes from formatted 'Define Culture Conditions' FieldValues
# @param object_type [object] is the ObjectType of the container that will be used for culturing, this is necessary to calculate working volumes for all components in the culture.
# @param opts [hash] is a hash that is used for prototyping and adding addiitonal functionality without interupting core functions. Generally, not used.
# 
# @attr [hash] culture_volume is a hash that represents the total culture volume
# @attr [array of classes] components is an array of instatiated CultureComponent classes. Each with it's default volumes and items.
# @attr [hash] composition is a hash that represents a culture with multiple samples types or multiple combinations of similar sample types.
# @attr [hash] options is a hash that is used for prototyping and adding addiitonal functionality without interupting core functions. Generally, not used.
class CultureComposition
  
  attr_accessor :culture_volume, :components, :composition, :options
  
  def initialize(component_arr:, object_type:, opts: {})
    @components  = component_arr.map {|component| CultureComponent.new(component) }
    @culture_volume = get_container_properties(key: 'working_vol', object_type: object_type)
    @options     = opts
    update_culture_components_working_vol # Will calculate how much of each component is needed based on prev calc dilution factor
    @composition = generate_composition_data_structure
  end

  def get_component_attr(component)
    {
      component.sample.name => {
        item_id: component.item.id,
        item_concentration: component.stock_concentration,
        final_concentration: component.final_concentration,
        dilution_factor: component.dilution_factor,
        working_volume: component.working_vol
      }
    }
  end
  
  def generate_composition_data_structure
    data_structure = {}
    components.group_by {|c| c.input_name }.each do |input_name, components|
      components.each do |component|
        if data_structure.keys.include? input_name
          data_structure[input_name].merge!(get_component_attr(component))
        else
          data_structure[input_name] = get_component_attr(component)
        end
      end
    end
    data_structure["Option(s)"] = options
    data_structure["Culture_Volume"] = culture_volume
    return data_structure
  end

  def update_culture_components_working_vol
    components.each {|component| get_component_working_vol(component) }
    get_media_working_vol # After all of the additional components have been calculated, take the remainder vol and fill with media
  end
  
  def get_media_working_vol
    total_volume = culture_volume[:qty].to_f
    components.each {|component| total_volume -= component.working_vol.fetch(:qty).to_f }
    media_component = components.select {|c| c.input_name == "Media"}.first
    media_component.working_vol[:qty] = total_volume.round(3)
  end
  
  def get_component_working_vol(component)
    df = component.dilution_factor
    if !df.nil?
      component_working_vol_qty = culture_volume[:qty]*df
      component.working_vol = format_measurement(component_working_vol_qty, component.working_vol[:units])
    end
  end
  
  def format_measurement(qty, units)
    {qty: qty.to_f.round(2), units: units}
  end
  
  def get_container_properties(key:, object_type:)
    if object_type.data.include? key
      qty, units = JSON.parse(object_type.data)[key].split('_')
    else
      raise "The container that you are attempting to grow a culture in does not have a #{key} reference in it's container definition.
      Please update the #{object_type.name} object type definition!"
    end
    return format_measurement(qty, units)
  end
end # class CultureComposition

# This class instantiates a formatted culture component for the desired experimental condition. 
# A formatted hash object is used to instantiate this class to represent an experimental culture component. 
# A list of multiple CultureComponent instances is then used by the CultureComposition class, to build up the culture.composition data structure to represent an experimental culture.
#
# @author Eriberto Lopez - elopez3@uw.edu
# @since 07/22/19
#
# @param args [Hash] is a hash object with keys related to the attributes of this class
#
# @attr working_vol [Hash] object representing how much volume of a instantiated CultureComponent is required ie: {qty: 100, units: 'microliters'}
# @attr_reader  input_name [string] the name of the Aq sample describing the culture component
# @attr_reader  sample [Sample] the sample of the component
# @attr_reader  item [Item] the item from which the component is take from
# @attr_reader  stock_concentration [Hash] object representing the concentration of the item used in the culture {qty: 100, units: 'mM'}
# @attr_reader  final_concentration [Hash] object representing the desired final concentration of the component used in the culture {qty: 100, units: 'nM'}
# @attr_reader  dilution_factor [int] the computed amount of dilution required to dilute the stock_concentration to reach the desired final_concentration
# @attr_reader  added [boolean] a way to determine whether a component has been added to the culture
class CultureComponent
  include Units
  attr_accessor :working_vol
  attr_reader :input_name, :sample, :item, :stock_concentration, :final_concentration, :dilution_factor, :added
  
  def initialize(args={})
    @input_name = args.fetch(:input_name)
    @sample = args.fetch(:sample)
    @item = args.fetch(:item, nil)
    @final_concentration = args.fetch(:final_concentration, nil)
    @working_vol = { qty: 0, units: MICROLITERS }
    get_component_type_attributes#(args) May should add back args but dont think its needed
    @added = false
  end
  
  def get_component_type_attributes#(args) #May should add back args but dont think its needed
    case input_name
    when "Strain"
    when "Media"
    when "Control Tag"
    when "Inducer(s)"

      #if item.class == Hash then there is no stock.  Check here makes debugging easier
      if item.class == Hash 
        raise "Inducer not in stock, check all inducers for existing stock"
      end

      qty, units, name = item.object_type.name.split(' ')
      set_stock_item_concentration(qty: qty.to_f, units: units)
      set_dilution_factor(val: calculate_dilution_factor(stock_conc: stock_concentration, final_conc: final_concentration))
    when "Antibiotic(s)"
      @item = (item.nil?) ? (sample.items.select {|i| i.object_type.name == 'Antibiotic Aliquot'}.first) : item
      qty, units = sample.properties['Recommended Working Concentration (ug/mL)'], 'ug/mL' # Aliquots always have the same units
      set_stock_item_concentration(qty: qty.to_f, units: units)
      (final_concentration[:units] == units) ? (set_dilution_factor(val: final_concentration[:qty]/qty)) : (raise "The antibiotic units are not compatable in CultureComponent class")
    else 
      raise "#{input_name} is not a valid type of culture component. Please update class CultureComponent!"
    end
  end
  
  def set_stock_item_concentration(qty:, units:)
    units = (units == 'uM') ? MICROMOLAR : units
    @stock_concentration = { qty: qty.to_f, units: units }
  end
  
  def set_dilution_factor(val:)
    @dilution_factor = val
  end
  
  def calculate_dilution_factor(stock_conc:, final_conc:)
    stock_units = stock_conc[:qty]*CultureComponent.unit_conversion_hash[stock_conc[:units]]
    final_units = final_conc[:qty]*CultureComponent.unit_conversion_hash[final_conc[:units]]
    return (final_units/stock_units).round(4)
  end
  
  def self.unit_conversion_hash
    { NANOMOLAR => 10e-9, MICROMOLAR => 10e-6, 'uM' => 10e-6, MILLIMOLAR => 10e-3, MOLAR => 10e0 }
  end
end # CultureComponent


# Parses out JSON parameters & non-JSON parameters from the Define Culture Conditions operation.
module FieldValueParser
    
  def self.get_args_from(obj:)
    if obj.is_a? FieldValue
      case obj.name
      when "Strain", "Media"
        args_arr = FieldValueParser.get_non_parameter_args(fv: obj)
      when "Inducer(s)"
        args_arr = FieldValueParser.get_inducer_args(fv: obj)
        args_arr = FieldValueParser.generate_component_combinations(args_arr)
      when "Antibiotic(s)"
        args_arr = FieldValueParser.get_antibiotic_args(fv: obj)
      when "Option(s)"
        # Pass
      else
        raise "#{obj.name} is not a field value that can be parsed class."
      end
    else
      raise "#{obj.class} is not able to be used to initialize the CultureComposition class."
    end
    return args_arr
  end
  
  def self.get_antibiotic_args(fv:)
    args_arr = []
    JSON.parse(fv.value).each do |sname, opts|
      sample = Sample.find_by_name(sname)
      final_concentration = opts.fetch('final_concentration') 
      f_qty, f_units = final_concentration.split('_')
      args_arr.push({
        input_name: fv.name, 
        sample_name: sname,
        sample: sample,
        item: nil,
        final_concentration: {qty: f_qty.to_f, units: f_units}
      })
    end
    return args_arr
  end

  def self.get_non_parameter_args(fv:)
    {
      input_name: fv.name,
      sample_name: fv.sample.name,
      sample: fv.sample,
      item: fv.item
    }
  end
  
  def self.generate_component_combinations(args_arr)
    groupby_types = args_arr.group_by {|args| args.fetch(:sample_name) }
    num_of_components = groupby_types.keys.length
    if num_of_components > 1
      combinations = args_arr.combination(num_of_components).to_a.select {|combo| 
        combo.map {|args| args.fetch(:sample_name) }.uniq.length == num_of_components
      }
      return combinations
    else
      return (groupby_types.nil? ? groupby_types : groupby_types.values.first)
    end
  end
  
  def self.get_inducer_args(fv:)
    args_arr = []
    JSON.parse(fv.value).each do |sname, opts|
      sample = Sample.find_by_name(sname)
      final_concentration = opts.fetch('final_concentration')
      if final_concentration.is_a? Array
        sample_inventory = sample.items.reject {|item| item.location == 'deleted' }
        final_concentration.each_with_index do |fconc, idx|
          f_qty = fconc.split('_')[0].to_f; f_units = fconc.split('_')[1]
          item_id = opts.fetch('item_id', nil)
          if item_id.nil?
            item = FieldValueParser.get_inducer_component_item(sample: sample, sample_inventory: sample_inventory, fconc: fconc) 
          else
            item = (item_id.is_a? Array) ? Item.find(item_id[idx].to_i) : Item.find(item_id.to_i)
          end
          args_arr.push({
            input_name: fv.name, 
            sample_name: sname,
            sample: sample,
            item: item,
            final_concentration: {qty: f_qty, units: f_units}
          })
        end
      end
    end
    return args_arr
  end
  
  # This function helps Aq automatically find an inducer item when given the sample, the sample_inventory (all items that are not deleted), and the desired final_concentration
  # It selects the item by finding the dilution factor of the final_concentration divided by an item in the sample_inventory. If it is greater than a 0.001 fold dilution then it selects that item.
  # It must be greater than a 0.001 dilution in order to pipette accurately.
  def self.get_inducer_component_item(sample:, sample_inventory:, fconc:)
    inventory_by_object_type = sample_inventory.group_by {|item| item.object_type.name }
    f_qty = fconc.split('_')[0].to_f; f_units = fconc.split('_')[1]
    if f_qty <= 0.0
      item = sample_inventory.first
    else
      final_units = f_qty * CultureComponent.unit_conversion_hash[f_units] rescue (raise "#{sample.id} #{fconc}")
      inventory_by_object_type.each do |otname, item_arr|
        s_qty = otname.split(' ')[0].to_f; s_units = otname.split(' ')[1]
        stock_units = s_qty * CultureComponent.unit_conversion_hash[s_units]
        dilution_factor = (final_units/stock_units).round(4)
        if dilution_factor < 0.001
          next
        else
          return item_arr.first # return the lowest item_id or the oldest item
        end
        raise MissingInducerComponentItemError.new(sample: sample, final_concentration: fconc)
      end
    end
  end

  # Exception class for finding an inducer item that can be diluted accurately to reach the desired final concentration.
  #
  # @attr_reader [String] name  the name of the object type where measure has was expected TODO: Documentation
  class MissingInducerComponentItemError < StandardError
    attr_reader :sample_name, :final_concentration
    def initialize(msg: "A suitible inducer item cannot be found to reach the final concentration desired. Please add an object type to the inducer sample or add an item to its inventory", sample_name:, final_concentration:)
      @sample_name = sample_name
      @final_concentration = final_concentration
      super(msg)
    end
  end
  
end # module FieldValueParser

library: {name: FlowCytometryCalibration, category: High Throughput Culturing}
code_source:
needs "High Throughput Culturing/FlowCytometryHelper"
module FlowCytometryCalibration
  include AssociationManagement
  
  BEAD_SAMPLE_KEY = 'BEAD_UPLOAD'.freeze
  
  # Defines class FlowCytometry instance variables experimental_item and the measurement_item when measuring calibration beads on the flow cytometer
  #
  # @param flow_cytometer [class instance] instance of the flow cytometer
  # @param bead_item [Item] is the item from the input FieldValue of the Flow Cytometer Calibration
  def setup_calibration_measurement(flow_cytometer:, bead_item:)
    flow_cytometer.experimental_item = bead_item
    diluted_bead_items = bead_item.sample.items.reject {|item| item.location == 'deleted' || item.object_type.name == bead_item.object_type.name }
    if diluted_bead_items.empty?
      flow_cytometer.measurement_item = create_diluted_bead_item(bead_item)
    else
      flow_cytometer.measurement_item = diluted_bead_items[-1]
    end
  end
  
  # Generates a new virtual diluted bead item
  #
  # @param bead_item [Item] is the item from the input FieldValue of the Flow Cytometer Calibration
  # @return diluted_bead_item [Item] is a new Diluted bead item used for Calibration
  def create_diluted_bead_item(bead_item)
    diluted_bead_item = Item.new()
    diluted_bead_item.object_type = ObjectType.find_by_name('Diluted beads')
    diluted_bead_item.sample = bead_item.sample
    diluted_bead_item.quantity = 1
    diluted_bead_item.location = bead_item.location
    return diluted_bead_item
  end
  
  # Guides technician in preparing diluted beads from bead_item stock
  # 
  # @param flow_cytometer [class instance] instance of the flow cytometer
  def dilute_beads(flow_cytometer:)
    bead_item = flow_cytometer.experimental_item
    take [bead_item], interactive: true
    show do 
      title "Prepare #{bead_item.sample.name} #{bead_item} for Calibration"
      separator
      check "Grab a new, clean 1.5mL microfuge tube and label: <b>#{flow_cytometer.measurement_item}</b>"
      check "Next, add <b>1mL</b> of Molecular Grade H2O to the tube"
      check "Dispense a drop of each dropper found in the #{bead_item.sample.name} box (ie: Spherotech beads white cap & brown cap)."
      check "Vortex for 10 seconds"
      check "Spin down briefly"
    end
  end
  
  # Prepares calibration beads by determining whether current beads are reusable
  #
  # @param flow_cytometer [class instance] instance of the flow cytometer
  def prepare_calibration_beads(flow_cytometer:)
    if flow_cytometer.experimental_item.id == flow_cytometer.measurement_item.id
      take [flow_cytometer.measurement_item], interactive: true
      reuse_bead_item(flow_cytometer: flow_cytometer)
    else
      dilute_beads(flow_cytometer: flow_cytometer)
    end
  end
  
  # Deterimines if the beads are expired (>4weeks) or if there is not enough volume for the calibration
  # 
  # @param flow_cytometer [class instance] instance of the flow cytometer
  def reuse_bead_item(flow_cytometer:)
    if past_expiration?(flow_cytometer: flow_cytometer)
      flow_cytometer.measurement_item.mark_as_deleted
      diluted_bead_item = create_diluted_bead_item(flow_cytometer.experimental_item)
      flow_cytometer.measurement_item = diluted_bead_item
      dilute_beads(flow_cytometer: flow_cytometer)
    else
      respose = show do
        title 'Enough Volume to Continue?'
        separator
        note "Is there at least 0.5mL in #{flow_cytometer.measurement_item.object_type.name} #{flow_cytometer.measurement_item}?"
        select ['Yes','No'], var: 'response', label: "Is there at least 500ul?.", default: 0
      end
      if respose[:response] == 'Yes'
        flow_cytometer.measurement_item.mark_as_deleted
        diluted_bead_item = create_diluted_bead_item(flow_cytometer.experimental_item)
        flow_cytometer.measurement_item = diluted_bead_item
        dilute_beads(flow_cytometer: flow_cytometer)
      end
    end
  end
  
  # Determine if the beads are older than a month old
  def past_expiration?(flow_cytometer:)
    timepoint = Time.now()
    this_week = timepoint.strftime('%W').to_i
    expiration_week = flow_cytometer.measurement_item.week.to_i+5
    if this_week >= expiration_week
      return true
    else
      return false
    end
  end
  
  # Associate all `uploads` to the `target` DataAssociator. The keys of each upload will be
  # the concatenation of `key_name` and that upload's id.
  # Associating fcs files to the plan and operation makes fcs data of any specific well
  # easily accessible to users
  #
  # @param key_name [String] the name which describes this upload set
  # @param target [Aq Model] can be any Aq model class that can have associations
  # @param uploads [Array<Upload>] An Array containing several Uploads
  # @effects  associates all the given uploads to `plan`, each with a
  #         unique key generated from the combining `keyname` and upload id
  def associate_uploads(key_name, target, uploads)
    if target
      associations = AssociationMap.new(target)
      uploads.each do |up|
        associations.put("U#{up.id}_#{key_name}", up)
      end
      associations.save
    end
  end
  
  def process_and_associate_calibration(instrument:, ops:)
    calibration_measurement_upload = [instrument.measurement_data.fetch(:uploads).first]
    associate_uploads('BEADS_uploads', instrument.measurement_item, calibration_measurement_upload)
    ops.each do |op|
      associate_uploads(BEAD_SAMPLE_KEY, op, calibration_measurement_upload)
      associate_uploads(BEAD_SAMPLE_KEY, op.plan, calibration_measurement_upload)
    end
  end
  
end # module FlowCytometryCalibration

library: {name: FlowCytometryConstants, category: High Throughput Culturing}
code_source:
# Flow Cytometry Constants 
ALLOWABLE_FC_SAMPLETYPES = ["Plasmid", "Yeast Strain", "E coli strain"].freeze # Cultures
SAMPLE_UPLOAD_KEY = 'SAMPLE_UPLOAD'.freeze
BEAD_UPLOAD_KEY = 'BEAD_UPLOAD'.freeze

# Flow Cytometry instance constants
KLAVINS_LAB = 'Haase Lab'.to_sym #'Klavins Lab'.to_sym
HAASE_LAB = 'Haase Lab'.to_sym
FLOW_CYTOMETER_TYPE = {'Klavins Lab':'BD Accuri C6'.to_sym,'Haase Lab':'Attune'.to_sym}
MY_FLOW_CYTOMETER_PROPERTIES = {
  'Klavins Lab': {
    'BD Accuri C6': {
      software_properties: {
        sample_type_settings: {
          'Yeast Strain': {'Run Volume': 'xxxx', 'Flow Rate': 'xxxx', 'Stop Option': 'Stop on 10,000 events (all events)'},
          'Plasmid': {'Run Volume': 'xxxx', 'Flow Rate': 'xxxx', 'Stop Option': 'Stop on 10,000 events (all events)'},
          'Beads': {'Run Volume': 'xxxx', 'Flow Rate': 'xxxx', 'Stop Option': 'Stop on 10,000 events (all events)'}
        },
        plate_type_hash: {
          '96 Well Flat Bottom (black)': 'Flat bottom plate',
          'Diluted beads': '24-Well Tube Rack'
        },
        images: {
          open_software: "Actions/Yeast_Gates/flowCytometryImages/open_FC_software_icon.png",
          select_plate_type: "Actions/Yeast_Gates/flowCytometryImages/select_plate_type.png",
          apply_settings: "Actions/Yeast_Gates/flowCytometryImages/flow_cytometry_settings.png",
          read_plate: "Actions/Yeast_Gates/flowCytometryImages/measure_plate_autorun.png",
          export_new_data: "Actions/FlowCytometry/saveFCS_menu_cropped.png",
          new_export_directory: "Actions/FlowCytometry/saveFCS_dirname_cropped.png"
        },
        measurement_type_templates: {
          "cleaning": {dtype: 'could be the three cleaning files to record contamination over time!'},
          "Yeast": {dtype: "paratmers for yeast measurements"},
          "Ecoli": {},
          "Calibration": {}
        },
        saving_directory: 'FIND_OUT_THE_PATH/FCS_Exports'
      },
    valid_containers: ['96 Well Flat Bottom (black)'],
    },
  },
  'YOUR_LAB_HERE':{
    'YOUR_PLATE_READER_TYPE':{ 
      software_steps: 'properties', 
      valid_containers: ['96 Well Flat Bottom (black)'], 
    },
    saving_directory: 'SAVING_DIRECTORY'
  },
  'Haase Lab': {
    'Attune': {
      software_properties: {
        sample_type_settings: {
          'Yeast Strain': {'Run Limits': '30,000 events', 'Run Limits (Max Volume)': '250ul', 'Fluidics': 'Fast', 'Set Threshold': 'FSC-H less than 400,000'},
          'Plasmid': {'Run Limits': '30,000 events', 'Run Limits (Max Volume)': '250ul', 'Fluidics': 'Fast', 'Set Threshold': 'FSC-H less than 80,000'},
          'Beads': {'Figure out': 'Calibration limits','Run Limits': '30,000 events', 'Run Limits (Max Volume)': '250ul', 'Fluidics': 'Fast', 'Set Threshold': 'FSC-H less than 80,000'}
        },
        plate_type_hash: {
          '24 Unit Disorganized Collection': 'Disorganized Collection',
          'Diluted beads': '24-Well Tube Rack'
        },
        images: {
          open_software: "Actions/Yeast_Gates/flowCytometryImages/open_FC_software_icon.png",
          select_plate_type: "Actions/Yeast_Gates/flowCytometryImages/select_plate_type.png",
          apply_settings: "Actions/Yeast_Gates/flowCytometryImages/flow_cytometry_settings.png",
          read_plate: "Actions/Yeast_Gates/flowCytometryImages/measure_plate_autorun.png",
          export_new_data: "Actions/FlowCytometry/saveFCS_menu_cropped.png",
          new_export_directory: "Actions/FlowCytometry/saveFCS_dirname_cropped.png"
        },
        measurement_type_templates: {
          "cleaning": {dtype: 'could be the three cleaning files to record contamination over time!'},
          "Yeast": {dtype: "paratmers for yeast measurements"},
          "Ecoli": {},
          "Calibration": {}
        },
        saving_directory: 'FIND_OUT_THE_PATH/FCS_Exports'
      },
    valid_containers: ['24 Unit Disorganized Collection'],
    },
  },
  'YOUR_LAB_HERE':{
    'YOUR_PLATE_READER_TYPE':{ 
      software_steps: 'properties', 
      valid_containers: ['96 Well Flat Bottom (black)'], 
    },
    saving_directory: 'SAVING_DIRECTORY'
  }
}

library: {name: FlowCytometryHelper, category: High Throughput Culturing}
code_source:
needs "Standard Libs/Units"
needs "Standard Libs/AssociationManagement"
htc = "High Throughput Culturing/"
needs htc + "FlowCytometryConstants"
needs htc + "FlowCytometrySoftware"
needs htc + "InstrumentHelper"
needs htc + "HighThroughputHelper"

# This class instantiates a representation of a Flow Cytometer instrument, in order for Aq to interact with this type of instrument
#
# @author Eriberto Lopez - elopez3@uw.edu
# @since 08/16/19
# 
# @attr [boolean] software_open describes the state of the software for the flow cytometer
# @attr_reader [String] instrument_type describes the type of instruement
# @attr_reader [String] type describes the model of instrument
# @attr_reader [Array] valid_containers describes the types of containers that can be measured by the flow cytometer
# @attr_reader [Hash] software is a hash object that comes from FlowCytometryConstants Library
class FlowCytometer
  include InstrumentHelper
  attr_accessor :software_open
  attr_reader :instrument_type, :type, :valid_containers, :software, :lab_name
  def initialize()
    @lab_name         = get_lab_name
    @instrument_type  = 'Flow Cytometer'.freeze
    @type             = get_my_flow_cytometer_type
    @valid_containers = valid_containers
    @software         = get_my_software_properties
    @software_open    = false
  end

  #Checks what server AQ is being run on so it can decide what instruments are available to use
  #Assumes that the BioFAB server will only be run in BIOFAB and no where else
  def get_lab_name
    aq_instance = Bioturk::Application.config.instance_name.upcase
    if aq_instance == "UW BIOFAB"
      return KLAVINS_LAB.to_sym
    elsif aq_instance == "DARPA_SD2"
      return HAASE_LAB.to_sym
    else
      return HAASE_LAB.to_sym
    end
  end
  
  def get_my_flow_cytometer_type
    #raise "lab name #{lab_name}"
    FLOW_CYTOMETER_TYPE[lab_name.to_sym]
  end

  def valid_containers
    get_my_flow_cytometer_properties_obj[type][:valid_containers]
  end
  
  def get_my_flow_cytometer_properties_obj
    MY_FLOW_CYTOMETER_PROPERTIES[lab_name.to_sym]
  end
  
  def get_my_software_properties
    get_my_flow_cytometer_properties_obj[type][:software_properties]
  end
  
  def valid_container?
    if experimental_item.instance_of? Collection
      valid_containers.include? experimental_item.object_type.name.to_s
    elsif experimental_item.instance_of? Item
      valid_containers.map {|c| ObjectType.find_by_name(c).id.to_i}.include? experimental_item.object_type_id.to_i
    elsif experimental_item.instance_of? Array
      valid_container = false
      ot_arr = ObjectType.find(experimental_item.map {|item| item.object_type_id}.uniq).map {|ot| ot.name}
      ot_arr.each {|otn| (valid_containers.include? otn) ? (valid_container = true) : (valid_container) }
      valid_container
    elsif experimental_item.class == "NillClass"
      raise "Your input plate is of class #{experimental_item.class} which means it was likley deleted"
    else
      raise "This type of #{experimental_item.class} object is not compatible with this instrument"
    end
  end
  
end # class FlowCytometer

module FlowCytometryHelper
  include Units, AssociationManagement
  
  def intro
    flow_cytometer = FlowCytometer.new
    show do
      title "Flow Cytometry Measurements"
      separator
      note "This protocol will instruct you on how to take measurements on the #{flow_cytometer.type} Flow Cytometer."
      note "A flow cytomter uses lasers to phenotypically characterize a microbial culture."
      note "This per cell measurement quantifies a cell's size, shape, and color. Making it a useful tool to analyze & distiguish cellular populations from each other."
      note "In this protocol, you will prepare the instrument workspace and characterize your genetically modified organism."
      note "<b>1.</b> Setup #{flow_cytometer.type} Flow Cytomter Software workspace."
      note "<b>2.</b> Check to see if input item is a #{flow_cytometer.valid_containers} if not, transfer samples to a valid container."
      note "<b>3.</b> Load plate."
      note "<b>4.</b> Take measurement, export data, & upload."
    end
    get_flow_cytometer_software(flow_cytometer: flow_cytometer)
    return flow_cytometer
  end
  

  ##TODO This is where you can add new cytometers
  # Using the instance of class FlowCytometer, we can determine which software module to import
  def get_flow_cytometer_software(flow_cytometer:)
    case flow_cytometer.type
    when 'BD Accuri C6'.to_sym
      Protocol.include(BDAccuri)
    when 'Attune'.to_sym
      Protocol.include(Attune)
    else
      raise "the #{flow_cytometer.type} flow cytometer in the #{lab_name} has no software steps associated to it, create a module with steps to use flow cytomter".upcase
    end
  end
  
  # Overrides method found in HighThroughputHelper, so that only ALLOWABLE_FC_SAMPLETYPES are transferred to a new collection
  def copy_sample_matrix(from_collection:, to_collection:)
    sample_hash = Hash.new()
    from_collection_sample_types = from_collection.matrix.flatten.uniq.reject{|i| i == EMPTY }.map {|sample_id| [sample_id, Sample.find(sample_id)] }
    from_collection_sample_types.each {|sid, sample| (ALLOWABLE_FC_SAMPLETYPES.include? sample.sample_type.name) ? (sample_hash[sid] = sample) : (sample_hash[sid] = EMPTY) }
    dilution_sample_matrix = from_collection.matrix.map {|row| row.map {|sample_id| sample_hash[sample_id] } }
    to_collection.matrix = dilution_sample_matrix
    to_collection.save()
  end
  
  # Overrides method found in HighThroughputHelper, so that only ALLOWABLE_FC_SAMPLETYPES are transferred to a new collection
  def part_provenance_transfer(from_collection:, to_collection:, process_name:)
    to_collection_part_matrix = to_collection.part_matrix
    from_collection.part_matrix.each_with_index do |row, r_i|
      row.each_with_index do |from_part, c_i|
        if !from_part.nil? || from_part 
          if ALLOWABLE_FC_SAMPLETYPES.include? from_part.sample.sample_type.name
            to_part = to_collection_part_matrix[r_i][c_i]
            # Create source and destination objs
            source_id = from_part.id; source = [{id: source_id }]
            destination_id = to_part.id; destination = [{id: destination_id }]
            # raise process_name.inspect unless process_name.nil?
            destination.first.merge!({additional_relation_data: { process: process_name }}) unless process_name.nil?
            # Association source and destination
            to_part.associate(key=:source, value=source)
            from_part.associate(key=:destination, value=destination)
          end
        end
      end
    end
  end

  # Guides technician to transfer the ALLOWABLE_FC_SAMPLETYPES wells to a flow cytometer valid container
  #
  # @effect Guides technician through transfer of cultures, then sets the collection to the output FieldValue
  def tech_transfer_to_valid_container(instrument:, output_fieldValue:)
    from_collection = collection_from(instrument.experimental_item); to_collection = collection_from(instrument.measurement_item)
    copy_sample_matrix(from_collection: from_collection, to_collection: to_collection)
    part_provenance_transfer(from_collection: from_collection, to_collection: to_collection, process_name: 'transfer')
    qty, units = get_container_working_volume(container=to_collection)
    display_coordinates = alpha_coordinates_96

    show do
      title "Transfer to Valid Container"
      separator
      note "Gather empty #{to_collection.object_type.name} #{to_collection}"
      note "Follow the table below to transfer only the shaded wells:"
      note "Transfer 200ul per well"
      bullet "<b>From</b> #{from_collection.object_type.name} #{from_collection}"
      table highlihgt_alpha_non_empty(from_collection)
      bullet "<b>To</b> #{to_collection.object_type.name} #{to_collection}"
      table highlight_non_empty(to_collection)
    end
    output_fieldValue.set(collection: to_collection)
  end
  
  # Finds a container's JSON parsable data association and grabs the working_vol association
  #
  # @param container [Item/Collection] is an item with a ObjectType.data association
  # @return qty [int] the number of units
  # @return units [string] the type of Units describing the working volume of the container
  def get_container_working_volume(container)
    working_volume = JSON.parse(container.object_type.data)['working_vol']
    raise "ObjectType #{container.object_type.name} does not have a JSON parsable <b>'working_vol'</b> association.
    Please go to containers and add an association" if working_volume.nil?
    qty = working_volume.split('_')[0].to_f
    units = working_volume.split('_')[1].to_s
    return qty, units
  end

  # Associate all `uploads` to the `target` DataAssociator. The keys of each upload will be
  # the concatenation of `key_name` and that upload's id.
  # Associating fcs files to the plan and operation makes fcs data of any specific well
  # easily accessible to users
  #
  # @param [String] key_name  the name which describes this upload set
  # @param [Plan] plan  the plan that the uploads will be associated to
  # @param [Array<Upload>] uploads  An Array containing several Uploads
  # @effects  associates all the given uploads to `plan`, each with a
  #         unique key generated from the combining `keyname` and upload id
  def associate_fcs_uploads(key_name, target, uploads)
    if target
      associations = AssociationMap.new(target)
      uploads.each do |up|
        associations.put("U#{up.id}_#{key_name}", up)
      end
      associations.save
    end
  end
    
  # Associate a matrix containing all `uploads` to `collection`.
  # The upload matrix will map exactly to the sample matrix of
  # `collection`, and it will be associated to `collection` as a value
  # of `key_name`
  #
  # @param [String] key_name  the key that the upload matrix will
  #           be associated under
  # @param [Collection] collection  what the upload matrix will be
  #           associated to
  # @param [Array<Upload>] uploads  An Array containing several Uploads
  # @effects  associates all the given uploads to `collection` as a 2D array inside a singleton hash
  def associate_uploads_to_plate(key_name:, collection:, uploads:)
    ot = collection.object_type
    uploads_well_matrix = Array.new(ot.rows) { Array.new(ot.columns) { EMPTY } }
    uploads.each do |up|
      alpha_coord = up.name[0..2]
      r_i, c_i = get_rc_from_alpha_coords(alpha_coord: alpha_coord)
      uploads_well_matrix[r_i][c_i] = up.id
    end
    collection_associations = AssociationMap.new(collection)
    # ensure we aren't overwriting an existing association
    unless collection_associations.get(key_name).nil?
      i = 0
      i += 1 until collection_associations.get("#{key_name}_#{i}").nil?
      key_name = "#{key_name}_#{i}"
    end
    collection_associations.put(key_name, {'upload_matrix' => uploads_well_matrix })
    collection_associations.save
  end
  
  # Process and associates the array of flow cytometry uploads to operation, plan, and the collection that was measured.
  def process_and_associate_data(instrument:, op:)
    measurement_args = instrument.measurement_data
    uploads = measurement_args[:uploads]
    associate_fcs_uploads(key_name=SAMPLE_UPLOAD_KEY, target=op, uploads=uploads)
    associate_fcs_uploads(key_name=SAMPLE_UPLOAD_KEY, target=op.plan, uploads=uploads)
    associate_uploads_to_plate(key_name: SAMPLE_UPLOAD_KEY.pluralize, collection: measurement_args[:mitem], uploads: uploads)
  end
  
  # Determines whether to keep plate based on user input
  def keep_transfer_plate(instrument:, user_val:)
    instrument.measurement_item.location = ((user_val.upcase == 'YES') ? 'Bench' : 'deleted')
  end
  
  # Cleans up technician workspace by releasing inputs and outputs
  def cleaning_up(release_arr=[])
    clean_up_inputs(release_arr)
    clean_up_outputs
  end

  # Cleanup input items
  #
  # @param release_arr [array] is an array of items that are found in Aq
  def clean_up_inputs(release_arr)
    operations.store(opts = { interactive: true, method: 'boxes', errored: false, io: 'input' })
    release release_arr, interactive: true
  end

  # Cleanup output items
  def clean_up_outputs()
    show do
      title "Cleaning Up"
      separator
      note "Return any remaining reagents used and clean bench"
    end
  end
end # module FlowCytometryHelper

library: {name: FlowCytometrySoftware, category: High Throughput Culturing}
code_source:
# Eriberto Lopez
# elopez3@uw.edu
# 08/15/19
#
#Update:
#Cannon Mallory
#malloc3@uw.edu
#02/04/2020

require 'date'

module AqUpload
  # Provides a upload button in a show block in order to upload a single file
  #
  # @param upload_filename [string] can be the name of the file that you want tech to upload
  # @return up_show [hash] is the upload hash created in the upload show block
  # @return up_sym [symbol] is the symbol created in upload show block that will be used to access upload
  def upload_show(saving_dir:, upload_filename:)
    upload_var = "file"
    up_show = show do
      title "Upload Your Measurements"
      separator
      note "Select and Upload: #{saving_dir}/<b>#{upload_filename}</b>"
      upload var: upload_var.to_sym
    end
    return up_show, upload_var.to_sym
  end
  
  # Retrieves the upload object from upload show block
  #
  # @param up_show [hash] is the hash that is created in the upload show block
  # @param up_sym [symbol] is the symbol created in the upload show block and used to access file uploaded
  # @return upload [upload_object] is the file that was uploaded in the upload show block
  def get_upload_from_show(up_show:, up_sym:)
    (!up_show[up_sym].nil?) ? (upload = up_show[up_sym].map {|up_hash| Upload.find(up_hash[:id])}.shift) : nil #(show {warning "no upload was found".upcase})
  end
  
  # Retrieves the upload object from the upload show block and gathers the array of .fcs uploads
  def get_upload_array_from_show(up_show:, up_sym:)
    upload_array = up_show[up_sym].map {|up_hash| Upload.find(up_hash[:id]) }
    return upload_array
  end
  
  # Technician upload show block
  #
  # @param saving_dir [string] name of the directory that is created when all flow cytometery measurements are exported as .fcs files
  def upload_directory_show(saving_dir:)
    upload_var = "file"
    up_show = show do
      title "Upload Your Measurements"
      separator
      note "Select and Upload Directory: <b>#{saving_dir}</b>"
      upload var: upload_var.to_sym
    end
    return up_show, upload_var.to_sym
  end
end # module AqUpload

module StandardCytometrySoftware

  # Groups sample type wells together to create an rc_list of a given sampletype in a collection.
  #
  # @params instrument [class] is a class instance of an instrument
  # @return sample_type_rc_list [Hash] is a hash of sample_type.names with a list of [r,c] tuples describing where that type of sample is in the collection that is being measured
  def get_sample_type_rc_list_hash(instrument)
    measurement_collection = collection_from(instrument.measurement_item)
    strain_sample_hash = Hash.new()
    measurement_collection.matrix.flatten.uniq.reject {|sid| sid == -1 }.each {|sid| strain_sample_hash[sid] = Sample.find(sid.to_i) }
    sample_type_rc_list_hash = Hash.new()
    measurement_collection.matrix.each_with_index do |row, r|
      row.each_with_index do |sid, c|
        if sid == -1
          next
        else
          if sample_type_rc_list_hash[strain_sample_hash[sid].sample_type.name].nil?
            sample_type_rc_list_hash[strain_sample_hash[sid].sample_type.name] = [[r, c]]
          else
            sample_type_rc_list_hash[strain_sample_hash[sid].sample_type.name].push([r, c])
          end
        end
      end
    end
    return sample_type_rc_list_hash
  end

  def get_measurement_filename(measurement_item:, timepoint:)
    mt = measurement_type.to_s.gsub(' ', '') 
    "jid_#{jid}_item_#{measurement_item.id}_t#{timepoint.strftime "%H%M"}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '_')
  end


  # Generates an experimental measurement filename, which is the name of the workspace created on the Accuri Flow Cytometer
  def get_experiment_filename(instrument:)
    timepoint = Time.now
    return "jid_#{jid}_experiment_#{instrument.measurement_item}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '')
  end


  # Guides technician on how to open software if it is not already open
  def open_software(instrument)
    if (!instrument.software_open)
      go_to_computer(instrument)
      show do
        title "Open #{instrument.type} #{instrument.instrument_type} Software"
        separator
        note "Click on the icon shown below to open the #{instrument.instrument_type} software:"
        image instrument.software[:images][:open_software]
      end
      instrument.software_open = true
    else
      log_info 'the software is already open!'.upcase
    end
  end

  # Directs techician to which lab and flow cytometer computer to setup workspace
  def go_to_computer(instrument)
    show do
      title "Go to the #{instrument.lab_name} #{instrument.type} #{instrument.instrument_type}"
      separator
      warning "<b>The next steps should be done on the #{instrument.instrument_type} computer</b>.".upcase
    end
  end




  # Creates a dummy 24 well tube rack to display on screen (deletes down stream)
  def get_tube_rack
    produce new_collection '24 Deep Well Plate'
  end

  # Guides technician to select plate type in the flow cytometry software
  def select_plate_type(instrument)
    show do
      title "Setup #{instrument.type} Workspace"
      separator
      note "Select <b>Plate Type</b>: #{instrument.software.fetch(:plate_type_hash)[instrument.measurement_item.object_type.name.to_sym]}"
      image instrument.software.fetch(:images).fetch(:select_plate_type)
    end
  end
end # module StandarCytometrySoftware

module BDAccuri
  include AqUpload
  include StandardCytometrySoftware
  
  # Guides technician through the steps in setting up the BD Acurri software workspace for culture measurements
  def setup_instrument_software(instrument, op = nil)
    open_software(instrument)
    select_plate_type(instrument)
    get_sample_type_rc_list_hash(instrument).each do |sample_type_name, rc_list|
      if ALLOWABLE_FC_SAMPLETYPES.include? sample_type_name
        show do
          title "Select Wells"
          separator
          note "Select the following wells for #{sample_type_name} cultures found in #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}."
          table highlight_alpha_rc(collection_from(instrument.measurement_item), rc_list) {|r,c| "#"}
          note 'After checking the wells on the screen continue to the next step.'
        end
        apply_settings(instrument: instrument)
      end
    end
  end

  
  # Guides technician through the steps in setting up the BD Acurri software workspace for calibration measurement
  def setup_instrument_calibration(instrument)
    open_software(instrument)
    select_plate_type(instrument)
    tube_rack = get_tube_rack 
    show do
      title "Select Wells"
      separator
      note "Select the following location of the optical particals #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}."
      table highlight_alpha_rc(tube_rack, [[0,0]]) {|r,c| "#"}
      note 'After checking the wells on the screen continue to the next step.'
    end
    tube_rack.mark_as_deleted
    apply_settings(instrument: instrument)
  end
  
  # Guides technician to apply settings to the selected wells. Wells are selected by sampleType (different sampleTypes require different settings)
  def apply_settings(instrument:)
      log_info 'instrument.experimental_item.object_type.name.downcase', instrument.experimental_item.object_type.name.downcase
    if instrument.experimental_item.object_type.name.downcase.include? 'bead'
      sample_type_name = instrument.experimental_item.sample.sample_type.name.to_sym
    else
      sample_type_name = collection_from(instrument.experimental_item).matrix.flatten.uniq.reject {|sid| sid == -1 }.map {|sid| s = Sample.find(sid); s.sample_type.name }.uniq.first.to_sym
    end
    show do
      title "Apply Settings"
      separator
      image instrument.software.fetch(:images).fetch(:apply_settings)
      note "Apply the following settings to the wells you have selected"
      note "<b>Make sure that the settings are as follows:</b>"
      instrument.software.fetch(:sample_type_settings).fetch(sample_type_name).each {|setting, val| bullet "Set <b>#{setting}</b> to <b>#{val}</b>"}
      check "Finally, click <b>Apply Settings</b>"
      bullet "Save experimental measurement as <b>#{get_experiment_filename(instrument: instrument)}</b>"
    end
  end
  
  # Guides techician to read the culture plate, then export, save, and upload data to Aq
  def take_measurement_and_upload_data(instrument:)
    timepoint = read_plate(instrument: instrument)
    instrument.measurement_data = export_save_and_upload_measurement_data(instrument: instrument, timepoint: timepoint)
  end
  
  # Guides techician to read the calibration sample, then export, save, and upload data to Aq
  def take_calibration_and_upload_data(instrument:)
    timepoint = read_calibration(instrument: instrument)
    instrument.measurement_data = export_save_and_upload_measurement_data(instrument: instrument, timepoint: timepoint)
  end
  
  # Guides technician through software to export, save, and upload data to Aq
  def export_save_and_upload_measurement_data(instrument:, timepoint:)
    sw = instrument.software
    day = timepoint.strftime "%m%d%Y"
    hour = timepoint.strftime "%H%M"
    # Export
    fcs_exports = show do 
      title "Export .fcs files"
      separator
      note 'Make sure that flow cytometer run is <b>DONE!</b>'
      note 'Press <b>CLOSE RUN DISPLAY</b>'
      note 'Select <b>File</b> => <b>Export ALL Samples as FCS...</b> (see below)'
      image instrument.software.fetch(:images).fetch(:export_new_data)
      note 'You will see a pop-up like below, record the directory ID #'
      image instrument.software.fetch(:images).fetch(:new_export_directory)
      get 'text', var: 'dirname', label: 'Enter the name of the export directory in Desktop/FCS Exports/'
    end
    # UPLOAD
    if (!debug) 
      attempt = 0
      up_show, up_sym = {}, :file 
      while (up_show[up_sym].nil?) || (attempt == 3) do
        up_show, up_sym = upload_directory_show(saving_dir: sw[:saving_directory]+"/#{fcs_exports[:dirname]}")
        attempt += 1
      end
      upload_array = get_upload_array_from_show(up_show: up_show, up_sym: up_sym)
    else
      log_info 'UPLOADS Array debug'
      upload_array = [Upload.find(26482), Upload.find(26458)]
    end
    measurement_data = {
      mitem: instrument.measurement_item,
      day: day,
      hour: hour,
      uploads: upload_array
    }
    return measurement_data
  end


  
  # Guides technician through measuring the diluted calibration beads
  def read_calibration(instrument: instrument)
    go_to_computer(instrument)
    tube_rack = get_tube_rack
    show do
      title "Load #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}"
      separator
      note "Click <b>Eject Plate</b>"
      check "Open tube #{instrument.measurement_item} then, place the tube into the first well of the #{instrument.software.fetch(:plate_type_hash)[instrument.measurement_item.object_type.name.to_sym]}."  
      bullet "Well A1 should be by the red sticker in the top left corner."
      table highlight_alpha_rc(tube_rack, [[0,0]]) {|r,c| "#"}
      check "Finally, load the #{instrument.measurement_item.object_type.name} and continue to the next step."
    end
    tube_rack.mark_as_deleted # Collection created for display, then deleted
    show do 
      title "Taking Measurements"
      separator
      note "Click <b>OPEN RUN DISPLAY</b>"
      image instrument.software.fetch(:images).fetch(:read_plate)
      note "Next, click <b>AUTORUN</b>"
      note "Contiue on to the next step while #{instrument.type} #{instrument.instrument_type} is running..."
    end
    instrument.measurement_item.location = instrument.type.to_s
    timepoint = Time.now
    return timepoint
  end
  
  # Guides technician through measuring the experimental culture plate
  def read_plate(instrument:)
    go_to_computer(instrument)
    show do
      title "Load #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}"
      separator
      note "Click <b>Eject Plate</b>"
      note "Be sure that the plate is in the correct orientation. Well A1 should be by the red sticker in the top left corner."
      check "Finally, load the plate and continue to the next step."
    end
    show do 
      title "Taking Measurements"
      separator
      note "Click <b>OPEN RUN DISPLAY</b>"
      image instrument.software.fetch(:images).fetch(:read_plate)
      note "Next, click <b>AUTORUN</b>"
      note "Contiue on to the next step while #{instrument.type} #{instrument.instrument_type} is running..."
    end
    instrument.measurement_item.location = instrument.type.to_s
    timepoint = Time.now
    return timepoint
  end
  
end # module KlavinsLabFlowCytometrySoftware



#These are the ATUNE specific pages.  Please look at current methods for examples
#Fill in as needed (I tried my best but I don't have the Atune with me)
module Attune
  include AqUpload
  include StandardCytometrySoftware

  R_TO_LETTER = ['A'...'AA'].to_a
  
  # Guides technician through the steps in setting up instrument software workspace for culture measurements
  # op is optional however can be used to add information to labels
  def setup_instrument_software(instrument, op = nil)
    open_software(instrument)
    #select_plate_type(instrument)
    get_sample_type_rc_list_hash(instrument).each do |sample_type_name, rc_list|
      if ALLOWABLE_FC_SAMPLETYPES.include? sample_type_name
        if op != nil
          test_group_label = "#{instrument.measurement_item}-#{op.input('When to Measure? (24hr)')}"
        else
          test_group_label = "#{instrument.measurement_item}"
        end

        show do
          title "Add Group"
          note "In the  Attune software add a test group and label it #{test_group_label}"
        end

        collection = collection_from(instrument.measurement_item)
        show do
          title "Add Samples to Plan"
          separator
          note "In the Attune software add #{rc_list.length} samples in group #{test_group_label}."
          note 'Rename samples per table below'
          table highlight_alpha_rc(collection, rc_list, check: false)
        end
        apply_settings(instrument: instrument)
      end
    end
  end

  # Guides technician through the steps in setting up the instrument software workspace for calibration measurement
  def setup_instrument_calibration(instrument)
    open_software(instrument)
    select_plate_type(instrument)
    tube_rack = get_tube_rack 
    show do
      title "Select Wells #go to FlowCytometrySoftware library Attune module to customize this step"
      separator
      note "Select the following location of the optical particals #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}."
      table highlight_alpha_rc(tube_rack, [[0,0]]) {|r,c| "#"}
      note 'After checking the wells on the screen continue to the next step.'
    end
    tube_rack.mark_as_deleted
    apply_settings(instrument: instrument)
  end
  
  # Guides technician to apply settings to the selected wells. Wells are selected by sampleType (different sampleTypes require different settings)
  def apply_settings(instrument:)
      log_info 'instrument.experimental_item.object_type.name.downcase', instrument.experimental_item.object_type.name.downcase
    if instrument.experimental_item.object_type.name.downcase.include? 'bead'
      sample_type_name = instrument.experimental_item.sample.sample_type.name.to_sym
    else
      sample_type_name = collection_from(instrument.experimental_item).matrix.flatten.uniq.reject {|sid| sid == -1 }.map {|sid| s = Sample.find(sid); s.sample_type.name }.uniq.first.to_sym
    end
    show do
      title "Apply Settings"
      separator
      note "Use the following settings for all measurements"
      note "<b>Make sure that the settings are as follows:</b>"
      instrument.software.fetch(:sample_type_settings).fetch(sample_type_name).each {|setting, val| bullet "Set <b>#{setting}</b> to <b>#{val}</b>"}
      check "Finally, click <b>Apply Settings</b>"
      bullet "Save experimental measurement as <b>#{get_experiment_filename(instrument: instrument)}</b>"
    end
  end
  
  #Guides technician through software to export, save, and upload data to Aq
  def export_save_and_upload_measurement_data(instrument:, timepoint:)
    sw = instrument.software
    day = timepoint.strftime "%m%d%Y"
    hour = timepoint.strftime "%H%M"
    # Export
    fcs_exports = show do 
      title "Export .fcs files #go to FlowCytometrySoftware library Attune module to customize this step"
      separator
      note 'Make sure that flow cytometer run is <b>DONE!</b>'
      note 'Press <b>CLOSE RUN DISPLAY</b>'
      note 'Select <b>File</b> => <b>Export ALL Samples as FCS...</b> (see below)'
      image instrument.software.fetch(:images).fetch(:export_new_data)
      note 'You will see a pop-up like below, record the directory ID #'
      image instrument.software.fetch(:images).fetch(:new_export_directory)
      get 'text', var: 'dirname', label: 'Enter the name of the export directory in Desktop/FCS Exports/'
    end
    # UPLOAD
    if (!debug) 
      attempt = 0
      up_show, up_sym = {}, :file 
      while (up_show[up_sym].nil?) || (attempt == 3) do
        up_show, up_sym = upload_directory_show(saving_dir: sw[:saving_directory]+"/#{fcs_exports[:dirname]}")
        attempt += 1
      end
      upload_array = get_upload_array_from_show(up_show: up_show, up_sym: up_sym)
    else
      log_info 'UPLOADS Array debug'
      upload_array = [Upload.find(26482), Upload.find(26458)]
    end
    measurement_data = {
      mitem: instrument.measurement_item,
      day: day,
      hour: hour,
      uploads: upload_array
    }
    return measurement_data
  end
  
  # Guides technician through measuring the diluted calibration beads
  def read_calibration(instrument: instrument)
    go_to_computer(instrument)
    tube_rack = get_tube_rack
    show do
      title "Load #{instrument.measurement_item.object_type.name} #{instrument.measurement_item}"
      note "#go to FlowCytometrySoftware library Attune module to customize this step"
      separator
      note "Click <b>Eject Plate</b>"
      check "Open tube #{instrument.measurement_item} then, place the tube into the first well of the #{instrument.software.fetch(:plate_type_hash)[instrument.measurement_item.object_type.name.to_sym]}."  
      bullet "Well A1 should be by the red sticker in the top left corner."
      table highlight_alpha_rc(tube_rack, [[0,0]]) {|r,c| "#"}
      check "Finally, load the #{instrument.measurement_item.object_type.name} and continue to the next step."
    end
    tube_rack.mark_as_deleted # Collection created for display, then deleted
    show do 
      title "Taking Measurements"
      note "#go to FlowCytometrySoftware library Attune module to customize this step"
      separator
      note "Click <b>OPEN RUN DISPLAY</b>"
      image instrument.software.fetch(:images).fetch(:read_plate)
      note "Next, click <b>AUTORUN</b>"
      note "Contiue on to the next step while #{instrument.type} #{instrument.instrument_type} is running..."
    end
    instrument.measurement_item.location = instrument.type.to_s
    timepoint = Time.now
    return timepoint
  end
  

  # Guides technician through measuring the experimental culture plate
  def read_plate(instrument:)
    alpha_26 = ('A'...'AA').to_a
    go_to_computer(instrument)
    collection = collection_from(instrument.measurement_item)
    timepoint = Time.now

    collection.parts.each do |part|
      row, col = collection.find(part).first

      sample_label = alpha_26[row] + (col+1).to_s + '-' + collection.id.to_s

      show do
        title "Load sample onto #{instrument.type}"
        check "Place sample #{sample_label} into sampler"
        check 'Gently move sampler up into the locked position'
        table highlight_collection_rcx(collection, [[row,col, sample_label]],
                                       check: false)
      end

      show do
        title 'Take Measurement'
        note "On the #{instrument.type} computer select sample #{sample_label}"
        note 'Press <b>Take Sample</b>'
        separator
        note "Wait 5 to 10 seconds for the #{instrument.type} to start collecting the sample"
        note 'Then press <b>Record Measurement</b>'
      end

      show do
        title 'Wait to Finish Measurement'
        warning "Wait for the #{instrument.type} to finish before clicking <b>Okay</b>"
      end

      show do
        title 'Return Sample'
        note 'Gently lower sampler; be careful not to break the needle'
        note "Place sample #{sample_label} back into the proper location of the test tube rack"
        table highlight_collection_rcx(collection, [[row,col, sample_label]],
                                       check: false)
      end
    end
    instrument.measurement_item.location = instrument.type.to_s
    return timepoint
  end
  
  # Guides techician to read the calibration sample, then export, save, and upload data to Aq
  def take_calibration_and_upload_data(instrument:)
    timepoint = read_calibration(instrument: instrument)
    instrument.measurement_data = export_save_and_upload_measurement_data(instrument: instrument, timepoint: timepoint)
  end

  # Guides techician to read the culture plate, then export, save, and upload data to Aq
  def take_measurement_and_upload_data(instrument:)
    timepoint = read_plate(instrument: instrument)
    instrument.measurement_data = export_save_and_upload_measurement_data(instrument: instrument, timepoint: timepoint)
  end

end # module HaaseLabAttune

library: {name: HighThroughputHelper, category: High Throughput Culturing}
code_source:
# By: Eriberto Lopez
# elopez3@gmail.com
# Updated: 071519

#needs "Tissue Culture Libs/CollectionDisplay"
needs 'Collection Management/CollectionDisplay'
needs "Standard Libs/Units"
needs "Plate Reader/PlateReaderHelper"

module HTCExperimentalDesign
  include Units
  include AssociationManagement
  include CollectionDisplay

  # Place cultures determined to be controls into the collection specified
  #
  # @param cultures [Array] of instances of class CultureComposition
  # @param collection [Collection] is an Aq item that is a collection of part items
  def associate_controls_to_collection(cultures:, collection:)
    collection_associations = AssociationMap.new(collection)
    empty_wells = collection.get_empty
    column_samples = cultures.map {|column| Sample.find_by_name(column.first.fetch("Strain").keys.first) }
    cultures.each_with_index do |replicates, idx| 
      replicates.each do |culture| 
        r, c = empty_wells.shift()
        collection.set(r, c, column_samples[idx])
        collection.save()
        culture.keys.each do |key|
          collection_associations.putrc(row=r, column=c, key=key, data=culture[key])
        end
      end
    end
    collection_associations.save()
  end
  
  # Place sorted cultures into new collection 
  #
  # @param cultures [Array] of sorted arrays of culture composition hash objects 
  # @param object_type [ObjectType] is a virtual representation of a container
  # @returns new_collections [Array] of Collection containrs filled with sorted and organized experimetnal cultures
  def associate_cultures_to_collection(cultures:, object_type:)
    # Now each one of the matricies is ready to be associated with a collection
    uniq_strains = {}
    new_collections = []
    format_to_collection_type(cultures: cultures, object_type: object_type).each_with_index do |formatted_matrix, idx|
      collection = produce new_collection object_type.name
      sname_matrix = formatted_matrix.map {|culture| (culture == EMPTY) ? culture : culture.fetch("Strain").keys.first }
      sname_matrix.to_a.flatten.uniq.reject {|sname| sname == EMPTY }.each {|sname| uniq_strains[sname] = Sample.find_by_name(sname).id unless uniq_strains.keys.include? sname} 
      sid_matrix = sname_matrix.map {|sname| uniq_strains[sname]}
      collection.matrix = sid_matrix.to_a; collection.save()
      collection_associations = AssociationMap.new(collection)
      formatted_matrix.to_a.each_with_index do |row, r_i|
        row.each_with_index do |culture, c_i|
          if culture != EMPTY
            culture.keys.each do |key|
              collection_associations.putrc(row=r_i, column=c_i, key, data=culture[key])
            end
          else
            EMPTY
          end
        end
      end
      collection_associations.save()
      new_collections.push(collection)
    end
    return new_collections
  end
  
  # Format incomplete slices, to avoid class Matrix dimension errors when vertically stacking matricies
  def format_slice(slice, columns)
    slice_width = slice.map {|s| s.length}.uniq.first
    empty_slice = slice_width.times.map {|i| EMPTY }
    while slice.length != columns do
      slice.push(empty_slice)
    end
    return slice
  end

  # Sort & arrange cultures into a given ObjectType's dimensions
  #
  # @param cultures [Array] of sorted arrays of culture composition hash objects 
  # @param object_type [ObjectType] is a container in Aq
  # @returns formatted_matrices []
  def format_to_collection_type(cultures:, object_type:, columnwise: false)
    sorted_cultures     = sort_culture_composition_objs(cultures: cultures) # sorts CultureComposition replicate arrays by strain and then condition
    formatted_matricies = format_cultures_to_object_type(sorted_cultures: sorted_cultures, object_type: object_type)
    return formatted_matricies
  end  
 
  # Sort replicate culture arrays by strain then by total moles of final concentration inducer 
  #
  # @param cultures [Array] of arrays of culture composition hash objects 
  # @returns sorted_cultures [Array] of sorted arrays of culture composition hash objects 
  def sort_culture_composition_objs(cultures:)
    sorted_cultures = []
    groupby_strain_name = cultures.group_by {|rep_arr| rep_arr.first.fetch('Strain').keys.first }
    groupby_strain_name.map {|sname, rep_arrays|
      rep_arrays.sort! {|arr_a, arr_b| get_comparison(arr_a.first) <=> get_comparison(arr_b.first) }.each {|rep_array| sorted_cultures.push(rep_array) }
    }
    return sorted_cultures
  end
  
  # Slice sorted cultures array to fit the dimensions of the given collection
  def format_cultures_to_object_type(sorted_cultures:, object_type:)
    matrix_arr = sorted_cultures.each_slice(object_type.columns).map do |slice|
      slice = format_slice(slice, object_type.columns)
      Matrix.columns(slice) 
    end
    # After the columns/reps have been sliced I want to prevent replicates from getting placed on different collections
    max_rows = object_type.rows
    stack_arr_idx = 0
    matricies_to_stack = Array.new(15) {[]} # TODO: 15 is arbitray, essentially max amount of plates per op
    matrix_arr.map do |m| 
      max_rows -= m.row_count
      if max_rows > 0
        matricies_to_stack[stack_arr_idx].push(m)
      else
        stack_arr_idx += 1
        matricies_to_stack[stack_arr_idx].push(m)
        max_rows = object_type.rows - m.row_count
      end
    end
    formatted_matricies = matricies_to_stack.select {|i| !i.empty? }.map {|matrix_arr| vstack_matrix_array(matrix_arr: matrix_arr) }
    return formatted_matricies
  end

  # Compare total number of moles in each culture, to sort each culture with the consideration of manual pipetting
  def get_comparison(args)
    comparison = []
    if args.fetch('Inducer(s)', nil).nil?
      comparison.push(0)
    else
      args.fetch('Inducer(s)').keys.each do |inducer_name| fconc_obj = args.fetch('Inducer(s)')[inducer_name][:final_concentration]
        comparison.push( (CultureComponent.unit_conversion_hash[fconc_obj[:units]]*fconc_obj[:qty]).to_f )
      end
    end
    return comparison
  end
  
  # Stack each matrix in the array vertically to fill matricies columwise. 
  # For example, if you have a list of A, B, C replicates then, A would go into A1, B would go to B1, and C would go to C1.
  # Furthermore, the next set of triplicates D would go to A2, E would go to B2, and F would go to C2. However, replicates will not
  # be broken up, so a new stacked matrix will be created, which means a new collection will be used to avoid breaking up reps.
  def vstack_matrix_array(matrix_arr:)
    stacked_mat = nil
    matrix_arr.each {|m| stacked_mat.nil? ? stacked_mat = m : stacked_mat = stacked_mat.vstack(m) }
    return stacked_mat
  end
  
end # module HTCExperimentalDesign


module HighThroughputHelper
  include CollectionDisplay
  include HTCExperimentalDesign
  
  SATURATION_CULT_VOL = 300#ul
  
  # A method serches the culture component part associations and returns a matrix of values, base on the component type and attribute of component
  def search_part_associations(collection:, data_key:, attribute:)
    part_data_matrix = collection.data_matrix_values(data_key)
    part_data_matrix.map! {|row| row.map! {|part| part.nil? ? part : part.values.first.fetch(attribute) } }
  end
  
  # Determines what method to use for collection inoculation. Different methods when using different input object types. ie: Yeast Glycerol Stock vs. Yeast Plate
  def inoculate_culture_plates(new_output_collections:, inoculation_prep_hash:)
    item_ids = []
    media_ids = []

    inoculation_prep_hash.each do |collection_id, item_media_hash|
      item_media_hash.each do |item_id, media_to_rc_list|
        item_ids.push(item_id)
        media_ids.push(media_to_rc_list.keys)
      end
    end


    uniq_input_items = Item.find(item_ids.flatten.uniq)
    uniq_media_items = Item.find(media_ids.flatten.uniq)

    input_item_hash = Hash.new()
    input_media_hash = Hash.new()

    uniq_input_items.each {|item| input_item_hash[item.id] = item }
    uniq_media_items.each {|item| input_media_hash[item.id] = item }

    gather_materials(empty_containers: new_output_collections,
                     transfer_required: false,
                     new_materials: ["P1000 Multichannel Pipette", 
                                     "Media Reservoir",
                                     'Aera Breathable Seals'],
                     take_items: uniq_media_items)

    uniq_input_items.group_by {|item| item.object_type.name }.each do |ot_name, items|
      case ot_name
      when 'Yeast Glycerol Stock', 'E coli Glycerol Stock', 'Yeast Overnight Suspension'
        tubeNum_hash = prep_glycerol_stock_inoculants(inoculation_prep_hash: inoculation_prep_hash, input_item_hash: input_item_hash, input_media_hash: input_media_hash)
        inoculate_glycerol_stock_inoculates(inoculation_prep_hash: inoculation_prep_hash, tubeNum_hash: tubeNum_hash)
      when 'Yeast Plate', 'E coli Plate of Plasmid'
        # Grab plates
        take items, interactive: true
        new_output_collections.each do |collection|
          inoculate_colonies_from_agar_plates(collection: collection, input_media_hash: input_media_hash, inoculation_prep_hash: inoculation_prep_hash)
          seal_plate(collection_id=collection.id)
        end
      when '96 Well PCR Plate' # Yeast Glycerol stock plate
        raise 'There are no steps for inoculating an experiment when coming from a Glycerol Stock Plate'.upcase
      else
        raise "This object type  #{ot_name} is not compatable to inoculate culture plate"
      end
    end
  end
  
  # What to write on to plate seal
  def seal_plate(collection_id)
    show do 
      title "Seal Plate for Incubation"
      separator
      check "Grab a new <b>Aera Breathable Seal</b>"
      note "Label the seal with "
      bullet "Plate #{collection_id}"
      bullet "Today's date"
      bullet "Time of inoculation (ie: 3:00pm)"
      bullet "Your initials"
    end
  end
  
  # Guides tech through inoculting collection using Yeast Plates as the inoculum. Each replicate is uses a single colony.
  def inoculate_colonies_from_agar_plates(collection:, input_media_hash:, inoculation_prep_hash:)
    media_part_matrix = search_part_associations(collection: collection, data_key: 'Media', attribute: 'item_id'); media_vol_hash = Hash.new(0)
    media_part_matrix.each {|row| row.reject {|i| i.nil? }.each {|media_id| media_vol_hash[media_id] += 1 } }
    show do
      title "Fill #{collection.object_type.name} #{collection.id} with Media"
      separator
      media_vol_hash.each do |media_id, count|
        media_vol_ml = (HighThroughputHelper.add_extra_vol(int: SATURATION_CULT_VOL*count)/1000.0).round(3)
        check "You will need <b>#{media_vol_ml}#{MILLILITERS}</b> of <b>#{input_media_hash[media_id].sample.name}</b> media"  
      end
      note "In the table, the item id of the media type is followed by the volume to dispense."
      note "Follow the table below to fill with the appropiate media type & volume:"
      table highlight_alpha_non_empty(collection) {|r,c| "#{media_part_matrix[r][c]}\n#{SATURATION_CULT_VOL}#{MICROLITERS}"} 
    end
    inoculation_prep_hash[collection.id].each do |input_item_id, media_to_rc_list|
      media_to_rc_list.each do |media_id, rc_list|
        show do
          title "Inoculate #{collection} with Single Colonies"
          separator
          note "In the table, the item id of the agar plate is displayed. If the same item is used, try to pick a different biological replicate (single colony) for each well."
          note "Follow the table below to inoculate a well with the appropriate item:"
          table highlight_alpha_rc(collection, rc_list){|r,c| "#{input_item_id}"} 
        end
        
      end
    end
  end
  
  # Generate a hash that groups [row, columen] coordinates by media type item and microbial sample item. 
  # Uses culture composition components associated to collection part items to generate data structure
  def get_inoculation_prep_hash(new_output_collections)
    inoculation_prep_hash = nested_hash_data_structure
    new_output_collections.each do |collection|
      input_items_matrix = search_part_associations(collection: collection, data_key: 'Strain', attribute: 'item_id') 
      media_items_matrix = search_part_associations(collection: collection, data_key: 'Media', attribute: 'item_id')
      input_items_matrix.each_with_index do |row, r_i| 
        row.each_with_index do |input_item_id, c_i|
          if input_item_id.nil?
            next
          else
            media_item_id = media_items_matrix[r_i][c_i]
            if inoculation_prep_hash[collection.id].fetch(input_item_id, nil).nil?
              inoculation_prep_hash[collection.id][input_item_id][media_item_id] = [[r_i, c_i]]
            else
              if inoculation_prep_hash[collection.id][input_item_id].fetch(media_item_id, nil).nil?
                inoculation_prep_hash[collection.id][input_item_id][media_item_id] = [[r_i, c_i]]
              else
                inoculation_prep_hash[collection.id][input_item_id][media_item_id].push([r_i, c_i])
              end
            end
          end
        end
      end
    end
    return inoculation_prep_hash
  end
  
  # Guides technician through preparing inoculum from Yeast Glycerol Stocks
  def inoculate_glycerol_stock_inoculates(inoculation_prep_hash:, tubeNum_hash:)
    out_collections_arr = Collection.find(inoculation_prep_hash.keys)
    inoculation_prep_hash.each do |out_collection_id, inoculation_item_hash|
      collection = out_collections_arr.select {|c| c.id == out_collection_id }.first
      inoculation_item_hash.each do |input_item_id, media_rc_list_hash|
        media_rc_list_hash.each do |media_item_id, rc_list|
          show do
            title "Inoculate #{collection} with Resuspended Inoculants"
            separator
            note "Follow the table below to transfer <b>#{SATURATION_CULT_VOL}#{MICROLITERS}</b> from a resuspended inoculant to the corresponding well."
            bullet "The numbers in the table correspond to the labels on the resuspension tubes."
            table highlight_alpha_rc(collection, rc_list) {|r,c| "#{tubeNum_hash[input_item_id][media_item_id]}"} 
          end
        end
      end
      seal_plate(collection_id=out_collection_id)
    end
  end
  
  # Guides tech through labelling and resuspending glycerol stock sample into specified volume of media for inoculation.
  def prep_glycerol_stock_inoculants(inoculation_prep_hash:, input_item_hash:, input_media_hash:)
    tube_num = 1        
    tubeNum_hash = nested_hash_data_structure
    resuspension_hash = nested_hash_data_structure
    inoculation_prep_hash.each do |out_collection_id, inoculation_item_hash|
      inoculation_item_hash.each do |input_item_id, media_rc_list_hash|
        media_rc_list_hash.each do |media_item_id, rc_list|
          media_vol_ml = ((rc_list.length*SATURATION_CULT_VOL*1.1)/1000.0).round(3) # mL w/ 10%
          if (resuspension_hash[input_item_id][media_item_id]).instance_of? Hash
            resuspension_hash[input_item_id][media_item_id] = media_vol_ml 
          else 
            resuspension_hash[input_item_id][media_item_id] += media_vol_ml
            resuspension_hash[input_item_id][media_item_id].round(3)
          end
          if tubeNum_hash[input_item_id][media_item_id].instance_of? Hash
            tubeNum_hash[input_item_id][media_item_id] = tube_num
            tube_num += 1
          end
        end
      end
    end
    display_table = [['Tube Label #',"Media Type", "Media Vol (#{MILLILITERS})", 'Input Item ID','Item Location']] # Headers of table
    resuspension_hash.each do |input_item_id, media_volume_hash|
      media_volume_hash.each do |media_item_id, media_vol_ml|
        dtable_row = make_checkable(value: tubeNum_hash[input_item_id][media_item_id]).concat([input_media_hash[media_item_id].sample.name]).concat(
          make_checkable(value: media_vol_ml)).concat([input_item_id]).concat(make_checkable(value: input_item_hash[input_item_id].location)
          )
        display_table.push(dtable_row)
      end
    end
    show do
      title "Resuspend Inoculants"
      separator
      note "Use the <b>Tube Label #</b> column to determine how many inoculants to prepare."
      note "Use the <b>Media Vol (#{MILLILITERS})</b> column to determine the appropriate sized tube."
      check "Gather tubes and label with tube label number"
      check "Next, fill tubes with the appropriate amount of media."
      check "Finally, retrieve glycerol stock, take a sample using aseptic technique, then resuspend in pre-filled tube."
      note "Follow the table below to resuspend the input item into the appropriate media."
      table display_table
    end
    return tubeNum_hash
  end
  
  def make_checkable(value:)
    if value.is_a? Array
      return value.map {|i| { content: i, check: true } }
    else
      return [value].map {|i| { content: i, check: true } }
    end
  end

  def copy_sample_matrix(from_collection:, to_collection:)
    sample_matrix = from_collection.matrix
    to_collection.matrix = sample_matrix
    to_collection.save()
  end
  
  # Only transfer part associations to avoid copying over global associations (things directly associated to the collection)
  def transfer_part_associations(from_collection:, to_collection:)
    copy_sample_matrix(from_collection: from_collection, to_collection: to_collection)
    from_collection_associations = AssociationMap.new(from_collection)
    to_collection_associations   = AssociationMap.new(to_collection)
    from_associations_map = from_collection_associations.instance_variable_get(:@map)
    # Remove previous source data from each part, retain only value where the key is part_data
    from_associations_map.select! {|key| key == 'part_data' } # Retain only the part_data, so that global associations do not get copied over
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("source") ? part.reject! {|k| k == "source" } : part } }
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("destination") ? part.reject! {|k| k == "destination" } : part } }
    # Set edited map to the destination collection_associations
    to_collection_associations.instance_variable_set(:@map, from_associations_map) # setting it to the associations @map will push the part_data onto each part item automatically
    to_collection_associations.save()
    return from_associations_map
  end    
  
  # Generate source & destination associations for part provenenance reactor DARPA SD2
  def part_provenance_transfer(from_collection:, to_collection:, process_name:)
    to_collection_part_matrix = to_collection.part_matrix
    from_collection.part_matrix.each_with_index do |row, r_i|
      row.each_with_index do |from_part, c_i|
        if from_part
          to_part = to_collection_part_matrix[r_i][c_i]
          # Create source and destination objs
          source_id = from_part.id; source = [{id: source_id }]
          destination_id = to_part.id; destination = [{id: destination_id }]
          # raise process_name.inspect unless process_name.nil?
          destination.first.merge!({additional_relation_data: { process: process_name }}) unless process_name.nil?
          # Association source and destination
          to_part.associate(key=:source, value=source)
          from_part.associate(key=:destination, value=destination)
        end
      end
    end
  end
  
  # Transfer every non empty well of a collection, keep culture composition association, and create new part provenance associations
  def stamp_transfer(from_collection:, to_collection:, process_name: nil)
    from_associations_map = transfer_part_associations(from_collection: from_collection, to_collection: to_collection)
    part_provenance_transfer(from_collection: from_collection, to_collection: to_collection, process_name: process_name)
    return from_associations_map.fetch('part_data')
  end
  
  # Addup total volume for a given component type found in a part_data matrix (a matrix of culture compostion part associations)
  def get_component_volume_hash(matrix:, component_type:)
    volume_hash = Hash.new(0)
    matrix.each do |culture_array|
      culture_array.each do |culture|
        component = culture.fetch(component_type, nil)
        if component
          attributes = component.values.first
          item_id = attributes.fetch(:item_id, nil)
          if item_id.nil?
            next
          else
            volume_hash[item_id] += attributes.fetch(:working_volume).fetch(:qty)
          end
        end
      end
    end
    return volume_hash
  end
  
  # Compute how much volume to transfer to reach a given dilution factor and also consider the volumes of the other culture components (ie: inducers, antibiotics, etc...)
  def get_transfer_volume_matrix(collection:, part_associations_matrix:, dilution_factor:)
    transfer_vol_matrix = Array.new(collection.object_type.rows) { Array.new(collection.object_type.columns) { -1 } }
    collection = collection_from(collection)
    collection.get_non_empty.each do |r, c|
      culture_volume = part_associations_matrix[r][c].fetch("Culture_Volume", nil)
      if culture_volume.nil?
        culture_volume
      else
        transfer_volume = (dilution_factor*culture_volume[:qty].to_f).round(3)
        transfer_vol_matrix[r][c] = transfer_volume
      end
    end
    return transfer_vol_matrix
  end
  
  def clean_up(item_arr: [uniq_media_items, uniq_input_items])
    item_arr.flatten.group_by {|i| i.object_type.name }.each {|otname, items| release items, interactive: true }
    show do 
      title "Cleaning Up.."
      separator
      note "Make sure that all materials and equiptment used is put away and cleaned before finishing."
    end
  end
  
  # Set the location of the new output collections to the same incubator that its source plate came from.
  def incubate_plates(output_collections:, growth_temp:)
    incubation_location ="Incubator at #{growth_temp.to_i}#{DEGREES_C}"
    if output_collections.is_a? Array
      output_collections.each {|collection| collection.location = incubation_location }
      release output_collections, interactive: true
    else
      output_collections.location == incubation_location
      release [output_collections], interactive: true
    end
  end
  
  # Get and format dilution factor from user specified FieldValue
  def get_dilution_factor(op:, fv_str:)
    param_val = get_parameter(op: op, fv_str: fv_str).to_s
    dilution_factor = (param_val == 'None') ? param_val : param_val.chomp('X').to_f
  end
  
  def get_parameter(op:, fv_str:)
    op.input(fv_str).val
  end
  
  def update_matrix(matrix:, &block)
    matrix.map! {|row| row.map! {|part_data| yield part_data } }
  end
  
  # Generate part data objects to alter or edit 
  def update_part_data_matrix(collection:, &block)
    collection_associations = AssociationMap.new(collection_from(collection))
    part_data_matrix = collection_associations.instance_variable_get(:@map).fetch('part_data', Array.new(collection.object_type.rows) { Array.new(collection.object_type.columns) { Hash.new() }})
    update_matrix(matrix: part_data_matrix) {|part_data| yield part_data }
    collection_associations.instance_variable_set(:@map, {'part_data'=>part_data_matrix})
    collection_associations.save()
  end

  # Gather materials. label if they are empty containers, display if they are materials are equiptement, and take items that are represented in Aq
  def gather_materials(empty_containers: [], transfer_required: false, new_materials: [], take_items: [])
    label_disorganized_containers(empty_containers)
    new_materials = new_materials.select {|m| !Protocol.materials_list.include? m}
    if !empty_containers.empty? || !new_materials.empty?
      show do
        title "Gather The Following Materials"
        separator
        note "Gather the following and bring them to your bench:"
        empty_containers.each {|c|
          ((c.is_a? Item) || (c.is_a? Collection)) ? (check "#{c.object_type.name} and label as <b>#{c.id}</b>") : (check "#{c}")
        }
        new_materials.each {|m| check "#{m}" }
      end 
    end
    take take_items, interactive: true unless take_items.length <= 0
    Protocol.materials_list.concat(new_materials).concat(empty_containers)
  end

  def label_disorganized_containers(containers)
    containers.each do |container|
      next unless container.object_type.name.upcase.include?('DISORGANIZED')

      show do
        title 'Retrieve and Label Test Tube Rack'
        note 'Please retrieve the following'
        check "Test tube rack labeled #{container.id}"
        check "#{container.parts.length} test tubes"
      end

      show do
        title 'Label Test Tubes'
        note 'Please label test tubes with both rack location and rack id 
                per the table below (e.g. A1-####):'
        separator
        note "Rack ID: #{container.id}"
        table highlight_alpha_non_empty(container, check: false)
      end
    end
  end

  # Allows for multiple key deeply nested hash[:item][:measurement][:day][:hour] = val
  def nested_hash_data_structure
    Hash.new { |hash, key| hash[key] = Hash.new(&hash.default_proc) }
  end
  
  def get_uninitialized_output_fv_object_type_id(op)
    AllowableFieldType.find(op.outputs[0].allowable_field_type_id).object_type_id
  end
  
  def get_uninitialized_output_object_type(op)
    oti = get_uninitialized_output_fv_object_type_id(op)
    return ObjectType.find(oti)
  end
    
  def self.add_extra_vol(int:, additional_percent: 0.1)
    return (int*(1+additional_percent)).round(3)
  end
  
  # Convert alpha numeric string to a [r,c] tuple
  def get_rc_from_alpha_coords(alpha_coord:)
    abc = ('A'..'H').to_a
    row = abc.find_index(alpha_coord.split('').shift.upcase)
    col = alpha_coord[1..alpha_coord.length].to_i - 1
    return row, col
  end
  
  # Generate a matrix of alpha numeric coordinates for a 96 well plate
  def alpha_coordinates_96
    abc = ('A'..'H').to_a
    empty_matrix = Array.new(8) { Array.new(12) { EMPTY } }
    alpha_numeric_matrix = empty_matrix.each_with_index.map do |row, r_i|
      row.each_with_index.map do |col, c_i|
        "#{abc[r_i]}#{c_i+1}"
      end
    end
    return alpha_numeric_matrix
  end
end # module HighThroughputHelper

library: {name: InstrumentHelper, category: High Throughput Culturing}
code_source:
# Common instrument class methods. Try to find common methods in instrument classes.
module InstrumentHelper
  attr_accessor :measurement_type, :experimental_item, :measurement_item, :transfer_required, :measurement_data
  def setup_experimental_measurement(experimental_item:, output_fv:)
    @experimental_item = experimental_item
    transfer?(output_fv: output_fv)
  end
  
  def transfer?(output_fv:)
    if transfer_needed
      output_fv.make
      @measurement_item = output_fv.item
    else
      @measurement_item = experimental_item
    end
  end
  
  def transfer_needed
    @transfer_required = !valid_container?
  end
  
  def self.intrument_type?
    self.class.to_s
  end
end

library: {name: PlateReaderCalibration, category: High Throughput Culturing}
code_source:
module PlateReaderCalibration
  include Units, Debug, AssociationManagement
  # Constants
  DILUTANT_VOL = 100 # Final vol that each flourescence cal well will have
  FLOUR_ALIQUOT_CONC = 50#uM # The starting concentration of the flour std curve
  
  # Prepare iGEM plate reader calibration plate
  def prep_calibration_plate(pr, ops, out_fv_str, flour_item, optical_item)
    new_mtype = true  
    create_a_new_cal_plt, reusable_plate_item = check_for_reusable_plate(ops.running.map {|op| op.operation_type}.uniq.first)
    create_a_new_cal_plt ? ops.make : reusable_plate_item
    additional_solutions = create_a_new_cal_plt ? [get_pbs_item, get_water_item] : []
    ops.each do |op|
      create_a_new_cal_plt ? op.output(out_fv_str).item : op.output(out_fv_str).set(opts={item: reusable_plate_item})
      pr.setup_experimental_measurement(experimental_item: op.output(out_fv_str).item, output_fv: op.output(out_fv_str))
      new_mtype = setup_plate_reader_software_env(pr: pr, new_mtype: new_mtype)
      # Materials based on whether a new calibration plate will be filled
      take_items       = create_a_new_cal_plt ? [flour_item, optical_item].concat(additional_solutions) : [pr.measurement_item]
      new_materials    = create_a_new_cal_plt ? ['P1000 Multichannel', 'P200 Pipette'] : ['P20 Multichannel']
      empty_containers = create_a_new_cal_plt ? [pr.measurement_item] : []
      gather_materials(empty_containers: empty_containers, new_materials: new_materials, take_items: take_items)
      if create_a_new_cal_plt # then fill empty container and add inputs to op
        tech_fill_calibration_plate(calibration_plate: pr.measurement_item, water_item: get_water_item, flour_item: flour_item, optical_item: optical_item)
        # additional_solutions.each {|item| add_solution_to_op(op: op, fv_str: "#{item.sample.name} Aliquot", item: item) }
        op.operation_type.associate(:calibration_plate, {date_created: todays_date, item_id: pr.measurement_item.id})
      else # reuse the unexpired calibration plate
        equilibrate_calibration_plate(op: op, calibration_solutions: calibration_solutions)
      end
    end
    return new_mtype
  end
  
  # Check to see if there are any calibration plates that are not older than a month
  def check_for_reusable_plate(op_type)
    create_a_new_cal_plt = true
    calibration_plate = nil # if the plate is less than a month old use the cal plate
    op_type.data_associations.select {|da| da[:key] == :calibration_plate }.map do |da|
      key, ot_obj = da[:key], da[:object]
      obj = ot_obj[key]
      date_created, present, plus_month = obj[:date_created], todays_date, [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
      plus_month[0] = plus_month[0] + 1
      date_created = [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
      if date_created[0] == plus_month[0] # Checking month
        if plus_month[1] >= date_created[1] # Checking day
          create_a_new_cal_plt = true
          expired_plate = Item.find(obj[:item_id])
          show {check "Before creating a new Calibration plate, throw away the expired plate #{expired_plate} found at #{expired_plate.location}"}
          expired_plate.mark_as_deleted
        else
          calibration_plate = Item.find(obj[:item_id])
          create_a_new_cal_plt = false
        end
      else
        calibration_plate = Item.find(obj[:item_id])
        create_a_new_cal_plt = false
      end
    end
    return create_a_new_cal_plt, calibration_plate
  end
  
  # Techician retrieves reused calibration plate and equilibrates it to room temperature before measuring
  def equilibrate_calibration_plate(op:, calibration_solutions:)
    plate = op.outputs[0].collection
    cs_wells = get_calibration_solution_wells(calibration_solutions: calibration_solutions, collection: plate)
    show do
      title "Equilibrating Calibration Plate #{plate}"
      separator
      check "Let the #{plate} plate sit at room temperature (25#{DEGREES_C}) for 10 minutes to avoid condensation skewing the calibration."
      note "<b>After the timer is up:</b>"
      note "Using a multichannel pipette, resuspend the highlighted wells:"  
      table highlight_alpha_rc(collection_from(plate), cs_wells[op.input("Optical Particles").sample.name])
      check "Use a kimwipe to remove condensation from the top and bottom of the plate."
    end
  end
  
  # Generate a hash describing which [r,c] a given sample is in, used for displaying
  def get_calibration_solution_wells(calibration_solutions:, collection:)
    cs_wells = {}
    calibration_solutions.map {|i| cs_wells[i.sample.name] = get_sample_wells(collection: collection, sample: i.sample) }
    return cs_wells
  end
  
  def get_pbs_item
    get_pbs_sample.items.select {|i| i.location != 'deleted' }[0]
  end
  
  def get_pbs_sample
    Sample.find_by_name('PBS')
  end
  
  def get_water_item
    get_water_sample.items.select {|i| i.location != 'deleted' }[0]
  end
  
  def get_water_sample
    h2o_type = "Nuclease-free water" # Change in Production Aq to Mol grade H2O
    h2o_samp = Sample.find_by_name(h2o_type)
  end
  
  def get_stock_solution_concentration(ot:)
    name = ot.name.split(' ')[0]
    units = name[-2..-1]
    stock_conc = name.match /(?<conc>\d+)/
    return stock_conc[:conc].to_i, units
  end
    
  def dilute_flourescence_item(flour_item:)
    flour_ot = ObjectType.find(flour_item.object_type_id)
    conc, units = get_stock_solution_concentration(ot: flour_ot)
    case units
    when MILLIMOLAR
      dilution_factor = ((conc*1000) / FLOUR_ALIQUOT_CONC)
    when MICROMOLAR
      dilution_factor = (conc*100)/FLOUR_ALIQUOT_CONC
    else
      raise "The current flourescence #{flour_ot} does not contain information about the concentration. 
      please create a new container that will have a name with the concentraiton of the reagent".upcase
    end
    flour_stk_vol = 1000/dilution_factor
    pbs_vol = 1000 - flour_stk_vol
    show do
      title "Dilute #{flour_item} #{flour_item.sample.name}"
      separator
      note "Vortex item #{flour_item.id} #{flour_ot.name} and make sure there are no precipitates."
      check "In a fresh 1.5mL Eppendorf tube, dilute #{flour_stk_vol}#{MICROLITERS} of  #{flour_ot.name} into #{pbs_vol}#{MICROLITERS} of 1X PBS - Final Concentration [#{FLOUR_ALIQUOT_CONC}#{MICROMOLAR}]"
      note "Make sure to vortex."
    end
  end
  
  # Set iGEM fluorecein salt dilutions, ludox aliquots, and water aliquots to their template location in the calibration plate
  def set_calibration_plate_sample_matrix(calibration_plate:, flour_item:, water_item:, optical_item:)
    calibration_plate = collection_from(calibration_plate)
    rows, cols = calibration_plate.object_type.rows, calibration_plate.object_type.columns
    new_matrix = Array.new(rows) { Array.new(cols) { -1 } }
    rows.times do |r|
     cols.times do |c|
        if r < 4
         new_matrix[r][c] = flour_item.sample.id 
        elsif r == 4
         new_matrix[r][c] = optical_item.sample.id
        elsif r == 5
          new_matrix[r][c] = water_item.sample.id
        end
      end
    end
    calibration_plate.matrix = new_matrix
    calibration_plate.save
    return calibration_plate
  end
  
  # Guide tech to fill a new calibration plate with fresh calibration solutions
  def tech_fill_calibration_plate(calibration_plate:, flour_item:, water_item:, optical_item:)
    dilute_flourescence_item(flour_item: flour_item)
    set_calibration_plate_sample_matrix(calibration_plate: calibration_plate, flour_item: flour_item, water_item: water_item, optical_item: optical_item)
    flourescence_serial_dilution(calibration_plate: calibration_plate, flour_item: flour_item)
    [optical_item, water_item].each {|i| fill_calibration_plate_with_optical_solution(calibration_plate: calibration_plate, solution_item: i)}
    # Create associations if a new calibration plate is made and filled
    associate_data(object=calibration_plate, key="calibration_plate", data = {date_created: todays_date}, opts = {})
  end
  
  # Guide tech through creating a fluorecein salt serial dilution
  def flourescence_serial_dilution(calibration_plate:, flour_item:) # iGEM Protocol 2018
    dilutant_wells = collection_from(calibration_plate).select {|well| well == flour_item.sample.id }.select {|r,c| c != 0}
    # direct tech to fill new calibration plate
    show do
      title "Creating a New #{calibration_plate} Calibration Plate"
      separator
      note "You will need <b>#{(dilutant_wells.length * 0.1) + 0.1}mL</b> of 1X PBS for the next step."
      note "Follow the table below to dispense 1X PBS in the appropriate wells:"
      table highlight_rc(calibration_plate, dilutant_wells) {|r,c| "#{DILUTANT_VOL}#{MICROLITERS}"}
    end
    flour_serial_image = "Actions/Yeast_Gates/plateReaderImages/flour_serial_dilution.png"
    show do
      title "Serial Dilution of #{flour_item} #{flour_item.sample.name}"
      separator
      note "From the #{FLOUR_ALIQUOT_CONC}#{MICROMOLAR} #{flour_item.sample.name} solution, dispense <b>#{DILUTANT_VOL+DILUTANT_VOL}#{MICROLITERS}</b> in wells <b>A1, B1, C1, D1</b>"
      note "Following the image below, transfer <b>#{DILUTANT_VOL}#{MICROLITERS}</b> of #{FLOUR_ALIQUOT_CONC}#{MICROMOLAR} #{flour_item.sample.name} solution in Column 1 to Column 2"
      note "Resuspend by pipetting up and down 3X"
      note "Repeat until column 11 and discard the remaining <b>#{DILUTANT_VOL}#{MICROLITERS}</b>."
      image flour_serial_image
    end
  end
  
  # Guide tech through filling calibration plate with ludox optical particle solution
  def fill_calibration_plate_with_optical_solution(calibration_plate:, solution_item:)
    plate = collection_from(calibration_plate)
    rc_list = plate.select {|well| well == solution_item.sample.id}
    show do
      title "Filling #{calibration_plate} Calibration Plate"
      separator
      note "Follow the table below to dispense <b>#{solution_item.sample.name}</b> into the appropriate wells."
      table highlight_rc(plate, rc_list) {|r,c| optical_solution_vol(r, c)}
    end
  end
  
  # Determine how much volume of solution is required for a given column
  def optical_solution_vol(row, col)
    if col < 4
      return "#{100}#{MICROLITERS}"
    elsif col.between?(4, 7)
      return "#{200}#{MICROLITERS}"
    else col.between?(7, 11)
      return "#{300}#{MICROLITERS}"
    end
  end
    
  def todays_date
    DateTime.now.strftime("%m%d%Y")
  end
  
  # The plotted result of this method can be fit to a curve
  # to be used for calibrating the plate reader. This is very specific to the
  # Eriberto's calibration of the biotek plate reader.
  #
  # @param upload [Upload]  the object whihc can be resolved to calibration csv
  # @return [Hash]  a hash containing averaged measurements for
  #  					every concentration and volume tested
  #
  #
  #
  # New Description needed - some refactoring may be necessary, but works! 
  def get_calibration_hash(dm:, measurement_type:)
    result = {}
    data_by_conc = Hash.new { |h, key| h[key] = [0, 0] }
    case measurement_type
    when :Calibration_Green_Fluorescence
      starting_concentration = 50.0#uM
      # first 4 rows are serial dilutions
      for i in 0...4
        12.times do |j|
          if j == 11
            this_conc = 0
          else
            # each column is a 2x dilution of the previous, starting at 50uM
            this_conc = starting_concentration / (2**j)
          end
          data = data_by_conc[this_conc]
          data[0] += dm[i][j].to_f
          data[1] += 1
          data_by_conc[this_conc] = data
        end
      end
      # add serial dilution averages to result hash
      data_by_conc.each_key do |k|
        data = data_by_conc[k]
        result[k] = data[0] / data[1]
      end
    when :Calibration_Optical_Density
      # row 5, 6 are lud dilutions and pure solution respectively
      for i in 4...6
        for j in 0...4
          data_by_conc["100_#{i}"][0] += dm[i][j].to_f
          data_by_conc["100_#{i}"][1] += 1
        end
        for j in 4...8
          data_by_conc["200_#{i}"][0] += dm[i][j].to_f
          data_by_conc["200_#{i}"][1] += 1
        end
        for j in 8...12
          data_by_conc["300_#{i}"][0] += dm[i][j].to_f
          data_by_conc["300_#{i}"][1] += 1
        end
      end
      # add lud averages to result hash
      for i in 1..3
        lud_avg = data_by_conc["#{i}00_4"][0] / data_by_conc["#{i}00_4"][1]
        sol_avg = data_by_conc["#{i}00_5"][0] / data_by_conc["#{i}00_5"][1]
        result["#{i}00"] = (lud_avg - sol_avg).round(5) # Returns blanked averages
      end
    end
    return result
  end
  
  # This function creates a standard curve from the flourocein calibration plate
  #
  # @param coordinates [hash or 2D-Array] can be a hash or [[x,y],..] where x is known concentration & y is measurement of flouroscence
  #
  # @returns slope [float] float representing the slope of the regressional line
  # @returns yint [float] float representing where the line intercepts the y-axis
  # @returns x_arr [Array] a 1D array for all x coords
  # @returns y_arr [Array] a 1D arrya for all y coords
  def standard_curve(coordinates:)
    # Calculating Std Curve for GFP
    num_of_pts, a, x_sum, y_sum, x_sq_sum = 0, 0, 0, 0, 0
    x_arr, y_arr = [], []
    coordinates.each do |x, y|
      if x < 25 # Above 25uM is out of linear range of our instrument
        a += (x*y)
        x_sum += x
        x_sq_sum += (x**2)
        y_sum += y
        x_arr.push(x)
        y_arr.push(y)
        num_of_pts += 1
      end
    end
    a *= num_of_pts
    b = x_sum * y_sum
    c = num_of_pts * x_sq_sum
    d = x_sum**2
    slope = (a - b)/(c - d)
    f = slope * (x_sum)
    yint = (y_sum - f)/num_of_pts
    # show{note "y = #{(slope).round(2)}x + #{(yint).round(2)}"}
    return (slope).round(3), (yint).round(3), x_arr, y_arr
  end  
  
  # This function calculates how much deviation points are from a regressional line - R-squared Value 
  # The closer it is to 1 or -1 the less deviation theres is
  #
  # @param slope [float] float representing the slope of the regressional line
  # @param yint [float] float representing where the line intercepts the y-axis
  # @param x_arr [Array] a 1D array for all x coords
  # @param y_arr [Array] a 1D arrya for all y coords
  #
  # @returns rsq_val [float] float representing the R-squared Value
  def r_squared_val(slope, yint, x_arr, y_arr)
    y_mean = y_arr.sum/y_arr.length.to_f
    # Deviation of y coordinate from the y_mean
    y_mean_devs = y_arr.map {|y| (y - y_mean)**2}
    dist_mean = y_mean_devs.sum # the sq distance from the mean
    # Finding y-hat using regression line
    y_estimate_vals = x_arr.map {|x| (slope * x) + yint }
    # Deviation of y-hat values from the y_mean
    y_estimate_dev = y_estimate_vals.map {|y| (y - y_mean)**2}
    dist_regres = y_estimate_dev.sum # the sq distance from regress. line
    rsq_val = (dist_regres/dist_mean).round(4)
    return rsq_val
  end
  
  def get_trendline_equation(coordinates_hash:)
    slope, yint, x_arr, y_arr = standard_curve(coordinates: coordinates_hash)
    r_sq = r_squared_val(slope, yint, x_arr, y_arr)
    trendline = "y = #{slope}x + #{yint}  (R^2 = #{r_sq})"
    return trendline
  end
  
  # This fuction uses a reference od600 measurement to calculate the correction factor for different vols (100ul, 200, 300)
  # 
  # @param hash [hash] is the hash of averaged blanked LUDOX samples at different volumes
  # @returns correction_val_hash [hash] is the hash containing the correction factor for the optical density (600nm) for this experiment
  def optical_correction_factors(hash)
    ref_od600 = 0.0425 #Taken from iGEM protocol - is the ref val of another spectrophotometer
    # ref/corrected vals
    correction_val_hash = Hash.new()
    hash.each do |vol, ave|
      correction_val_hash[vol[3..6]] = (ref_od600/ave).round(4)
    end
    return correction_val_hash
  end

  def get_calibration_calculated_values(cal_hash:, measurement_type:)
    case measurement_type
    when :Calibration_Green_Fluorescence
      return get_trendline_equation(coordinates_hash: cal_hash)
    when :Calibration_Optical_Density
      return optical_correction_factors(cal_hash)
    else
      raise "this #{measurement_type} measurement type is not recognized as a calibration measurement"
    end
  end
  
end # module PlateReaderCalibration

library: {name: PlateReaderConstants, category: High Throughput Culturing}
code_source:
# Change LAB_NAME to use different plate reader constants
LAB_NAME = 'Klavins Lab'.to_sym
YOUR_LAB_NAME = 'YOUR_LAB_HERE'.to_sym
PLATE_READER_TYPE = {'Klavins Lab':'Gen 5 BioTek'.to_sym,'YOUR_LAB_HERE':'YOUR_PLATE_READER_TYPE'.to_sym}

MY_PLATE_READER_PROPERTIES = {
  'Klavins Lab': {
    'Gen 5 BioTek': {
      software_properties: {
        images: {
          open_software: "Actions/Yeast_Gates/plateReaderImages/open_biotek.PNG",
          read_plate: "Actions/Yeast_Gates/plateReaderImages/begin_plate_reader.PNG",
          export_new_data: "Actions/Yeast_Gates/plateReaderImages/exporting_data_new.GIF",
          export_data_button: "Actions/Yeast_Gates/plateReaderImages/excel_export_button_new.png",
          save_export: "Actions/Yeast_Gates/plateReaderImages/saving_export_csv_new.png"
        },
        export_mesurement_type: { 
            "Optical Density":    {dtype: 'Read 1:600'},           # Change the template to not blank the measurement data uploaded and exported
            "Green Fluorescence": {dtype: 'Read 2:485/20,516/20'},                   ## Since we are not sure where the blank samples will be, we can use Aq to determine the OD of the 
            'Calibration Optical Density':    {dtype: 'Read 1:600'},                 ## blanking sample used and then use that to process the data when associating raw and true part item associations
            'Calibration Green Fluorescence': {dtype: 'Read 2:485/20,516/20'}
          },
        measurement_type_templates: {
          'Optical Density':'OD600_GFP_measurement',
          'Green Fluorescence':'OD600_GFP_measurement',
          'Optical Density & Green Fluorescence':'OD600_GFP_measurement',
          'Calibration':'calibration_template_v1',
          'Time Series':'create a new timeseries template'.upcase
        },
        saving_directory: 'FIND_OUT_THE_PATH/_UWBIOFAB'
      },
    valid_containers: ['96 Well Flat Bottom (black)', '24-Well TC Dish'],
    },
  },
  'YOUR_LAB_HERE':{
    'YOUR_PLATE_READER_TYPE':{ 
      software_steps: 'properties', 
      valid_containers: ['96 Well Flat Bottom (black)', '24-Well TC Dish'], 
    },
    saving_directory: 'SAVING_DIRECTORY'
  }
}

library: {name: PlateReaderHelper, category: High Throughput Culturing}
code_source:
# Eriberto Lopez
# elopez3@uw.edu
# 07/23/19

needs "Standard Libs/Debug"
needs "Standard Libs/Units"
needs "Standard Libs/AssociationManagement"
needs "High Throughput Culturing/InstrumentHelper"
needs "High Throughput Culturing/PlateReaderSoftware"
needs "High Throughput Culturing/PlateReaderConstants"
needs "High Throughput Culturing/PlateReaderCalibration"
needs "Collection Management/CollectionDisplay"

class PlateReader 
  include InstrumentHelper
  attr_accessor :software_open
  attr_reader :type, :valid_containers, :software
  def initialize()
    @type             = get_my_plate_reader_type
    @valid_containers = valid_containers
    @software         = get_my_software_properties
    @software_open    = false
  end
  
  def get_my_plate_reader_type
    PLATE_READER_TYPE[LAB_NAME]
  end

  def valid_containers
    get_my_plate_reader_properties_obj[type][:valid_containers]
  end
  
  def get_my_plate_reader_properties_obj
    MY_PLATE_READER_PROPERTIES[LAB_NAME]
  end
  
  def get_my_software_properties
    get_my_plate_reader_properties_obj[type][:software_properties]
  end
  
  def valid_container?
    if experimental_item.instance_of? Collection
      valid_containers.include? experimental_item.object_type.name.to_s
    elsif experimental_item.instance_of? Item
      valid_containers.map {|c| ObjectType.find_by_name(c).id.to_i}.include? experimental_item.object_type_id.to_i
    elsif experimental_item.instance_of? Array
      valid_container = false
      ot_arr = ObjectType.find(experimental_item.map {|item| item.object_type_id}.uniq).map {|ot| ot.name}
      ot_arr.each {|otn| (valid_containers.include? otn) ? (valid_container = true) : (valid_container) }
      valid_container
    else
      raise "This type of #{experimental_item.class} object is not compatible with this instrument"
    end
  end
end # Class PlateReader  

module PlateReaderHelper
  include Units, Debug, AssociationManagement
  include CollectionDisplay
  include PlateReaderCalibration
  
  def intro
    plate_reader = PlateReader.new
    show do
      title "Plate Reader Measurements"
      separator
      note "This protocol will instruct you on how to take measurements on the #{plate_reader.type} Plate Reader."
      note "Optical Density is a quick and easy way to measure the growth rate of your cultures."
      note "Green Fluorescence helps researchers assess a response to a biological condition <i>in vivo</i>."
      note "<b>1.</b> Setup #{plate_reader.type} Plate Reader Software workspace."
      note "<b>2.</b> Check to see if input item is a #{plate_reader.valid_containers} if not, transfer samples to a valid container."
      note "<b>3.</b> Prepare measurement item with blanks."
      note "<b>4.</b> Take measurement, export data, & upload."
    end
    get_plate_reader_software(plate_reader: plate_reader)
    return plate_reader
  end
  
  # when PlateReaderHelper is included into class Protocol we can use the class method .include() 
  # to include the required software module dynamically to the Protocol. 
  # Which allows us to use methods found in the software module.
  def get_plate_reader_software(plate_reader:)
    case plate_reader.type
    when 'Gen 5 BioTek'.to_sym
      Protocol.include(KlavinsLabPlateReaderSoftware)
    when 'YOUR_LABS_PLATE_READER_MODULE'.to_sym
      Protocol.include(YourSoftwareSteps)
    else
      raise "the #{plate_reader.type} plate reader in the #{LAB_NAME} has no software steps associated to it, create a module with steps to use plate reader".upcase
    end
  end
  
  # If a dilution is required then find how much media an culture are required given the working volume of the container.
  def get_culture_and_media_vols(dilution_factor:, measurement_item:)
    working_vol = get_object_type_data(collection: measurement_item).fetch('working_vol').split('_').first.to_f
    cult_vol_ul = (dilution_factor == 'None') ? working_vol : dilution(dilution_factor: dilution_factor, vol: working_vol)
    media_vol_ul = working_vol - cult_vol_ul
    return media_vol_ul, cult_vol_ul
  end
  
  def copy_sample_matrix(from_collection:, to_collection:)
    sample_matrix = from_collection.matrix
    to_collection.matrix = sample_matrix
    to_collection.save()
  end
  
  def transfer_part_associations(from_collection:, to_collection:)
    copy_sample_matrix(from_collection: from_collection, to_collection: to_collection)
    from_collection_associations = AssociationMap.new(from_collection)
    to_collection_associations   = AssociationMap.new(to_collection)
    from_associations_map = from_collection_associations.instance_variable_get(:@map)
    # Remove previous source data from each part, retain only value where the key is part_data
    from_associations_map.select! {|key| key == 'part_data' } # Retain only the part_data, so that global associations do not get copied over
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("source") ? part.reject! {|k| k == "source" } : part } }
    from_associations_map.fetch('part_data').map! {|row| row.map! {|part| part.key?("destination") ? part.reject! {|k| k == "destination" } : part } }
    # Set edited map to the destination collection_associations
    to_collection_associations.instance_variable_set(:@map, from_associations_map) # setting it to the associations @map will push the part_data onto each part item automatically
    to_collection_associations.save()
    return from_associations_map
  end    
    
  def part_provenance_transfer(from_collection:, to_collection:, process_name:)
    to_collection_part_matrix = to_collection.part_matrix
    from_collection.part_matrix.each_with_index do |row, r_i|
      row.each_with_index do |from_part, c_i|
        if from_part
          to_part = to_collection_part_matrix[r_i][c_i]
          # Create source and destination objs
          source_id = from_part.id; source = [{id: source_id }]
          destination_id = to_part.id; destination = [{id: destination_id }]
          # raise process_name.inspect unless process_name.nil?
          destination.first.merge!({additional_relation_data: { process: process_name }}) unless process_name.nil?
          # Association source and destination
          to_part.associate(key=:source, value=source)
          from_part.associate(key=:destination, value=destination)
        end
      end
    end
  end
  
  def stamp_transfer(from_collection:, to_collection:, process_name: nil)
    from_associations_map = transfer_part_associations(from_collection: from_collection, to_collection: to_collection)
    part_provenance_transfer(from_collection: from_collection, to_collection: to_collection, process_name: process_name)
    return from_associations_map.fetch('part_data')
  end
  
  def update_matrix(matrix:, &block)
    matrix.map! {|row| row.map! {|part_data| yield part_data } }
  end
 
  def update_part_data_matrix(collection:, &block)
    collection_associations = AssociationMap.new(collection_from(collection))
    part_data_matrix = collection_associations.instance_variable_get(:@map).fetch('part_data', Array.new(collection.object_type.rows) { Array.new(collection.object_type.columns) { Hash.new() }})
    update_matrix(matrix: part_data_matrix) {|part_data| yield part_data }
    collection_associations.instance_variable_set(:@map, {'part_data'=>part_data_matrix})
    collection_associations.save()
  end
  
  def transfer_culture_volume(pr:, culture_vol_ul:,  media_vol_ul:)
    total_transfer_volume = culture_vol_ul + media_vol_ul
    from_collection = collection_from(pr.experimental_item)
    to_collection = collection_from(pr.measurement_item)
    part_data_matrix = stamp_transfer(from_collection: from_collection, to_collection: to_collection, process_name: 'dilution')
    
    # Remove volume from Culture_Volume attribute
    update_part_data_matrix(collection: from_collection) do |part_data| culture_volume = part_data.fetch('Culture_Volume', false)
      if culture_volume
        culture_volume[:qty] = culture_volume[:qty] - culture_vol_ul
        part_data['Culture_Volume'] = culture_volume
      end
      part_data
    end
    # Add transfer volume to new collection
    update_part_data_matrix(collection: to_collection) do |part_data| culture_volume = part_data.fetch('Culture_Volume', false)
      if culture_volume
        culture_volume[:qty] = total_transfer_volume
      else
        culture_volume = {qty: total_transfer_volume, units: "#{MICROLITERS}"}
      end
      part_data['Culture_Volume'] = culture_volume
      part_data
    end
  end

  def get_part_culture_volumes(collection:)
    collection.data_matrix_values('Culture_Volume')
  end
  
  def tech_prefill_and_transfer(pr:, media_sample:, media_vol_ul:, culture_vol_ul:)
    pr.measurement_item = transfer_sample_matrix(source_collection: pr.experimental_item, destination_collection: pr.measurement_item)
    prefill_plate_w_media(collection: pr.measurement_item, media_sample: media_sample, media_vol_ul: media_vol_ul)
    tech_transfer_samples(culture_vol_ul: culture_vol_ul, sources: pr.experimental_item, destinations: pr.measurement_item)
    # update "Culture_Volume" for the parts that were transfered based on the "working_vol"
    transfer_culture_volume(pr: pr, culture_vol_ul: culture_vol_ul, media_vol_ul: media_vol_ul)
  end
  
  # TODO: Make opts hash allow usner to use to transfer sample matrix by some offset index  
  def transfer_sample_matrix(source_collection:, destination_collection:) #, opt: {starting_idx: [0,0]})
    destination_collection = collection_from(destination_collection)
    source_collection = collection_from(source_collection)
    if (source_collection.dimensions == destination_collection.dimensions)
      source_matrix = source_collection.matrix
      destination_collection.matrix = source_matrix
    else
      destination_collection.matrix = source_collection.matrix.flatten.each_slice(destination_collection.object_type.columns).map {|row| row }
    end
    destination_collection.save()
    return destination_collection
  end
  
  def prefill_plate_w_media(collection:, media_sample:, media_vol_ul:, display_hash: {})
    if !display_hash.empty? || media_vol_ul > 0.0 
      collection = collection_from(collection) 
      show do
        title "Pre-fill #{collection.object_type.name} #{collection}"
        separator
        note "Follow the table below to pre-fill the collection with <b>#{media_sample.name}</b> prior to transferring and resuspending cultures:"
        table highlight_alpha_non_empty(collection) {|r,c| ((display_hash.empty?) ? ("#{media_vol_ul}#{MICROLITERS}") : ("#{display_hash[r][c][:media_vol_ul]}#{MICROLITERS}")) }
      end
    end
  end

  def tech_transfer_samples(culture_vol_ul:, sources:, destinations:) 
    alpha_numeric = coordinates_96
    destination_coll = collection_from(destinations)
    source_coll = collection_from(sources)
    source_alpha = source_coll.get_non_empty.map {|r, c| alpha_numeric[r][c] }
    source_alpha_hashmap = nested_hash_data_structure
    destination_coll.get_non_empty.each_with_index do |rc, alpha_idx|
      r, c = rc
      source_alpha_hashmap[r][c] = source_alpha[alpha_idx]
    end
    show do 
      title "Transferring Samples <b>From</b> #{source_coll} <b>To</b> #{destination_coll}"
      separator
      note "Follow the table below to transfer cultures <b>To #{destination_coll}</b>:"
      bullet "The alpha numeric coordinates coorespond to wells in #{source_coll}"
      bullet "Transfer #{culture_vol_ul}#{MICROLITERS} of culture <b>From</b> each well of #{sources}"
      table highlight_alpha_non_empty(destination_coll) {|r,c| "#{source_alpha_hashmap[r][c]}"}
    end
  end

  def add_blanking_samples_to_measurement_item(measurement_item:, blanking_sample:, num_blanks: 3)
    measurement_collection = (measurement_item.instance_of? Collection) ? (measurement_item) : (collection_from(measurement_item))
    count = 0
    blank_wells = []
    while ((measurement_collection.get_empty.length != 0) && (count != num_blanks)) do
      r, c, x = measurement_collection.add_one(blanking_sample, reverse: true)
      create_part_association(collection: measurement_collection, key: "Plate Reader Blanks", row: r, col: c, val: "jid_#{jid}")
      blank_wells.push([r,c])
      count+=1
    end
    measurement_collection.save()
    return measurement_collection, blank_wells    
  end
  
  def create_part_association(collection:, key:, row:, col:, val:)
    part = collection_from(collection).set_part_data(key, row, col, val)
    part.save()
  end

  def tech_add_blanks(pr:, blanking_sample:, culture_vol_ul:, media_vol_ul:)
    max_well_vol_ul = get_max_well_vol(culture_vol_ul: culture_vol_ul, media_vol_ul: media_vol_ul)
    measurement_collection, blank_wells = add_blanking_samples_to_measurement_item(measurement_item: pr.measurement_item, blanking_sample: blanking_sample)
    blank_wells.each {|row, col| create_part_association(collection: measurement_collection, key: 'Culture_Volume', row: row, col: col, val: {qty: culture_vol_ul+media_vol_ul, units: "uL"}) }
    show do
      title "Adding #{blanking_sample.name} Blanks to #{measurement_collection}"
      separator
      note "Follow the table below to add #{max_well_vol_ul}#{MICROLITERS} of #{blanking_sample.name} to the appropriate wells:"
      table highlight_alpha_rc(measurement_collection, blank_wells) {|r,c| "#{max_well_vol_ul}#{MICROLITERS}"}
    end
  end
  
  def data_attributes(data:)
    return data[:mt].to_sym, data[:day].to_sym, data[:hour].to_sym, data[:mitem]
  end
  
  # TODO: Error handling when processing and associating upload data
  # Associate to the valid container and correct the data. 
  def process_and_associate_data(pr:, ops:, dilution_factor: 'None', blanking_sample: nil)
    pr.measurement_data.each do |data|
      mt, day, hour, mitem = data_attributes(data: data)
      key = "#{mt}_#{day}_#{hour}"
      upload = (debug) ? Upload.find(11379) : data[:upload]
      associate_data(object=mitem, key=key, data=upload, opts = {}) # Associate upload to object #=> Standard Libs/AssociationManagement
      ops.each {|op| associate_data(object=op.plan, key=key, data=upload, opts = {})} # Associates upload to plans
      if pr.measurement_type == 'Calibration'
        # Process data and create standard curve and optical item volume correction factor
        create_prm_calibration_associations(ops: ops, upload: upload, mitem: mitem, mt: mt)
      else
        # Process upload into corrected_data_matrix
        raw_data_matrix = extract_measurement_matrix_from_csv(upload: upload) 
        blanked_data_matrix, corrected_data_matrix = correct_plate_reader_data(
                                                      pr: pr,
                                                      blanking_sample: blanking_sample,
                                                      data_matrix: raw_data_matrix,
                                                      dilution_factor: dilution_factor
                                                    )
        # Associate to collection
        create_prm_part_associations_for_collection(
          collection: pr.measurement_item,
          data_matrix: corrected_data_matrix,
          measurement_type: mt,
          day: day,
          hour: hour
        ) 
        create_prm_part_associations_for_collection(
          collection: pr.experimental_item,
          data_matrix: corrected_data_matrix,
          measurement_type: mt,
          day: day,
          hour: hour
        ) unless !pr.transfer_required
      end
      # Filters operations that have a culture as input
      create_prm_item_association_for_cultures(ops: ops, mt: mt, day: day, hour: hour, corrected_data_matrix: corrected_data_matrix)
      ops.each {|op| associate_data(object=op, key=key, data={upload_id: upload.id}, opts = {})} # Associates upload_id to operation
    end
  end
  
  def associate_calibration_data(ops, mitem, measurement_type, cal_hash, calc_calibration_data)
    key = measurement_type
    associations = AssociationMap.new(mitem)
    case measurement_type
    when :Calibration_Green_Fluorescence
      trendline_points = {uM_to_val: cal_hash}
      associations.put(key, trendline_points) # ie: 'Calibration_Green_Fluorescence' : {'uM_to_val'=>{50=>2400,25=>1234...}}
      calibration_obj = {standard_curve: calc_calibration_data}
    when :Calibration_Optical_Density
      optical_pts = {vol_to_factor: cal_hash}
      calibration_obj = {vol_to_factor: calc_calibration_data}
      associations.put(key, optical_pts)
    else
      raise "this is not a recognized measurement_type: #{measumrenent_type}"
    end
    ops.each {|op| 
      associate_data(object=op,      key=key, data=calibration_obj, opts = {})
      associate_data(object=op.plan, key=key, data=calibration_obj, opts = {})
    }
    associations.put(key, calibration_obj)
    associations.save
  end
  
  def create_prm_calibration_associations(ops:, upload:, mitem:, mt:)
    data_matrix = extract_measurement_matrix_from_csv(upload: upload) unless debug
    data_matrix = Array.new(8){Array.new(12) { rand(10) } }
    cal_hash = get_calibration_hash(dm: data_matrix, measurement_type: mt)
    calcd_calibration_data = get_calibration_calculated_values(cal_hash: cal_hash, measurement_type: mt)
    associate_calibration_data(ops, mitem, mt, cal_hash, calcd_calibration_data)
  end  

  def create_prm_item_association_for_cultures(ops:, mt:, day:, hour:, corrected_data_matrix:) 
    alpha_coords = coordinates_96
    ops.select {|op| !op.input('Cultures').nil? }.each do |op|
      out_fv, r, c = op.outputs[0],  op.outputs[0].row, op.outputs[0].column
      destination_part, m_val = "#{out_fv.collection.id}/#{alpha_coords[r][c]}", corrected_data_matrix[r][c]
      input_culture = (debug) ? Item.find(234809) : op.input('Cultures').item
      input_cult_associations = AssociationMap.new(input_culture)
      current_da = input_cult_associations.get(mt.to_s) 
      if current_da.nil?
        # Create a new entry under the mt key
        current_da = nested_hash_data_structure
        current_da[day][destination_part][hour] = m_val
      else
        if current_da.has_key? day.to_s
          current_da[day][destination_part] = { hour => m_val }
        else
          current_da[day] = {destination_part => { hour => m_val } }
        end
      end
      input_cult_associations.put(mt.to_s, current_da)
      input_cult_associations.save
    end
  end  
  
  def keep_transfer_plate(pr:, user_val:)
    pr.measurement_item.location = (user_val == 'YES') ? 'Bench' : 'deleted'
  end
  
  def cleaning_up(pr:)
    clean_up_inputs([])
    clean_up_outputs
  end

  # Cleanup input items
  #
  # @param release_arr [array] is an array of items that are found in Aq
  def clean_up_inputs(release_arr)
    operations.store(opts = { interactive: true, method: 'boxes', errored: false, io: 'input' })
    release release_arr, interactive: true
    # operations.store
  end

  # Cleanup output items
  def clean_up_outputs()
    operations.store(interactive: true, method: 'boxes', errored: false, io: 'output')
    show do
      title "Cleaning Up"
      separator
      note "Return any remaining reagents used and clean bench"
    end
  end
  
  def create_prm_part_associations_for_collection(collection:, data_matrix:, measurement_type:, day:, hour:)
    collection_from(collection).get_non_empty.each do |r, c|
      pa = collection_from(collection).get_part_data(key=measurement_type, row=r, col=c)
      if pa.nil? || pa == -1
        pa = {day => {hour => data_matrix[r][c]} }
      else
        (pa.keys.include? day.to_s) ? pa[day].merge!({hour => data_matrix[r][c]}) : pa[day] = {hour => data_matrix[r][c]}
      end
      create_part_association(collection: collection, key: measurement_type, row: r, col: c, val: pa)
    end
  end

  def get_part_association_data_matrix(collection:, key:)
    matrix = Array.new(collection.object_type.rows) {Array.new(collection.object_type.columns) {-1} }
    part_data_arr = get_collection_part_data(collection: collection, key: key)
    collection.get_non_empty.zip(part_data_arr).each do |rc, data|
      r, c = rc
      matrix[r][c] = data
    end
    return matrix
  end
  
  def average_arr_values(arr)
    arr.reduce(:+) / arr.size.to_f
  end
  
  def get_sample_wells(collection:, sample:)
    collection_from(collection).find(sample)
  end
  
  def apply_value_to_matrix(matrix:, value:, operator:, &block)
    if block_given?
      matrix.map {|row| row.map {|part| (!part.nil? || part != -1) ? yield(part, value) : -1 } }
    else
      matrix.map {|row| row.map {|part| (!part.nil? || part != -1) ? (part.send(operator, value)) : (-1) } } 
    end
  end
  
  def correct_plate_reader_data(pr:, blanking_sample:,  data_matrix:, dilution_factor:)
    # Get blank wells
    blanking_wells = get_sample_wells(collection: pr.measurement_item, sample: blanking_sample)
    blanking_value = average_arr_values( blanking_wells.map {|r, c| data_matrix[r][c]} )
    blanked_data_matrix = apply_value_to_matrix(matrix: data_matrix, operator: '-', value: blanking_value)
    # Apply dilution factor to the measurement to calc the experimental_item/source measurement value
    if dilution_factor.is_a? Array 
      # Create a dilution_factor_matrix that has the same dimensions as the collection default value is 'None' dilution
      r, c = collection_from(pr.measurement_item).object_type.rows, collection_from(pr.measurement_item).object_type.columns
      dilution_matrix = Array.new(r) {Array.new(c) { 'None'} }
      # Take dilution_factor array and slice by the dimensions of the collection, next place all of the df into dilution_matrix
      dilution_factor.each_slice(c).map {|s| s}.each_with_index {|s, ridx| 
        s.each_with_index {|dil, cidx| dilution_matrix[ridx][cidx] = dil } }
      # Finally, either apply the dilution factor (df) or take the value from the blanked data matrix
      corrected_data_matrix = dilution_matrix.each_with_index.map {|row, r_idx| row.each_with_index.map {|df, c_idx|
          (df == 'None') ? (blanked_data_matrix[r_idx][c_idx]) : (blanked_data_matrix[r_idx][c_idx] * 1/df)
        }
      }
    else
      corrected_data_matrix = (dilution_factor == 'None') ? (blanked_data_matrix) : (apply_value_to_matrix(matrix: blanked_data_matrix, operator: '*', value: 1/dilution_factor))
    end
    return blanked_data_matrix, corrected_data_matrix
  end
  
  def change_item_location(item:, location:)  
    item.location = location
    item.save()
  end
  
  def get_parameter(op:, fv_str:)
    op.input(fv_str).val
  end
  
  def get_dilution_factor(op:, fv_str:)
    param_val = get_parameter(op: op, fv_str: fv_str).to_s
    dilution_factor = (param_val == 'None') ? param_val : param_val.chomp('X').to_f
  end
  
  def get_object_type_data(collection:)
    JSON.parse(Collection.find(collection.id).object_type.data)
  end
    
  def dilution(dilution_factor:, vol:)
    dilution_factor.to_f * vol.to_f
  end
  
  def get_media_bottle(op)
    op.input('Media').item
  end
  
  # A way to filter Struct objects (depriciated)
  # ie: catalog(pr.measurement_data, by: :item) #=> sorting symbol should be known by user. It is a instance method created in a Struct class
  def catalog(collection, by:)
    catalog = Hash.new { |hash, key| hash[key] = [] }
    collection.each_with_object(catalog) do |item, catalog|
      catalog[item.send(by)] << item
    end
  end
  
  def get_max_well_vol(culture_vol_ul:, media_vol_ul:)
    culture_vol_ul + media_vol_ul
  end
  
  def coordinates_96 
    ('A'..'H').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}}
  end
  
  # could extend a module with common class variables needed in protocol writing
  def gather_materials(empty_containers: [], transfer_required: false, new_materials: [], take_items: [])
    new_materials = new_materials.select {|m| !Protocol.materials_list.include? m}
    if !new_materials.empty?
      show do
        title "Gather The Following Materials"
        separator
        note "Gather the following and bring them to your bench:"
        empty_containers.each {|c|
          ((c.is_a? Item) || (c.is_a? Collection)) ? (check "#{c.object_type.name} and label as <b>#{c.id}</b>") : (check "#{c}")
        }
        new_materials.each {|m| check "#{m}" }
      end 
    end
    take take_items, interactive: true 
    Protocol.materials_list.concat(new_materials).concat(empty_containers)
  end
  
  # Allows for multiple key deeply nested hash[:item][:measurement][:day][:hour] = val
  def nested_hash_data_structure
    Hash.new { |hash, key| hash[key] = Hash.new(&hash.default_proc) }
  end
  
  def get_transfer_display_hash(ops:, input_str:, output_str:, dilution_str:)
    display_hash = nested_hash_data_structure
    ops.each do |op|
      out_fv = op.output(output_str)
      dilution_factor = get_dilution_factor(op: op, fv_str: dilution_str)
      media_vol_ul, cult_vol_ul = get_culture_and_media_vols(dilution_factor: dilution_factor, measurement_item: op.output(output_str).collection)
      dh = display_hash[out_fv.row][out_fv.column]
      dh[:dilution_factor] = dilution_factor
      dh[:item_id] = op.input(input_str).item.id
      dh[:media_vol_ul] = media_vol_ul
      dh[:cult_vol_ul] = cult_vol_ul
      create_part_association(collection: op.output(output_str).collection, key: :source, row: out_fv.row, col: out_fv.column, val: op.input(input_str).item.id)
    end
    display_hash
  end
  
  def tech_transfer_cultures(collection:, display_hash:)
    collection = collection_from(collection)
    show do
      title "Transfer Cultures to #{collection.object_type.name} #{collection}"
      separator
      note "Follow the table below to transfer the correct volume and culture to the appropriate well:"
      table highlight_alpha_non_empty(collection) {|r, c| "item_#{display_hash[r][c][:item_id]}\n#{display_hash[r][c][:cult_vol_ul]}#{MICROLITERS}" }
    end
  end
  
  def get_uninitialized_output_fv_object_type_id(op)
    AllowableFieldType.find(op.outputs[0].allowable_field_type_id).object_type_id
  end
  
  def get_uninitialized_output_object_type(op)
    oti = get_uninitialized_output_fv_object_type_id(op)
    ObjectType.find(oti)
  end
  
  # TODO: Make compataible with both statistics and matrix uploads
  # Takes in a csv upload file, extracts the information on it
  # into a datamatrix object which is returned.
  # Specificly tuned to the output file of the biotek plate reader.
  #
  # @param upload [Upload]  the object which can be resolved to calibration csv
  # @return [WellMatrix]  a WellMatrix holding the measurement for each well
  def extract_measurement_matrix_from_csv(upload:)
    table = parse_upload_csv(upload: upload)
    # dm = (table.length > 25) ? Array.new(8) { Array.new(12) {-1} } : Array.new(4) { Array.new(6) {-1} }
    dm =  Array.new(8) { Array.new(12) {-1} } 
    # If the file that is saved, exported, and uploaded was formatted as a 'Statistics' table
    table.each_with_index do |row, idx|
      next if idx.zero?
      well_coord = row[2]
      next if well_coord.nil?
      measurement = row[3].to_f
      next if measurement.nil?
      r, c = find_rc_from_alpha_coord(well_coord).first
      (dm[r][c]) ? dm[r][c] = measurement : -1
    end
    dm
  end
  
  def parse_upload_csv(upload:)
    require 'csv'
    require 'open-uri'
    table = []
    CSV.new(open(upload.expiring_url)).each { |line| table.push(line) }
    return table
  end

  # Finds where an alpha_coordinate is in a 96 Well plate
  #
  # @param alpha_coord [array or string] can be a single alpha_coordinate or a list of alpha_coordinate strings ie: 'A1' or ['A1','H7']
  # @return rc_list [Array] a list of [r,c] coordinates that describe where the alpha_coord(s) are in a 96 well matrix
  def find_rc_from_alpha_coord(alpha_coord)
    # look for where alpha coord is 2-D array coord
    coordinates_96 = ('A'..'H').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}} 
    rc_list = []
    if alpha_coord.instance_of? Array
      # alpha_coord = alpha_coord.map {|a| a.upcase}
      alpha_coord.each {|a_coord|
        (!a_coord.nil?) ? coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == a_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } } : next
      }
    else
      coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == alpha_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } }
    end
    return rc_list
  end
  
  def add_solution_to_op(op:, fv_str:, item:)
    if item.instance_of? Collection
      ot = item.object_type
    elsif item.instance_of? Item
      ot = ObjectType.find(item.object_type_id)
    end
    t = op.add_input(fv_str, item.sample, ot)
    op.input(fv_str).set item: item
  end
    
end # module PlateReaderHelper

library: {name: PlateReaderSoftware, category: High Throughput Culturing}
code_source:
# Eriberto Lopez
# elopez3@uw.edu
# 03/14/19

require 'date'

module AqUpload
  # Provides a upload button in a showblock in order to upload a single file
  #
  # @param upload_filename [string] can be the name of the file that you want tech to upload
  # @return up_show [hash] is the upload hash created in the upload show block
  # @return up_sym [symbol] is the symbol created in upload show block that will be used to access upload
  def upload_show(saving_dir:, upload_filename:)
    upload_var = "file"
    up_show = show do
      title "Upload Your Measurements"
      separator
      note "Select and Upload: #{saving_dir}/<b>#{upload_filename}</b>"
      upload var: upload_var.to_sym
    end
    return up_show, upload_var.to_sym
  end
  
  # Retrieves the upload object from upload show block
  #
  # @param up_show [hash] is the hash that is created in the upload show block
  # @param up_sym [symbol] is the symbol created in the upload show block and used to access file uploaded
  # @return upload [upload_object] is the file that was uploaded in the upload show block
  def get_upload_from_show(up_show:, up_sym:)
    (!up_show[up_sym].nil?) ? (upload = up_show[up_sym].map {|up_hash| Upload.find(up_hash[:id])}.shift) : nil #(show {warning "no upload was found".upcase})
  end
end

module KlavinsLabPlateReaderSoftware
  include AqUpload
  
  def setup_plate_reader_software_env(pr:, new_mtype:)
    open_software(pr: pr)
    new_mtype = select_measurement_type_template(pr: pr) if new_mtype
    preheat(pr: pr)
    return new_mtype
  end

  def take_measurement_and_upload_data(pr:)
    timepoint = read_plate(pr: pr)
    pr.measurement_data = export_save_and_upload_measurement_data(pr: pr, timepoint: timepoint)
  end

  def export_save_and_upload_measurement_data(pr:, timepoint:)
    sw = pr.software
    day = timepoint.strftime "%m%d%Y"
    hour = timepoint.strftime "%H%M"
    measurement_data = [] # Collect uploads for a measurement_item's measurement_type(s) ie: 'Optical Density & Green Fluorescence'
    export_measurement_types(pr: pr).each do |mt|
      measurement_filename = get_measurement_filename(measurement_item: pr.measurement_item, measurement_type: mt, timepoint: timepoint)
      show do
        title "Export & Save #{mt} Measurements Plate Reader"
        separator
        warning "Make sure that no other Excel sheets are open before exporting!".upcase
      end
      show do
        title "Export & Save #{mt} Measurements Plate Reader"
        separator
      # EXPORT
        image sw[:images][:export_new_data]
        bullet "Select the <b>'Statistics'</b> tab"
        bullet "Select Data: <b>#{sw[:export_mesurement_type][mt.to_sym][:dtype]}</b>"
        note "Next, click the Excel sheet export button. <b>The sheet will appear on the menu bar below</b>."
        image sw[:images][:export_data_button]
      # SAVE
        warning "Make sure to save file as a '.csv' file!!"
        note "Go to sheet and <b>'Save as'</b> ==> <b>#{measurement_filename}</b> under the <b>#{sw[:saving_directory]}</b> folder."
        image sw[:images][:save_export]
      end
      # UPLOAD
      attempt = 0
      up_show, up_sym = {}, nil #upload_show(saving_dir: sw[:saving_directory], upload_filename: measurement_filename)
      while ((up_show[up_sym].nil?) || (attempt == 3)) && (!debug) do
        up_show, up_sym = upload_show(saving_dir: sw[:saving_directory], upload_filename: measurement_filename)
        attempt+=1
      end
      upload = get_upload_from_show(up_show: up_show, up_sym: up_sym)
      upload_data = {
        mitem: pr.measurement_item,
        mt: mt.to_s.gsub(' ','_'),
        day: day,
        hour: hour,
        upload: upload
      }
      measurement_data.push(upload_data)
    end
    return measurement_data
  end

  def go_to_computer
    show {warning "<b>The next steps should be done on the plate reader computer</b>.".upcase}
  end
  
  def open_software(pr:)
    if (!pr.software_open)
      go_to_computer
      show do
        title "Open #{pr.type} Plate Reader Software"
        separator
        note "Click on the icon shown below to open the plate reader software:"
        image pr.software[:images][:open_software]
      end
    else
      log_info 'the software is already open!'.upcase
    end
    pr.software_open = true
  end
  
  def select_measurement_type_template(pr:)
    mt_template = pr.software[:measurement_type_templates][pr.measurement_type.to_sym]
    show do 
      title "Select #{pr.type} #{pr.measurement_type.to_s} Template"
      separator
      note "Under <b>'Create a New Item'</b> click <b>'Experiment'</b>"
      note "From the pop-up list select: <b>#{mt_template}</b>"
    end
    new_mtype = false
    return new_mtype # the measurement_type is no longer new and can be reaused if necessary
  end
  
  def preheat(pr:)
    show do 
      title "Warming Up..."
      separator
      note "Let the #{pr.type} Plate Reader warm up if necessary."
      note "In the following preparative steps, minimize the amount of time that the 
      <b>#{ObjectType.find(pr.experimental_item.object_type_id).name} #{pr.experimental_item}</b>
      is not under experimental conditions prior to the measurement."
    end 
  end
  
  def get_experiment_filename(pr:, timepoint:)
    "jid_#{jid}_experiment_#{pr.measurement_type}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '')
  end

  def read_plate(pr:)
    go_to_computer
    timepoint = Time.now
    show do 
      title "Take #{pr.measurement_type} Measurement"
      separator
      note "Click Read Plate icon shown below"
      image pr.software[:images][:read_plate]
      note "Next, click the <b>'READ'</b> on the pop-up window."
      bullet "Name experiment file: <b>#{get_experiment_filename(pr: pr, timepoint: timepoint)}</b>"
      bullet "<b>Save</b> it under the <b>#{pr.software[:saving_directory]}</b> folder."
      note "Finally, load plate #{pr.measurement_item} then, click <b>'OK'</b> to take measurement"
    end
    pr.measurement_item.location = pr.type.to_s
    return timepoint
  end
  
  def get_measurement_filename(measurement_item:, measurement_type:, timepoint:)
    mt = measurement_type.to_s.gsub(' ', '') 
    "jid_#{jid}_#{mt}_item_#{measurement_item.id}_t#{timepoint.strftime "%H%M"}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '_')
  end
  
  def export_measurement_types(pr:)
    mt = pr.measurement_type.to_s
    case mt
    when 'Optical Density', 'Time Series', 'Green Fluorescence'
      [mt]
    when 'Optical Density & Green Fluorescence'
      mt.split(' & ')
    when 'Calibration'
      ["#{mt} Optical Density", "#{mt} Green Fluorescence"]
    else
      raise "#{pr.measurement_type} is not supported by this plate reader or does not have the measurement_type added to the #{pr.type} software properties"
    end
  end
end # module Gen5BioTekSoftware

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object_types:
  - {name: 24-Well TC Dish, description: 24-Well TC Dish, handler: collection, data: {"growth_area": 1.9, "working_volume": 0.6, "max_well_vol_ul" : 3000}, unit: Well, release_method: return, rows: 4, columns: 6}
  - {name: 200 mL Liquid, description: 200 mL Bottle, handler: sample_container, data: { "samples": [ { "name": "SC", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "SDO", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "FCC", "materials": 0.08, "labor": 0.0705, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "LB", "materials": 0.01, "labor": 0.0155, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "YPAD", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "TB", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "TB + Amp", "materials": 0.02, "labor": 0.04, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "TB + Kan", "materials": 0.02, "labor": 0.04,"delete": false, "unit": "mL", "total_volume": 200 }, { "name": "1 M Lithium Acetate", "materials": 0.112, "labor": 0.075, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "0.2% SDS", "materials": 0.01, "labor": 0.01, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "50% Glycerol", "materials": 0.01, "labor": 0.02, "delete": false, "unit": "mL", "total_volume": 200 }, { "name": "50% PEG", "materials": 0.16, "labor": 0.0265, "delete": false, "unit": "mL", "total_volume": 200 } ] }, unit: 200 mL Bottle, release_method: return, release_description: purchasable, sample_type_name: Media}
  - {name: 400 mL Liquid, description: 400 mL Bottle, handler: sample_container, data: { "samples": [ { "name": "TB + Kan", "materials": 0.03, "labor": 0.03, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "SC", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "SDO", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "50% Glycerol", "materials": 0.01, "labor": 0.02, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "TB", "materials": 0.01, "labor": 0.028, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "TB + Amp", "materials": 0.023, "labor": 0.06, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "LB", "materials": 0.01, "labor": 0.016, "delete": false, "unit": "mL", "total_volume": 400 }, { "name": "YPAD", "materials": 0.01, "labor": 0.025, "delete": false, "unit": "mL", "total_volume": 400 } ] }, unit: Media, release_method: return, sample_type_name: Media}
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operation_type: Collection PR Measurement
category: Plate Reader
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Culture Plate, object_types: [96 Well Flat Bottom (black), 24-Well TC Dish, 24 Deep Well Plate, 96 U-bottom Well Plate], routing: PR}
  - {ftype: sample, role: input, name: Media, sample_types: [Media, Media, Media], object_types: [200 mL Liquid, 400 mL Liquid, 800 mL Liquid], routing: M}
  - {ftype: string, role: input, name: Type of Measurement(s), choices: Optical Density,Green Fluorescence,Optical Density & Green Fluorescence,}
  - {ftype: string, role: input, name: Dilution, choices: None,0.5X, 0.2X,0.1X, 0.01X,0.001X}
  - {ftype: string, role: input, name: Keep Output Plate?, choices: Yes,No}
  - {ftype: number, role: input, name: When to Measure? (24hr)}
  - {ftype: sample, role: output, name: Plate Reader Plate, object_types: [96 Well Flat Bottom (black), 24-Well TC Dish], routing: PR}
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protocol:
# By: Eriberto Lopez 03/13/19
# elopez3@uw.edu

# needs "Plate Reader/ExperimentalMeasurement"
needs "Plate Reader/PlateReaderHelper"

class Protocol
  include PlateReaderHelper
  
  # DEF
  INPUT            = "Culture Plate"
  OUTPUT           = "Plate Reader Plate"
  MEDIA            = 'Media'
  DILUTION         = "Dilution"
  KEEP_OUT_PLT     = "Keep Output Plate?"
  MEASUREMENT_TYPE = 'Type of Measurement(s)'
  WHEN_TO_MEASURE  = "When to Measure? (24hr)"
  
  # Access class variables via Protocol.your_class_method
  @@materials_list = []
  def self.materials_list; @@materials_list; end
  
  # TODO: Get time series measurements online
  def intro
    plate_reader = PlateReader.new
    show do
      title "Plate Reader Measurements"
      separator
      note "This protocol will instruct you on how to take measurements on the #{plate_reader.type} Plate Reader."
      note "Optical Density is a quick and easy way to measure the growth rate of your cultures."
      note "Green Fluorescence helps researchers assess a response to a biological condition <i>in vivo</i>."
      note "<b>1.</b> Setup #{plate_reader.type} Plate Reader Software workspace."
      note "<b>2.</b> Check to see if input item is a #{plate_reader.valid_containers} if not, transfer samples to a valid container."
      note "<b>3.</b> Prepare measurement item with blanks."
      note "<b>4.</b>Take measurement, export data, & upload."
    end
    return plate_reader
  end

  def main
    pr = intro
    get_plate_reader_software(plate_reader: pr)
    operations.group_by {|op| op.input(MEASUREMENT_TYPE).val.to_sym}.each do |measurement_type, ops|
      new_mtype = true
      pr.measurement_type = measurement_type
      ops.each do |op|
        # Use class PlateReader to setup the experimental measurement
        pr.setup_experimental_measurement(experimental_item: op.input(INPUT).item, output_fv: op.output(OUTPUT))
        new_mtype = setup_plate_reader_software_env(pr: pr, new_mtype: new_mtype)
        # Gather materials and items
        media_item = get_media_bottle(op)
        take_items = [media_item].concat([pr.experimental_item].flatten)
        gather_materials(empty_containers: [pr.measurement_item], transfer_required: pr.transfer_required, new_materials: ['P1000 Multichannel'], take_items: take_items)
        # Prepare plate for plate reader
        dilution_factor = get_dilution_factor(op: op, fv_str: DILUTION)
        media_vol_ul, culture_vol_ul = get_culture_and_media_vols(dilution_factor: dilution_factor, measurement_item: pr.measurement_item)
        (pr.transfer_required) ? tech_prefill_and_transfer(pr: pr, media_sample: media_item.sample, media_vol_ul: media_vol_ul, culture_vol_ul: culture_vol_ul) : op.pass(INPUT, OUTPUT)
        tech_add_blanks(pr: pr, blanking_sample: media_item.sample, culture_vol_ul: culture_vol_ul, media_vol_ul: media_vol_ul) # Cannot handle a plate without blanks, esp in processing of upload
        take_measurement_and_upload_data(pr: pr)
        process_and_associate_data(pr: pr,  ops: [op], blanking_sample: media_item.sample, dilution_factor: dilution_factor)
        # Keep new measurement plate that was created?
        (pr.transfer_required) ? (keep_transfer_plate(pr: pr, user_val: get_parameter(op: op, fv_str: KEEP_OUT_PLT).to_s.upcase)) : (pr.measurement_item.location = 'Bench')
      end
    end
    cleaning_up(pr: pr)
  end # Main
  

end # Protocol

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operation_type: Create Experimental Plate
category: Plate Reader
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: output, name: 96 Well Plate, object_types: [96 U-bottom Well Plate, 96 Well Flat Bottom (black)], routing: Plate}
  - {ftype: string, role: input, name: Note:}
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protocol:
# By: Eriberto Lopez
# elopez3@uw.edu

# This protocol is for creating a 96 well plate that can then be linked to 'Plate Reader Measurement'

class Protocol
    OUTPUT = '96 Well Plate'
    NOTE = 'Note:'
    # SAMPLE_MATRIX = 'Do you know what samples are in each well?'
  def main

    operations.make
    
    operations.each {|op|
        new_experimental_plt = op.output(OUTPUT).collection
        note = op.input(NOTE).val.to_s
        if note != '' || note != nil || note != ' '
            note_entered = true
            key = 'Note'
            Item.find(new_experimental_plt.id).associate key.to_sym, note
        end
        show {
            title "New Experimental Plate Created"
            separator
            note "Output Item: <b>#{new_experimental_plt}</b>"
            bullet "Output Object Type: <b>#{new_experimental_plt.object_type.name}</b>"
            (note_entered) ? (bullet "Note: <b>#{note}</b>") : nil
        }
    }
    
    return {}
    
  end # Main
end # Class


    # associate_to_item(in_collection, key, upload)
    # associate_to_plans(key, upload)
    # associate_PlateReader_Data(upload, cal_plate, method, timepoint=nil)

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object_types:
  - {name: Yeast 250ml culture, description: high-volume yeast culture, handler: sample_container, unit: Yeast Strain, release_method: return, sample_type_name: Yeast Strain}
  - {name: Yeast 100ml culture, description: Culture for making a high volume of comp cells, handler: sample_container, unit: Yeast Strain, release_method: return, sample_type_name: Yeast Strain}
  - {name: Yeast 50ml culture, description: Culture for making comp cells, handler: sample_container, unit: Yeast Strain, release_method: dispose, sample_type_name: Yeast Strain}
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operation_type: Cultures PR Measurement
category: Plate Reader
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Cultures, sample_types: [Yeast Strain, Yeast Strain, Yeast Strain, Yeast Strain], object_types: [Yeast Overnight Suspension, Yeast 250ml culture, Yeast 100ml culture, Yeast 50ml culture], routing: PR}
  - {ftype: sample, role: input, name: Media, sample_types: [Media, Media, Media], object_types: [200 mL Liquid, 400 mL Liquid, 800 mL Liquid], routing: M}
  - {ftype: string, role: input, name: Type of Measurement(s), choices: Optical Density,Green Fluorescence,Optical Density & Green Fluorescence}
  - {ftype: string, role: input, name: Dilution, choices: None,0.5X,0.2X,0.1X, 0.01X,0.001X}
  - {ftype: string, role: input, name: Batch?, choices: Yes}
  - {ftype: number, role: input, name: When to Measure? (24hr)}
  - {ftype: string, role: input, name: Keep Output Plate?, choices: Yes,No}
  - {ftype: sample, role: output, name: Plate Reader Plate, sample_types: [Yeast Strain], object_types: [96 Well Flat Bottom (black)], part: true, routing: PR}
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protocol:
# By: Eriberto Lopez 03/14/19
# elopez3@uw.edu
needs "Plate Reader/PlateReaderHelper"
class Protocol
  include PlateReaderHelper
  # DEF
  INPUT            = "Cultures"
  OUTPUT           = "Plate Reader Plate"
  BATCH            = "Batch?"
  MEDIA            = 'Media'
  DILUTION         = "Dilution"
  KEEP_OUT_PLT     = "Keep Output Plate?"
  MEASUREMENT_TYPE = 'Type of Measurement(s)'
  WHEN_TO_MEASURE  = "When to Measure? (24hr)"
  # Access class variables via Protocol.your_class_method
  @@materials_list = []
  def self.materials_list; @@materials_list; end
  
  # TODO: Get time series measurements online
  def main
    pr = intro
    operations.group_by {|op| get_parameter(op: op, fv_str: MEASUREMENT_TYPE).to_sym}.each do |measurement_type, ops|
      new_mtype = true
      pr.measurement_type = measurement_type
      ops.group_by {|op| op.input(INPUT).sample.sample_type}.each do |st, ops|
        ops.group_by {|op| op.input(MEDIA).item}.each do |media_item, ops|
          ops.group_by {|op| get_uninitialized_output_object_type(op)}.each do |out_ot, ops|
            ops.make
            ops.group_by {|op| op.output(OUTPUT).collection}.each do |out_collection, ops|
              pr.setup_experimental_measurement(experimental_item: out_collection, output_fv: nil)
              new_mtype = setup_plate_reader_software_env(pr: pr, new_mtype: new_mtype)
              # Gather materials and items
              take_items = [media_item].concat([pr.experimental_item].flatten)
              gather_materials(empty_containers: [pr.measurement_item], transfer_required: pr.transfer_required, new_materials: ['P1000 Multichannel'], take_items: take_items)
              # Prep plate
              display_hash = get_transfer_display_hash(ops: ops, input_str: INPUT, output_str: OUTPUT, dilution_str: DILUTION)
              prefill_plate_w_media(collection: pr.measurement_item, media_sample: media_item.sample, media_vol_ul: nil, display_hash: display_hash) # media_vol_ul must be > 0 to run show block
              take ops.map {|op| op.input(INPUT).item}, interactive: true
              tech_transfer_cultures(collection: pr.measurement_item, display_hash: display_hash)
              tech_add_blanks(pr: pr, blanking_sample: media_item.sample, culture_vol_ul: 0.0, media_vol_ul: 300.0) # Cannot handle a plate without blanks, esp in processing of upload
              
              take_measurement_and_upload_data(pr: pr)
              
              dilution_factor_arr = ops.map {|op| get_dilution_factor(op: op, fv_str: DILUTION)}
              
              process_and_associate_data(pr: pr,  ops: ops, blanking_sample: media_item.sample, dilution_factor: dilution_factor_arr)
            end
            keep_p_arr = ops.select {|op| op.input(KEEP_OUT_PLT).val.to_s.downcase == 'yes'}
            (keep_p_arr.empty?) ? pr.measurement_item.mark_as_deleted : pr.measurement_item.location = 'Bench'
          end
        end
      end
    end
    cleaning_up(pr: pr)
  end # main
end # Protocol

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operation_type: PR Calibration
category: Plate Reader
deployed: false
on_the_fly: false
field_types:
  - {ftype: sample, role: input, name: Optical Particles, sample_types: [Plate Reader Calibration Solution], object_types: [1X LUDOX Aliquot], routing: OP}
  - {ftype: sample, role: input, name: Fluorescent Salt, sample_types: [Plate Reader Calibration Solution], object_types: [1mM Fluorescein Stock], routing: FS}
  - {ftype: sample, role: output, name: Calibration Plate, object_types: [96 Well Flat Bottom (black)], routing: PR}
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protocol:
# By: Eriberto Lopez 03/14/19
# elopez3@uw.edu

needs "Plate Reader/PlateReaderHelper"
class Protocol
  include PlateReaderHelper
  
  # DEF
  OD_CALIBRATION = "Optical Particles"
  FLOUR_CALIBRATION = "Fluorescent Salt"
  OUTPUT = "Calibration Plate"
  
  # Access class variables via Protocol.your_class_method
  @@materials_list = []
  def self.materials_list; @@materials_list; end
  
  def main # Typically one calibration op per Plan
    pr = intro
    new_mtype = true
    pr.measurement_type = 'Calibration'
    operations.group_by {|op| op.input(FLOUR_CALIBRATION).item}.each do |flour_item, ops|
      ops.group_by {|op| op.input(OD_CALIBRATION).item}.each do |optical_item, ops|
        # Based on whether an unexpired calibration plate is made, prepare a calibration plate for measurement
        new_mtype = prep_calibration_plate(pr, ops, OUTPUT, flour_item, optical_item)
        take_measurement_and_upload_data(pr: pr)
        process_and_associate_data(pr: pr,  ops: ops) 
        change_item_location(item: pr.measurement_item, location: "4#{DEGREES_C} Fridge")
      end
    end
    cleaning_up(pr: pr)
  end # Main
end # Protocol

library: {name: ExperimentalMeasurement, category: Plate Reader}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu
# 03/13/19

needs "Plate Reader/PlateReaderConstants" 
needs "Standard Libs/AssociationManagement"

module ExperimentalMeasurement
  attr_accessor :measurement_type, :experimental_item, :measurement_item, :transfer_required, :measurement_data
  def setup_experimental_measurement(experimental_item:, output_fv:)
    @experimental_item = experimental_item
    transfer?(output_fv: output_fv)
  end
  
  def transfer?(output_fv:)
    if transfer_needed
      output_fv.make
      measurement_item = output_fv.item
    else
      measurement_item = experimental_item
    end
    @measurement_item = measurement_item
  end
  
  def transfer_needed
    @transfer_required = !valid_container?
  end
  
end

# Can this be used to represent composite wells?
class Struct 
  def self.hash_initialized *params
    klass = Class.new(self.new(*params))

    klass.class_eval do
      define_method(:initialize) do |h|
        super(*h.values_at(*params))
      end
    end
    klass
  end
end

# module HasProperties
#   attr_accessor :props

#   def self.included base
#     base.extend self
#   end
  
#   def has_properties(*args)
#     @props = args
#     instance_eval { attr_accessor *args }
#   end
  
#   def initialize(args={})
#     args.each {|k,v|
#       instance_variable_set "@#{k}", v if self.class.props.member?(k)
#     } if args.is_a? Hash
#   end
# end

library: {name: PlateReaderCalibration, category: Plate Reader}
code_source:
module PlateReaderCalibration
  include Units, Debug, AssociationManagement
  # Constants
  DILUTANT_VOL = 100 # Final vol that each flourescence cal well will have
  FLOUR_ALIQUOT_CONC = 50#uM # The starting concentration of the flour std curve

  def prep_calibration_plate(pr, ops, out_fv_str, flour_item, optical_item)
    new_mtype = true  
    create_a_new_cal_plt, reusable_plate_item = check_for_reusable_plate(ops.running.map {|op| op.operation_type}.uniq.first)
    create_a_new_cal_plt ? ops.make : reusable_plate_item
    additional_solutions = create_a_new_cal_plt ? [get_pbs_item, get_water_item] : []
    ops.each do |op|
      create_a_new_cal_plt ? op.output(out_fv_str).item : op.output(out_fv_str).set(opts={item: reusable_plate_item})
      pr.setup_experimental_measurement(experimental_item: op.output(out_fv_str).item, output_fv: op.output(out_fv_str))
      new_mtype = setup_plate_reader_software_env(pr: pr, new_mtype: new_mtype)
      # Materials based on whether a new calibration plate will be filled
      take_items       = create_a_new_cal_plt ? [flour_item, optical_item].concat(additional_solutions) : [pr.measurement_item]
      new_materials    = create_a_new_cal_plt ? ['P1000 Multichannel', 'P200 Pipette'] : ['P20 Multichannel']
      empty_containers = create_a_new_cal_plt ? [pr.measurement_item] : []
      gather_materials(empty_containers: empty_containers, new_materials: new_materials, take_items: take_items)
      if create_a_new_cal_plt # then fill empty container and add inputs to op
        tech_fill_calibration_plate(calibration_plate: pr.measurement_item, water_item: get_water_item, flour_item: flour_item, optical_item: optical_item)
        additional_solutions.each {|item| add_solution_to_op(op: op, fv_str: "#{item.sample.name} Aliquot", item: item) }
        op.operation_type.associate(:calibration_plate, {date_created: todays_date, item_id: pr.measurement_item.id})
      else # reuse the unexpired calibration plate
        equilibrate_calibration_plate(op: op, calibration_solutions: calibration_solutions)
      end
    end
    return new_mtype
  end
  
  def check_for_reusable_plate(op_type)
    create_a_new_cal_plt = true
    calibration_plate = nil # if the plate is less than a month old use the cal plate
    op_type.data_associations.select {|da| da[:key] == :calibration_plate }.map do |da|
      key, ot_obj = da[:key], da[:object]
      obj = ot_obj[key]
      date_created, present, plus_month = obj[:date_created], todays_date, [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
      plus_month[0] = plus_month[0] + 1
      date_created = [date_created[0..1], date_created[2..3], date_created[4..7]].map {|i| i.to_i}
      if date_created[0] == plus_month[0] # Checking month
        if plus_month[1] >= date_created[1] # Checking day
          create_a_new_cal_plt = true
          expired_plate = Item.find(obj[:item_id])
          show {check "Before creating a new Calibration plate, throw away the expired plate #{expired_plate} found at #{expired_plate.location}"}
          expired_plate.mark_as_deleted
        else
          calibration_plate = Item.find(obj[:item_id])
          create_a_new_cal_plt = false
        end
      else
        calibration_plate = Item.find(obj[:item_id])
        create_a_new_cal_plt = false
      end
    end
    return create_a_new_cal_plt, calibration_plate
  end
  
  def equilibrate_calibration_plate(op:, calibration_solutions:)
    plate = op.outputs[0].collection
    cs_wells = get_calibration_solution_wells(calibration_solutions: calibration_solutions, collection: plate)
    show do
      title "Equilibrating Calibration Plate #{plate}"
      separator
      check "Let the #{plate} plate sit at room temperature (25#{DEGREES_C}) for 10 minutes to avoid condensation skewing the calibration."
      note "<b>After the timer is up:</b>"
      note "Using a multichannel pipette, resuspend the highlighted wells:"  
      table highlight_alpha_rc(collection_from(plate), cs_wells[op.input("Optical Particles").sample.name])
      check "Use a kimwipe to remove condensation from the top and bottom of the plate."
    end
  end
  
  def get_calibration_solution_wells(calibration_solutions:, collection:)
    cs_wells = {}
    calibration_solutions.map {|i| cs_wells[i.sample.name] = get_sample_wells(collection: collection, sample: i.sample) }
    return cs_wells
  end

  def get_pbs_item
    get_pbs_sample.items.select {|i| i.location != 'deleted' }[0]
  end
  
  def get_pbs_sample
    Sample.find_by_name('PBS')
  end
  
  def get_water_item
    get_water_sample.items.select {|i| i.location != 'deleted' }[0]
  end
  
  def get_water_sample
    h2o_type = "Nuclease-free water" # Change in Production Aq to Mol grade H2O
    h2o_samp = Sample.find_by_name(h2o_type)
  end
  
  def get_stock_solution_concentration(ot:)
    name = ot.name.split(' ')[0]
    units = name[-2..-1]
    stock_conc = name.match /(?<conc>\d+)/
    return stock_conc[:conc].to_i, units
  end
    
  def dilute_flourescence_item(flour_item:)
    flour_ot = ObjectType.find(flour_item.object_type_id)
    conc, units = get_stock_solution_concentration(ot: flour_ot)
    case units
    when MILLIMOLAR
      dilution_factor = ((conc*1000) / FLOUR_ALIQUOT_CONC)
    when MICROMOLAR
      dilution_factor = (conc*100)/FLOUR_ALIQUOT_CONC
    else
      raise "The current flourescence #{flour_ot} does not contain information about the concentration. 
      please create a new container that will have a name with the concentraiton of the reagent".upcase
    end
    flour_stk_vol = 1000/dilution_factor
    pbs_vol = 1000 - flour_stk_vol
    show do
      title "Dilute #{flour_item} #{flour_item.sample.name}"
      separator
      note "Vortex item #{flour_item.id} #{flour_ot.name} and make sure there are no precipitates."
      check "In a fresh 1.5mL Eppendorf tube, dilute #{flour_stk_vol}#{MICROLITERS} of  #{flour_ot.name} into #{pbs_vol}#{MICROLITERS} of 1X PBS - Final Concentration [#{FLOUR_ALIQUOT_CONC}#{MICROMOLAR}]"
      note "Make sure to vortex."
    end
  end
  
  def set_calibration_plate_sample_matrix(calibration_plate:, flour_item:, water_item:, optical_item:)
    calibration_plate = collection_from(calibration_plate)
    rows, cols = calibration_plate.object_type.rows, calibration_plate.object_type.columns
    new_matrix = Array.new(rows) { Array.new(cols) { -1 } }
    rows.times do |r|
     cols.times do |c|
        if r < 4
         new_matrix[r][c] = flour_item.sample.id 
        elsif r == 4
         new_matrix[r][c] = optical_item.sample.id
        elsif r == 5
          new_matrix[r][c] = water_item.sample.id
        end
      end
    end
    calibration_plate.matrix = new_matrix
    calibration_plate.save
    return calibration_plate
  end
  
  def tech_fill_calibration_plate(calibration_plate:, flour_item:, water_item:, optical_item:)
    dilute_flourescence_item(flour_item: flour_item)
    set_calibration_plate_sample_matrix(calibration_plate: calibration_plate, flour_item: flour_item, water_item: water_item, optical_item: optical_item)
    flourescence_serial_dilution(calibration_plate: calibration_plate, flour_item: flour_item)
    [optical_item, water_item].each {|i| fill_calibration_plate_with_optical_solution(calibration_plate: calibration_plate, solution_item: i)}
    # Create associations if a new calibration plate is made and filled
    associate_data(object=calibration_plate, key="calibration_plate", data = {date_created: todays_date}, opts = {})
  end
  
  def flourescence_serial_dilution(calibration_plate:, flour_item:) # iGEM Protocol 2018
    dilutant_wells = collection_from(calibration_plate).select {|well| well == flour_item.sample.id }.select {|r,c| c != 0}
    # direct tech to fill new calibration plate
    show do
      title "Creating a New #{calibration_plate} Calibration Plate"
      separator
      note "You will need <b>#{(dilutant_wells.length * 0.1) + 0.1}mL</b> of 1X PBS for the next step."
      note "Follow the table below to dispense 1X PBS in the appropriate wells:"
      table highlight_rc(calibration_plate, dilutant_wells) {|r,c| "#{DILUTANT_VOL}#{MICROLITERS}"}
    end
    flour_serial_image = "Actions/Yeast_Gates/plateReaderImages/flour_serial_dilution.png"
    show do
      title "Serial Dilution of #{flour_item} #{flour_item.sample.name}"
      separator
      note "From the #{FLOUR_ALIQUOT_CONC}#{MICROMOLAR} #{flour_item.sample.name} solution, dispense <b>#{DILUTANT_VOL+DILUTANT_VOL}#{MICROLITERS}</b> in wells <b>A1, B1, C1, D1</b>"
      note "Following the image below, transfer <b>#{DILUTANT_VOL}#{MICROLITERS}</b> of #{FLOUR_ALIQUOT_CONC}#{MICROMOLAR} #{flour_item.sample.name} solution in Column 1 to Column 2"
      note "Resuspend by pipetting up and down 3X"
      note "Repeat until column 11 and discard the remaining <b>#{DILUTANT_VOL}#{MICROLITERS}</b>."
      image flour_serial_image
    end
  end
  
  def fill_calibration_plate_with_optical_solution(calibration_plate:, solution_item:)
    plate = collection_from(calibration_plate)
    rc_list = plate.select {|well| well == solution_item.sample.id}
    show do
      title "Filling #{calibration_plate} Calibration Plate"
      separator
      note "Follow the table below to dispense <b>#{solution_item.sample.name}</b> into the appropriate wells."
      table highlight_rc(plate, rc_list) {|r,c| optical_solution_vol(r, c)}
    end
  end
  
  def optical_solution_vol(row, col)
    if col < 4
      return "#{100}#{MICROLITERS}"
    elsif col.between?(4, 7)
      return "#{200}#{MICROLITERS}"
    else col.between?(7, 11)
      return "#{300}#{MICROLITERS}"
    end
  end
    
  def todays_date
    DateTime.now.strftime("%m%d%Y")
  end
  # The plotted result of this method can be fit to a curve
  # to be used for calibrating the plate reader. This is very specific to the
  # Eriberto's calibration of the biotek plate reader.
  #
  # @param upload [Upload]  the object whihc can be resolved to calibration csv
  # @return [Hash]  a hash containing averaged measurements for
  #  					every concentration and volume tested
  #
  #
  #
  # New Description needed - some refactoring may be necessary, but works! 
  def get_calibration_hash(dm:, measurement_type:)
    result = {}
    data_by_conc = Hash.new { |h, key| h[key] = [0, 0] }
    case measurement_type
    when :Calibration_Green_Fluorescence
      starting_concentration = 50.0#uM
      # first 4 rows are serial dilutions
      for i in 0...4
        12.times do |j|
          if j == 11
            this_conc = 0
          else
            # each column is a 2x dilution of the previous, starting at 50uM
            this_conc = starting_concentration / (2**j)
          end
          data = data_by_conc[this_conc]
          data[0] += dm[i][j].to_f
          data[1] += 1
          data_by_conc[this_conc] = data
        end
      end
      # add serial dilution averages to result hash
      data_by_conc.each_key do |k|
        data = data_by_conc[k]
        result[k] = data[0] / data[1]
      end
    when :Calibration_Optical_Density
      # row 5, 6 are lud dilutions and pure solution respectively
      for i in 4...6
        for j in 0...4
          data_by_conc["100_#{i}"][0] += dm[i][j].to_f
          data_by_conc["100_#{i}"][1] += 1
        end
        for j in 4...8
          data_by_conc["200_#{i}"][0] += dm[i][j].to_f
          data_by_conc["200_#{i}"][1] += 1
        end
        for j in 8...12
          data_by_conc["300_#{i}"][0] += dm[i][j].to_f
          data_by_conc["300_#{i}"][1] += 1
        end
      end
      # add lud averages to result hash
      for i in 1..3
        lud_avg = data_by_conc["#{i}00_4"][0] / data_by_conc["#{i}00_4"][1]
        sol_avg = data_by_conc["#{i}00_5"][0] / data_by_conc["#{i}00_5"][1]
        result["#{i}00"] = (lud_avg - sol_avg).round(5) # Returns blanked averages
      end
    end
    return result
  end
  
  # This function creates a standard curve from the flourocein calibration plate
  #
  # @params coordinates [hash or 2D-Array] can be a hash or [[x,y],..] where x is known concentration & y is measurement of flouroscence
  #
  # @returns slope [float] float representing the slope of the regressional line
  # @returns yint [float] float representing where the line intercepts the y-axis
  # @returns x_arr [Array] a 1D array for all x coords
  # @returns y_arr [Array] a 1D arrya for all y coords
  def standard_curve(coordinates:)
    # Calculating Std Curve for GFP
    num_of_pts, a, x_sum, y_sum, x_sq_sum = 0, 0, 0, 0, 0
    x_arr, y_arr = [], []
    coordinates.each do |x, y|
      if x < 25 # Above 25uM is out of linear range of our instrument
        a += (x*y)
        x_sum += x
        x_sq_sum += (x**2)
        y_sum += y
        x_arr.push(x)
        y_arr.push(y)
        num_of_pts += 1
      end
    end
    a *= num_of_pts
    b = x_sum * y_sum
    c = num_of_pts * x_sq_sum
    d = x_sum**2
    slope = (a - b)/(c - d)
    f = slope * (x_sum)
    yint = (y_sum - f)/num_of_pts
    # show{note "y = #{(slope).round(2)}x + #{(yint).round(2)}"}
    return (slope).round(3), (yint).round(3), x_arr, y_arr
  end  
  
  # This function calculates how much deviation points are from a regressional line - R-squared Value 
  # The closer it is to 1 or -1 the less deviation theres is
  #
  # @params slope [float] float representing the slope of the regressional line
  # @params yint [float] float representing where the line intercepts the y-axis
  # @params x_arr [Array] a 1D array for all x coords
  # @params y_arr [Array] a 1D arrya for all y coords
  #
  # @returns rsq_val [float] float representing the R-squared Value
  def r_squared_val(slope, yint, x_arr, y_arr)
    y_mean = y_arr.sum/y_arr.length.to_f
    # Deviation of y coordinate from the y_mean
    y_mean_devs = y_arr.map {|y| (y - y_mean)**2}
    dist_mean = y_mean_devs.sum # the sq distance from the mean
    # Finding y-hat using regression line
    y_estimate_vals = x_arr.map {|x| (slope * x) + yint }
    # Deviation of y-hat values from the y_mean
    y_estimate_dev = y_estimate_vals.map {|y| (y - y_mean)**2}
    dist_regres = y_estimate_dev.sum # the sq distance from regress. line
    rsq_val = (dist_regres/dist_mean).round(4)
    return rsq_val
  end
  
  def get_trendline_equation(coordinates_hash:)
    slope, yint, x_arr, y_arr = standard_curve(coordinates: coordinates_hash)
    r_sq = r_squared_val(slope, yint, x_arr, y_arr)
    trendline = "y = #{slope}x + #{yint}  (R^2 = #{r_sq})"
    return trendline
  end
  
  # This fuction uses a reference od600 measurement to calculate the correction factor for different vols (100ul, 200, 300)
  # 
  # @params hash [hash] is the hash of averaged blanked LUDOX samples at different volumes
  # @returns correction_val_hash [hash] is the hash containing the correction factor for the optical density (600nm) for this experiment
  def optical_correction_factors(hash)
    ref_od600 = 0.0425 #Taken from iGEM protocol - is the ref val of another spectrophotometer
    # ref/corrected vals
    correction_val_hash = Hash.new()
    hash.each do |vol, ave|
      correction_val_hash[vol[3..6]] = (ref_od600/ave).round(4)
    end
    return correction_val_hash
  end

  def get_calibration_calculated_values(cal_hash:, measurement_type:)
    case measurement_type
    when :Calibration_Green_Fluorescence
      return get_trendline_equation(coordinates_hash: cal_hash)
    when :Calibration_Optical_Density
      return optical_correction_factors(cal_hash)
    else
      raise "this #{measurement_type} measurement type is not recognized as a calibration measurement"
    end
  end
  
end # module PlateReaderCalibration

library: {name: PlateReaderConstants, category: Plate Reader}
code_source:
# By: Eriberto Lopez
# elopez3@uw.edu
# 03/13/19

# Change LAB_NAME to use different plate reader constants
LAB_NAME = 'Klavins Lab'.to_sym
YOUR_LAB_NAME = 'YOUR_LAB_HERE'.to_sym
PLATE_READER_TYPE = {'Klavins Lab':'Gen 5 BioTek'.to_sym,'YOUR_LAB_HERE':'YOUR_PLATE_READER_TYPE'.to_sym}


MY_PLATE_READER_PROPERTIES = {
  'Klavins Lab': {
    'Gen 5 BioTek': {
      software_properties: {
        images: {
          open_software: "Actions/Yeast_Gates/plateReaderImages/open_biotek.PNG",
          read_plate: "Actions/Yeast_Gates/plateReaderImages/begin_plate_reader.PNG",
          export_new_data: "Actions/Yeast_Gates/plateReaderImages/exporting_data_new.GIF",
          export_data_button: "Actions/Yeast_Gates/plateReaderImages/excel_export_button_new.png",
          save_export: "Actions/Yeast_Gates/plateReaderImages/saving_export_csv_new.png"
        },
        export_mesurement_type: { 
            "Optical Density":    {dtype: 'Read 1:600'},           # Change the template to not blank the measurement data uploaded and exported
            "Green Fluorescence": {dtype: 'Read 2:485/20,516/20'},                   ## Since we are not sure where the blank samples will be, we can use Aq to determine the OD of the 
            'Calibration Optical Density':    {dtype: 'Read 1:600'},                 ## blanking sample used and then use that to process the data when associating raw and true part item associations
            'Calibration Green Fluorescence': {dtype: 'Read 2:485/20,516/20'}
          },
        measurement_type_templates: {
          'Optical Density':'OD600_GFP_measurement',
          'Green Fluorescence':'OD600_GFP_measurement',
          'Optical Density & Green Fluorescence':'OD600_GFP_measurement',
          'Calibration':'calibration_template_v1',
          'Time Series':'create a new timeseries template'.upcase
        },
        saving_directory: 'FIND_OUT_THE_PATH/_UWBIOFAB'
      },
    valid_containers: ['96 Well Flat Bottom (black)', '24-Well TC Dish'],
    },
  },
  
  'YOUR_LAB_HERE':{
    'YOUR_PLATE_READER_TYPE':{ 
      software_steps: 'properties', 
      valid_containers: ['96 Well Flat Bottom (black)', '24-Well TC Dish'], 
    },
    saving_directory: 'SAVING_DIRECTORY'
  }
}

library: {name: PlateReaderHelper, category: Plate Reader}
code_source:
# Eriberto Lopez
# elopez3@uw.edu
# 07/23/19

needs "Standard Libs/Debug"
needs "Standard Libs/Units"
needs "Standard Libs/AssociationManagement"
needs "Plate Reader/ExperimentalMeasurement"
needs "Plate Reader/PlateReaderSoftware"
needs "Plate Reader/PlateReaderConstants"
needs "Plate Reader/PlateReaderCalibration"
needs "Collection Management/CollectionDisplay"

class PlateReader 
  include ExperimentalMeasurement
  attr_accessor :software_open
  attr_reader :type, :valid_containers, :software
  def initialize()
    @type             = get_my_plate_reader_type
    @valid_containers = valid_containers
    @software         = get_my_software_properties
    @software_open    = false
  end
  
  def get_my_plate_reader_type
    PLATE_READER_TYPE[LAB_NAME]
  end

  def valid_containers
    get_my_plate_reader_properties_obj[type][:valid_containers]
  end
  
  def get_my_plate_reader_properties_obj
    MY_PLATE_READER_PROPERTIES[LAB_NAME]
  end
  
  def get_my_software_properties
    get_my_plate_reader_properties_obj[type][:software_properties]
  end
  
  def valid_container?
    if experimental_item.instance_of? Collection
      valid_containers.include? experimental_item.object_type.name.to_s
    elsif experimental_item.instance_of? Item
      valid_containers.map {|c| ObjectType.find_by_name(c).id.to_i}.include? experimental_item.object_type_id.to_i
    elsif experimental_item.instance_of? Array
      valid_container = false
      ot_arr = ObjectType.find(experimental_item.map {|item| item.object_type_id}.uniq).map {|ot| ot.name}
      ot_arr.each {|otn| (valid_containers.include? otn) ? (valid_container = true) : (valid_container) }
      valid_container
    else
      raise "This type of #{experimental_item.class} object is not compatible with this instrument"
    end
  end
end # Class PlateReader  

module PlateReaderHelper
  include Units, Debug, AssociationManagement
  include CollectionDisplay
  include PlateReaderCalibration
  
  def intro
    plate_reader = PlateReader.new
    show do
      title "Plate Reader Measurements"
      separator
      note "This protocol will instruct you on how to take measurements on the #{plate_reader.type} Plate Reader."
      note "Optical Density is a quick and easy way to measure the growth rate of your cultures."
      note "Green Fluorescence helps researchers assess a response to a biological condition <i>in vivo</i>."
      note "<b>1.</b> Setup #{plate_reader.type} Plate Reader Software workspace."
      note "<b>2.</b> Check to see if input item is a #{plate_reader.valid_containers} if not, transfer samples to a valid container."
      note "<b>3.</b> Prepare measurement item with blanks."
      note "<b>4.</b> Take measurement, export data, & upload."
    end
    get_plate_reader_software(plate_reader: plate_reader)
    return plate_reader
  end
  
  # when PlateReaderHelper is included into class Protocol we can use the class method .include() 
  # to include the required software module dynamically to the Protocol. 
  # Which allows us to use methods found in the software module.
  def get_plate_reader_software(plate_reader:)
    case plate_reader.type
    when 'Gen 5 BioTek'.to_sym
      Protocol.include(KlavinsLabPlateReaderSoftware)
    when 'YOUR_LABS_PLATE_READER_MODULE'.to_sym
      Protocol.include(YourSoftwareSteps)
    else
      raise "the #{plate_reader.type} plate reader in the #{LAB_NAME} has no software steps associated to it, create a module with steps to use plate reader".upcase
    end
  end

  def get_culture_and_media_vols(dilution_factor:, measurement_item:)
    max_well_vol_ul = get_object_type_data(collection: measurement_item)["max_well_vol_ul"].to_f
    cult_vol_ul = (dilution_factor == 'None') ? max_well_vol_ul : dilution(dilution_factor: dilution_factor, vol: max_well_vol_ul)
    media_vol_ul = max_well_vol_ul - cult_vol_ul
    return media_vol_ul, cult_vol_ul
  end
  
  def tech_prefill_and_transfer(pr:, media_sample:, media_vol_ul:, culture_vol_ul:)
    pr.measurement_item = transfer_sample_matrix(source_collection: pr.experimental_item, destination_collection: pr.measurement_item)
    prefill_plate_w_media(collection: pr.measurement_item, media_sample: media_sample, media_vol_ul: media_vol_ul)
    tech_transfer_samples(culture_vol_ul: culture_vol_ul, sources: pr.experimental_item, destinations: pr.measurement_item)
  end
  
  # TODO: Make opts hash allow usner to use to transfer sample matrix by some offset index  
  def transfer_sample_matrix(source_collection:, destination_collection:) #, opt: {starting_idx: [0,0]})
    destination_collection = collection_from(destination_collection)
    source_collection = collection_from(source_collection)
    if (source_collection.dimensions == destination_collection.dimensions)
      source_matrix = source_collection.matrix
      destination_collection.matrix = source_matrix
    else
      destination_collection.matrix = source_collection.matrix.flatten.each_slice(destination_collection.object_type.columns).map {|row| row }
    end
    destination_collection.save()
    return destination_collection
  end
  
  def prefill_plate_w_media(collection:, media_sample:, media_vol_ul:, display_hash: {})
    if !display_hash.empty? || media_vol_ul > 0.0 
      collection = collection_from(collection) 
      show do
        title "Pre-fill #{collection.object_type.name} #{collection}"
        separator
        note "Follow the table below to pre-fill the collection with <b>#{media_sample.name}</b> prior to transferring and resuspending cultures:"
        table highlight_alpha_non_empty(collection) {|r,c| ((display_hash.empty?) ? ("#{media_vol_ul}#{MICROLITERS}") : ("#{display_hash[r][c][:media_vol_ul]}#{MICROLITERS}")) }
      end
    end
  end

  def tech_transfer_samples(culture_vol_ul:, sources:, destinations:) 
    alpha_numeric = coordinates_96
    destination_coll = collection_from(destinations)
    source_coll = collection_from(sources)
    source_alpha = source_coll.get_non_empty.map {|r, c| alpha_numeric[r][c] }
    
    source_alpha_hashmap = nested_hash_data_structure
    destination_coll.get_non_empty.each_with_index do |rc, alpha_idx|
        r, c = rc
        source_alpha_hashmap[r][c] = source_alpha[alpha_idx]
    end
    show do 
      title "Transferring Samples <b>From</b> #{source_coll} <b>To</b> #{destination_coll}"
      separator
      note "Follow the table below to transfer cultures <b>To #{destination_coll}</b>:"
      bullet "The alpha numeric coordinates coorespond to wells in #{source_coll}"
      bullet "Transfer #{culture_vol_ul}#{MICROLITERS} of culture <b>From</b> each well of #{sources}"
      table highlight_alpha_non_empty(destination_coll) {|r,c| "#{source_alpha_hashmap[r][c]}"}
    end
  end


  def add_blanking_samples_to_measurement_item(measurement_item:, blanking_sample:, num_blanks: 3)
    measurement_collection = (measurement_item.instance_of? Collection) ? (measurement_item) : (collection_from(measurement_item))
    count = 0
    blank_wells = []
    while ((measurement_collection.get_empty.length != 0) && (count != num_blanks)) do
      r, c, x = measurement_collection.add_one(blanking_sample, reverse: true)
      create_part_association(collection: measurement_collection, key: "plate_reader_blanks", row: r, col: c, val: "jid#{jid}")
      blank_wells.push([r,c])
      count+=1
    end
    measurement_collection.save()
    return measurement_collection, blank_wells    
  end
  
  def create_part_association(collection:, key:, row:, col:, val:)
    part = collection_from(collection).set_part_data(key, row, col, val)
    part.save()
  end

  def tech_add_blanks(pr:, blanking_sample:, culture_vol_ul:, media_vol_ul:)
    max_well_vol_ul = get_max_well_vol(culture_vol_ul: culture_vol_ul, media_vol_ul: media_vol_ul)
    measurement_collection, blank_wells = add_blanking_samples_to_measurement_item(measurement_item: pr.measurement_item, blanking_sample: blanking_sample)
    show do
      title "Adding #{blanking_sample.name} Blanks to #{measurement_collection}"
      separator
      note "Follow the table below to add #{max_well_vol_ul}#{MICROLITERS} of #{blanking_sample.name} to the appropriate wells:"
      table highlight_alpha_rc(measurement_collection, blank_wells) {|r,c| "#{max_well_vol_ul}#{MICROLITERS}"}
    end
  end
  
  def data_attributes(data:)
    return data[:mt].to_sym, data[:day].to_sym, data[:hour].to_sym, data[:mitem]
  end
  
  # TODO: Error handling when processing and associating upload data
  # Associate to the valid container and correct the data. 
  def process_and_associate_data(pr:, ops:, dilution_factor: 'None', blanking_sample: nil)
    pr.measurement_data.each do |data|
      mt, day, hour, mitem = data_attributes(data: data)
      key = "#{mt}_#{day}_#{hour}"
      upload = (debug) ? Upload.find(11379) : data[:upload]
      associate_data(object=mitem, key=key, data=upload, opts = {}) # Associate upload to object #=> Standard Libs/AssociationManagement
      ops.each {|op| associate_data(object=op.plan, key=key, data=upload, opts = {})} # Associates upload to plans
      if pr.measurement_type == 'Calibration'
        # Process data and create standard curve and optical item volume correction factor
        create_prm_calibration_associations(ops: ops, upload: upload, mitem: mitem, mt: mt)
      else
        # Process upload into corrected_data_matrix
        raw_data_matrix = extract_measurement_matrix_from_csv(upload: upload) 
        blanked_data_matrix, corrected_data_matrix = correct_plate_reader_data(
                                                      pr: pr,
                                                      blanking_sample: blanking_sample,
                                                      data_matrix: raw_data_matrix,
                                                      dilution_factor: dilution_factor
                                                    )
        # Associate to collection
        create_prm_part_associations_for_collection(
          collection: pr.measurement_item,
          data_matrix: corrected_data_matrix,
          measurement_type: mt,
          day: day,
          hour: hour
        ) 
        create_prm_part_associations_for_collection(
          collection: pr.experimental_item,
          data_matrix: corrected_data_matrix,
          measurement_type: mt,
          day: day,
          hour: hour
        ) unless !pr.transfer_required
      end
      # Filters operations that have a culture as input
      create_prm_item_association_for_cultures(ops: ops, mt: mt, day: day, hour: hour, corrected_data_matrix: corrected_data_matrix)
      ops.each {|op| associate_data(object=op, key=key, data={upload_id: upload.id}, opts = {})} # Associates upload_id to operation
    end
  end
  
  def associate_calibration_data(ops, mitem, measurement_type, cal_hash, calc_calibration_data)
    key = measurement_type
    associations = AssociationMap.new(mitem)
    case measurement_type
    when :Calibration_Green_Fluorescence
      trendline_points = {uM_to_val: cal_hash}
      associations.put(key, trendline_points) # ie: 'Calibration_Green_Fluorescence' : {'uM_to_val'=>{50=>2400,25=>1234...}}
      calibration_obj = {standard_curve: calc_calibration_data}
    when :Calibration_Optical_Density
      optical_pts = {vol_to_factor: cal_hash}
      calibration_obj = {vol_to_factor: calc_calibration_data}
      associations.put(key, optical_pts)
    else
      raise "this is not a recognized measurement_type: #{measumrenent_type}"
    end
    ops.each {|op| 
      associate_data(object=op,      key=key, data=calibration_obj, opts = {})
      associate_data(object=op.plan, key=key, data=calibration_obj, opts = {})
    }
    associations.put(key, calibration_obj)
    associations.save
  end
  
  def create_prm_calibration_associations(ops:, upload:, mitem:, mt:)
    data_matrix = extract_measurement_matrix_from_csv(upload: upload) unless debug
    data_matrix = Array.new(8){Array.new(12) { rand(10) } }
    cal_hash = get_calibration_hash(dm: data_matrix, measurement_type: mt)
    calcd_calibration_data = get_calibration_calculated_values(cal_hash: cal_hash, measurement_type: mt)
    associate_calibration_data(ops, mitem, mt, cal_hash, calcd_calibration_data)
  end  

  def create_prm_item_association_for_cultures(ops:, mt:, day:, hour:, corrected_data_matrix:) 
    alpha_coords = coordinates_96
    ops.select {|op| !op.input('Cultures').nil? }.each do |op|
      out_fv, r, c = op.outputs[0],  op.outputs[0].row, op.outputs[0].column
      destination_part, m_val = "#{out_fv.collection.id}/#{alpha_coords[r][c]}", corrected_data_matrix[r][c]
      input_culture = (debug) ? Item.find(234809) : op.input('Cultures').item
      input_cult_associations = AssociationMap.new(input_culture)
      current_da = input_cult_associations.get(mt.to_s) 
      if current_da.nil?
        # Create a new entry under the mt key
        current_da = nested_hash_data_structure
        current_da[day][destination_part][hour] = m_val
      else
        if current_da.has_key? day.to_s
          current_da[day][destination_part] = { hour => m_val }
        else
          current_da[day] = {destination_part => { hour => m_val } }
        end
      end
      input_cult_associations.put(mt.to_s, current_da)
      input_cult_associations.save
    end
  end  
  
  def keep_transfer_plate(pr:, user_val:)
    pr.measurement_item.location = (user_val == 'YES') ? 'Bench' : 'deleted'
  end
  
  def cleaning_up(pr:)
    clean_up_inputs([])
    clean_up_outputs
  end

  # Cleanup input items
  #
  # @params release_arr [array] is an array of items that are found in Aq
  def clean_up_inputs(release_arr)
    operations.store(opts = { interactive: true, method: 'boxes', errored: false, io: 'input' })
    release release_arr, interactive: true
    # operations.store
  end

  # Cleanup output items
  def clean_up_outputs()
    operations.store(interactive: true, method: 'boxes', errored: false, io: 'output')
    show do
      title "Cleaning Up"
      separator
      note "Return any remaining reagents used and clean bench"
    end
  end
  
  def create_prm_part_associations_for_collection(collection:, data_matrix:, measurement_type:, day:, hour:)
    collection_from(collection).get_non_empty.each do |r, c|
      pa = collection_from(collection).get_part_data(key=measurement_type, row=r, col=c)
      if pa.nil? || pa == -1
        pa = {day => {hour => data_matrix[r][c]} }
      else
        (pa.keys.include? day.to_s) ? pa[day].merge!({hour => data_matrix[r][c]}) : pa[day] = {hour => data_matrix[r][c]}
      end
      create_part_association(collection: collection, key: measurement_type, row: r, col: c, val: pa)
    end
  end

  def get_part_association_data_matrix(collection:, key:)
    matrix = Array.new(collection.object_type.rows) {Array.new(collection.object_type.columns) {-1} }
    part_data_arr = get_collection_part_data(collection: collection, key: key)
    collection.get_non_empty.zip(part_data_arr).each do |rc, data|
      r, c = rc
      matrix[r][c] = data
    end
    return matrix
  end
  
  def average_arr_values(arr)
    arr.reduce(:+) / arr.size.to_f
  end
  
  def get_sample_wells(collection:, sample:)
    collection_from(collection).find(sample)
  end
  
  def apply_value_to_matrix(matrix:, value:, operator:, &block)
    if block_given?
      matrix.map {|row| row.map {|part| (!part.nil? || part != -1) ? yield(part, value) : -1 } }
    else
      matrix.map {|row| row.map {|part| (!part.nil? || part != -1) ? (part.send(operator, value)) : (-1) } } 
    end
  end
  
  def correct_plate_reader_data(pr:, blanking_sample:,  data_matrix:, dilution_factor:)
    # Get blank wells
    blanking_wells = get_sample_wells(collection: pr.measurement_item, sample: blanking_sample)
    blanking_value = average_arr_values( blanking_wells.map {|r, c| data_matrix[r][c]} )
    blanked_data_matrix = apply_value_to_matrix(matrix: data_matrix, operator: '-', value: blanking_value)
    # Apply dilution factor to the measurement to calc the experimental_item/source measurement value
    if dilution_factor.is_a? Array 
      # Create a dilution_factor_matrix that has the same dimensions as the collection default value is 'None' dilution
      r, c = collection_from(pr.measurement_item).object_type.rows, collection_from(pr.measurement_item).object_type.columns
      dilution_matrix = Array.new(r) {Array.new(c) { 'None'} }
      # Take dilution_factor array and slice by the dimensions of the collection, next place all of the df into dilution_matrix
      dilution_factor.each_slice(c).map {|s| s}.each_with_index {|s, ridx| 
        s.each_with_index {|dil, cidx| dilution_matrix[ridx][cidx] = dil } }
      # Finally, either apply the dilution factor (df) or take the value from the blanked data matrix
      corrected_data_matrix = dilution_matrix.each_with_index.map {|row, r_idx| row.each_with_index.map {|df, c_idx|
          (df == 'None') ? (blanked_data_matrix[r_idx][c_idx]) : (blanked_data_matrix[r_idx][c_idx] * 1/df)
        }
      }
    else
      corrected_data_matrix = (dilution_factor == 'None') ? (blanked_data_matrix) : (apply_value_to_matrix(matrix: blanked_data_matrix, operator: '*', value: 1/dilution_factor))
    end
    return blanked_data_matrix, corrected_data_matrix
  end
  
  def change_item_location(item:, location:)  
    item.location = location
    item.save()
  end
  
  def get_parameter(op:, fv_str:)
    op.input(fv_str).val
  end
  
  def get_dilution_factor(op:, fv_str:)
    param_val = get_parameter(op: op, fv_str: fv_str).to_s
    dilution_factor = (param_val == 'None') ? param_val : param_val.chomp('X').to_f
  end
  
  def get_object_type_data(collection:)
    JSON.parse(Collection.find(collection.id).object_type.data)
  end
    
  def dilution(dilution_factor:, vol:)
    dilution_factor.to_f * vol.to_f
  end
  
  def get_media_bottle(op)
    op.input('Media').item
  end
  
  # A way to filter Struct objects (depriciated)
  # ie: catalog(pr.measurement_data, by: :item) #=> sorting symbol should be known by user. It is a instance method created in a Struct class
  def catalog(collection, by:)
    catalog = Hash.new { |hash, key| hash[key] = [] }
    collection.each_with_object(catalog) do |item, catalog|
      catalog[item.send(by)] << item
    end
  end
  
  def get_max_well_vol(culture_vol_ul:, media_vol_ul:)
    culture_vol_ul + media_vol_ul
  end
  
  def coordinates_96 
    ('A'..'H').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}}
  end
  
  # could extend a module with common class variables needed in protocol writing
  def gather_materials(empty_containers: [], transfer_required: false, new_materials: [], take_items: [])
    new_materials = new_materials.select {|m| !Protocol.materials_list.include? m}
    if !new_materials.empty?
      show do
        title "Gather The Following Materials"
        separator
        note "Gather the following and bring them to your bench:"
        empty_containers.each {|c|
          ((c.is_a? Item) || (c.is_a? Collection)) ? (check "#{c.object_type.name} and label as <b>#{c.id}</b>") : (check "#{c}")
        }
        new_materials.each {|m| check "#{m}" }
      end 
    end
    take take_items, interactive: true 
    Protocol.materials_list.concat(new_materials).concat(empty_containers)
  end
  
  # Allows for multiple key deeply nested hash[:item][:measurement][:day][:hour] = val
  def nested_hash_data_structure
    Hash.new { |hash, key| hash[key] = Hash.new(&hash.default_proc) }
  end
  
  def get_transfer_display_hash(ops:, input_str:, output_str:, dilution_str:)
    display_hash = nested_hash_data_structure
    ops.each do |op|
      out_fv = op.output(output_str)
      dilution_factor = get_dilution_factor(op: op, fv_str: dilution_str)
      media_vol_ul, cult_vol_ul = get_culture_and_media_vols(dilution_factor: dilution_factor, measurement_item: op.output(output_str).collection)
      dh = display_hash[out_fv.row][out_fv.column]
      dh[:dilution_factor] = dilution_factor
      dh[:item_id] = op.input(input_str).item.id
      dh[:media_vol_ul] = media_vol_ul
      dh[:cult_vol_ul] = cult_vol_ul
      create_part_association(collection: op.output(output_str).collection, key: :source, row: out_fv.row, col: out_fv.column, val: op.input(input_str).item.id)
    end
    display_hash
  end
  
  def tech_transfer_cultures(collection:, display_hash:)
    collection = collection_from(collection)
    show do
      title "Transfer Cultures to #{collection.object_type.name} #{collection}"
      separator
      note "Follow the table below to transfer the correct volume and culture to the appropriate well:"
      table highlight_alpha_non_empty(collection) {|r, c| "item_#{display_hash[r][c][:item_id]}\n#{display_hash[r][c][:cult_vol_ul]}#{MICROLITERS}" }
    end
  end
  
  def get_uninitialized_output_fv_object_type_id(op)
    AllowableFieldType.find(op.outputs[0].allowable_field_type_id).object_type_id
  end
  
  def get_uninitialized_output_object_type(op)
    oti = get_uninitialized_output_fv_object_type_id(op)
    ObjectType.find(oti)
  end
  
  # TODO: Make compataible with both statistics and matrix uploads
  # Takes in a csv upload file, extracts the information on it
  # into a datamatrix object which is returned.
  # Specificly tuned to the output file of the biotek plate reader.
  #
  # @param upload [Upload]  the object which can be resolved to calibration csv
  # @return [WellMatrix]  a WellMatrix holding the measurement for each well
  def extract_measurement_matrix_from_csv(upload:)
    table = parse_upload_csv(upload: upload)
    dm =  Array.new(8) { Array.new(12) {-1} } 
    # If the file that is saved, exported, and uploaded was formatted as a 'Statistics' table
    table.each_with_index do |row, idx|
      next if idx.zero?
      well_coord = row[2]
      next if well_coord.nil?
      measurement = row[3].to_f
      next if measurement.nil?
      r, c = find_rc_from_alpha_coord(well_coord).first
      (dm[r][c]) ? dm[r][c] = measurement : -1
    end
    dm
  end
  
  def parse_upload_csv(upload:)
    require 'csv'
    require 'open-uri'
    table = []
    CSV.new(open(upload.expiring_url)).each { |line| table.push(line) }
    return table
  end

  # Finds where an alpha_coordinate is in a 96 Well plate
  #
  # @params alpha_coord [array or string] can be a single alpha_coordinate or a list of alpha_coordinate strings ie: 'A1' or ['A1','H7']
  # @return rc_list [Array] a list of [r,c] coordinates that describe where the alpha_coord(s) are in a 96 well matrix
  def find_rc_from_alpha_coord(alpha_coord)
    # look for where alpha coord is 2-D array coord
    coordinates_96 = ('A'..'H').to_a.map {|row| (1..12).to_a.map {|col| row + col.to_s}} 
    rc_list = []
    if alpha_coord.instance_of? Array
      alpha_coord.each {|a_coord|
        (!a_coord.nil?) ? coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == a_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } } : next
      }
    else
      coordinates_96.map.each_with_index { |row, r_idx| row.each_index.select {|col| row[col] == alpha_coord.upcase}.each { |c_idx| rc_list.push([r_idx, c_idx]) } }
    end
    return rc_list
  end
  
  def add_solution_to_op(op:, fv_str:, item:)
    if item.instance_of? Collection
      ot = item.object_type
    elsif item.instance_of? Item
      ot = ObjectType.find(item.object_type_id)
    end
    t = op.add_input(fv_str, item.sample, ot)
    op.input(fv_str).set item: item
  end
    
end # module PlateReaderHelper

library: {name: PlateReaderSoftware, category: Plate Reader}
code_source:
# Eriberto Lopez
# elopez3@uw.edu
# 03/14/19

require 'date'

module AqUpload
  # Provides a upload button in a showblock in order to upload a single file
  #
  # @params upload_filename [string] can be the name of the file that you want tech to upload
  # @return up_show [hash] is the upload hash created in the upload show block
  # @return up_sym [symbol] is the symbol created in upload show block that will be used to access upload
  def upload_show(saving_dir:, upload_filename:)
    upload_var = "file"
    up_show = show do
      title "Upload Your Measurements"
      separator
      note "Select and Upload: #{saving_dir}/<b>#{upload_filename}</b>"
      upload var: upload_var.to_sym
    end
    return up_show, upload_var.to_sym
  end
  
  # Retrieves the upload object from upload show block
  #
  # @params up_show [hash] is the hash that is created in the upload show block
  # @params up_sym [symbol] is the symbol created in the upload show block and used to access file uploaded
  # @return upload [upload_object] is the file that was uploaded in the upload show block
  def get_upload_from_show(up_show:, up_sym:)
    (!up_show[up_sym].nil?) ? (upload = up_show[up_sym].map {|up_hash| Upload.find(up_hash[:id])}.shift) : nil #(show {warning "no upload was found".upcase})
  end
end

module KlavinsLabPlateReaderSoftware
  include AqUpload
  
  def setup_plate_reader_software_env(pr:, new_mtype:)
    open_software(pr: pr)
    new_mtype = select_measurement_type_template(pr: pr) if new_mtype
    preheat(pr: pr)
    return new_mtype
  end

  def take_measurement_and_upload_data(pr:)
    timepoint = read_plate(pr: pr)
    pr.measurement_data = export_save_and_upload_measurement_data(pr: pr, timepoint: timepoint)
  end

  def export_save_and_upload_measurement_data(pr:, timepoint:)
    sw = pr.software
    day = timepoint.strftime "%m%d%Y"
    hour = timepoint.strftime "%H%M"
    measurement_data = [] # Collect uploads for a measurement_item's measurement_type(s) ie: 'Optical Density & Green Fluorescence'
    export_measurement_types(pr: pr).each do |mt|
      measurement_filename = get_measurement_filename(measurement_item: pr.measurement_item, measurement_type: mt, timepoint: timepoint)
      show do
        title "Export & Save #{mt} Measurements Plate Reader"
        separator
        warning "Make sure that no other Excel sheets are open before exporting!".upcase
      end
      show do
        title "Export & Save #{mt} Measurements Plate Reader"
        separator
      # EXPORT
        image sw[:images][:export_new_data]
        bullet "Select the <b>'Statistics'</b> tab"
        bullet "Select Data: <b>#{sw[:export_mesurement_type][mt.to_sym][:dtype]}</b>"
        note "Next, click the Excel sheet export button. <b>The sheet will appear on the menu bar below</b>."
        image sw[:images][:export_data_button]
      # SAVE
        warning "Make sure to save file as a '.csv' file!!"
        note "Go to sheet and <b>'Save as'</b> ==> <b>#{measurement_filename}</b> under the <b>#{sw[:saving_directory]}</b> folder."
        image sw[:images][:save_export]
      end
      # UPLOAD
      attempt = 0
      up_show, up_sym = {}, nil #upload_show(saving_dir: sw[:saving_directory], upload_filename: measurement_filename)
      while ((!up_show.keys.include? up_sym) || (attempt == 3)) && (!debug) do
        up_show, up_sym = upload_show(saving_dir: sw[:saving_directory], upload_filename: measurement_filename)
        attempt+=1
      end
      upload = get_upload_from_show(up_show: up_show, up_sym: up_sym)
      upload_data = {
        mitem: pr.measurement_item,
        mt: mt.to_s.gsub(' ','_'),
        day: day,
        hour: hour,
        upload: upload
      }
      measurement_data.push(upload_data)
    end
    return measurement_data
  end

  def go_to_computer
    show {warning "<b>The next steps should be done on the plate reader computer</b>.".upcase}
  end
  
  def open_software(pr:)
    if (!pr.software_open)
      go_to_computer
      show do
        title "Open #{pr.type} Plate Reader Software"
        separator
        note "Click on the icon shown below to open the plate reader software:"
        image pr.software[:images][:open_software]
      end
    else
      log_info 'the software is already open!'.upcase
    end
    pr.software_open = true
  end
  
  def select_measurement_type_template(pr:)
    mt_template = pr.software[:measurement_type_templates][pr.measurement_type.to_sym]
    show do 
      title "Select #{pr.type} #{pr.measurement_type.to_s} Template"
      separator
      note "Under <b>'Create a New Item'</b> click <b>'Experiment'</b>"
      note "From the pop-up list select: <b>#{mt_template}</b>"
    end
    new_mtype = false
    return new_mtype # the measurement_type is no longer new and can be reaused if necessary
  end
  
  def preheat(pr:)
    show do 
      title "Warming Up..."
      separator
      note "Let the #{pr.type} Plate Reader warm up if necessary."
      note "In the following preparative steps, minimize the amount of time that the 
      <b>#{ObjectType.find(pr.experimental_item.object_type_id).name} #{pr.experimental_item}</b>
      is not under experimental conditions prior to the measurement."
    end 
  end
  
  def get_experiment_filename(pr:, timepoint:)
    "jid_#{jid}_experiment_#{pr.measurement_type}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '')
  end

  def read_plate(pr:)
    go_to_computer
    timepoint = Time.now
    show do 
      title "Take #{pr.measurement_type} Measurement"
      separator
      note "Click Read Plate icon shown below"
      image pr.software[:images][:read_plate]
      note "Next, click the <b>'READ'</b> on the pop-up window."
      bullet "Name experiment file: <b>#{get_experiment_filename(pr: pr, timepoint: timepoint)}</b>"
      bullet "<b>Save</b> it under the <b>#{pr.software[:saving_directory]}</b> folder."
      note "Finally, load plate #{pr.measurement_item} then, click <b>'OK'</b> to take measurement"
    end
    pr.measurement_item.location = pr.type.to_s
    return timepoint
  end
  
  def get_measurement_filename(measurement_item:, measurement_type:, timepoint:)
    mt = measurement_type.to_s.gsub(' ', '') 
    "jid_#{jid}_#{mt}_item_#{measurement_item.id}_t#{timepoint.strftime "%H%M"}_#{timepoint.strftime "%m%d%Y"}".gsub(' ', '_')
  end
  
  def export_measurement_types(pr:)
    mt = pr.measurement_type.to_s
    case mt
    when 'Optical Density', 'Time Series', 'Green Fluorescence'
      [mt]
    when 'Optical Density & Green Fluorescence'
      mt.split(' & ')
    when 'Calibration'
      ["#{mt} Optical Density", "#{mt} Green Fluorescence"]
    else
      raise "#{pr.measurement_type} is not supported by this plate reader or does not have the measurement_type added to the #{pr.type} software properties"
    end
  end
  

end # module Gen5BioTekSoftware
